PsychoPy2experiment version="2022.2.3"
Settings
  Experiment info = {'Your Test ID': '', 'Full Name': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['stimuli/teaching_link.jpg', 'stimuli/teaching_link.xlsx', 'stimuli/link_sheets/article1_Georgia_links.xlsx', 'stimuli/link_sheets/article1_Roboto_links.xlsx', 'stimuli/link_sheets/article1_Times_links.xlsx', 'stimuli/link_sheets/article2_Georgia_links.xlsx', 'stimuli/link_sheets/article2_Roboto_links.xlsx', 'stimuli/link_sheets/article2_Times_links.xlsx', 'stimuli/link_sheets/article3_Georgia_links.xlsx', 'stimuli/link_sheets/article3_Roboto_links.xlsx', 'stimuli/link_sheets/article3_Times_links.xlsx', 'stimuli/link_sheets/article4_Georgia_links.xlsx', 'stimuli/link_sheets/article4_Roboto_links.xlsx', 'stimuli/link_sheets/article4_Times_links.xlsx', 'stimuli/link_sheets/article5_Georgia_links.xlsx', 'stimuli/link_sheets/article5_Roboto_links.xlsx', 'stimuli/link_sheets/article5_Times_links.xlsx', 'stimuli/link_sheets/article6_Georgia_links.xlsx', 'stimuli/link_sheets/article6_Roboto_links.xlsx', 'stimuli/link_sheets/article6_Times_links.xlsx', 'stimuli/link_sheets/article7_Open Sans_links.xlsx', 'stimuli/article_images/article1_Georgia_Link.jpg', 'stimuli/article_images/article1_Georgia_NoLink.jpg', 'stimuli/article_images/article1_Roboto_Link.jpg', 'stimuli/article_images/article1_Roboto_NoLink.jpg', 'stimuli/article_images/article1_Times_Link.jpg', 'stimuli/article_images/article1_Times_NoLink.jpg', 'stimuli/article_images/article2_Georgia_Link.jpg', 'stimuli/article_images/article2_Georgia_NoLink.jpg', 'stimuli/article_images/article2_Roboto_Link.jpg', 'stimuli/article_images/article2_Roboto_NoLink.jpg', 'stimuli/article_images/article2_Times_Link.jpg', 'stimuli/article_images/article2_Times_NoLink.jpg', 'stimuli/article_images/article3_Georgia_Link.jpg', 'stimuli/article_images/article3_Georgia_NoLink.jpg', 'stimuli/article_images/article3_Roboto_Link.jpg', 'stimuli/article_images/article3_Roboto_NoLink.jpg', 'stimuli/article_images/article3_Times_Link.jpg', 'stimuli/article_images/article3_Times_NoLink.jpg', 'stimuli/article_images/article4_Georgia_Link.jpg', 'stimuli/article_images/article4_Georgia_NoLink.jpg', 'stimuli/article_images/article4_Roboto_Link.jpg', 'stimuli/article_images/article4_Roboto_NoLink.jpg', 'stimuli/article_images/article4_Times_Link.jpg', 'stimuli/article_images/article4_Times_NoLink.jpg', 'stimuli/article_images/article5_Georgia_Link.jpg', 'stimuli/article_images/article5_Georgia_NoLink.jpg', 'stimuli/article_images/article5_Roboto_Link.jpg', 'stimuli/article_images/article5_Roboto_NoLink.jpg', 'stimuli/article_images/article5_Times_Link.jpg', 'stimuli/article_images/article5_Times_NoLink.jpg', 'stimuli/article_images/article6_Georgia_Link.jpg', 'stimuli/article_images/article6_Georgia_NoLink.jpg', 'stimuli/article_images/article6_Roboto_Link.jpg', 'stimuli/article_images/article6_Roboto_NoLink.jpg', 'stimuli/article_images/article6_Times_Link.jpg', 'stimuli/article_images/article6_Times_NoLink.jpg', 'stimuli/article_images/article7_Open Sans_Link.jpg', 'stimuli/article_images/article7_Open Sans_NoLink.jpg', 'stimuli/memory/memory_stimulus_sheet.xlsx', 'stimuli/memory/no.jpg', 'stimuli/memory/yes.jpg', 'stimuli/life_consent.png', 'stimuli/prolific_consent.png', 'stimuli/screening_images/snellen_numbered.png', 'bank-1300155_640.png', 'stimuli/screening_images/pelli_robson_numbered.jpg', 'stimuli/popup_images/article1_popup1_Georgia.jpg', 'stimuli/popup_images/article1_popup1_Roboto.jpg', 'stimuli/popup_images/article1_popup1_Times.jpg', 'stimuli/popup_images/article1_popup2_Georgia.jpg', 'stimuli/popup_images/article1_popup2_Roboto.jpg', 'stimuli/popup_images/article1_popup2_Times.jpg', 'stimuli/popup_images/article1_popup3_Georgia.jpg', 'stimuli/popup_images/article1_popup3_Roboto.jpg', 'stimuli/popup_images/article1_popup3_Times.jpg', 'stimuli/popup_images/article1_popup4_Georgia.jpg', 'stimuli/popup_images/article1_popup4_Roboto.jpg', 'stimuli/popup_images/article1_popup4_Times.jpg', 'stimuli/popup_images/article1_popup5_Georgia.jpg', 'stimuli/popup_images/article1_popup5_Roboto.jpg', 'stimuli/popup_images/article1_popup5_Times.jpg', 'stimuli/popup_images/article1_popup6_Georgia.jpg', 'stimuli/popup_images/article1_popup6_Roboto.jpg', 'stimuli/popup_images/article1_popup6_Times.jpg', 'stimuli/popup_images/article1_popup7_Georgia.jpg', 'stimuli/popup_images/article1_popup7_Roboto.jpg', 'stimuli/popup_images/article1_popup7_Times.jpg', 'stimuli/popup_images/article2_popup1_Georgia.jpg', 'stimuli/popup_images/article2_popup1_Roboto.jpg', 'stimuli/popup_images/article2_popup1_Times.jpg', 'stimuli/popup_images/article2_popup2_Georgia.jpg', 'stimuli/popup_images/article2_popup2_Roboto.jpg', 'stimuli/popup_images/article2_popup2_Times.jpg', 'stimuli/popup_images/article2_popup3_Georgia.jpg', 'stimuli/popup_images/article2_popup3_Roboto.jpg', 'stimuli/popup_images/article2_popup3_Times.jpg', 'stimuli/popup_images/article2_popup4_Georgia.jpg', 'stimuli/popup_images/article2_popup4_Roboto.jpg', 'stimuli/popup_images/article2_popup4_Times.jpg', 'stimuli/popup_images/article2_popup5_Georgia.jpg', 'stimuli/popup_images/article2_popup5_Roboto.jpg', 'stimuli/popup_images/article2_popup5_Times.jpg', 'stimuli/popup_images/article2_popup6_Georgia.jpg', 'stimuli/popup_images/article2_popup6_Roboto.jpg', 'stimuli/popup_images/article2_popup6_Times.jpg', 'stimuli/popup_images/article3_popup1_Georgia.jpg', 'stimuli/popup_images/article3_popup1_Roboto.jpg', 'stimuli/popup_images/article3_popup1_Times.jpg', 'stimuli/popup_images/article3_popup2_Georgia.jpg', 'stimuli/popup_images/article3_popup2_Roboto.jpg', 'stimuli/popup_images/article3_popup2_Times.jpg', 'stimuli/popup_images/article3_popup3_Georgia.jpg', 'stimuli/popup_images/article3_popup3_Roboto.jpg', 'stimuli/popup_images/article3_popup3_Times.jpg', 'stimuli/popup_images/article3_popup4_Georgia.jpg', 'stimuli/popup_images/article3_popup4_Roboto.jpg', 'stimuli/popup_images/article3_popup4_Times.jpg', 'stimuli/popup_images/article3_popup5_Georgia.jpg', 'stimuli/popup_images/article3_popup5_Roboto.jpg', 'stimuli/popup_images/article3_popup5_Times.jpg', 'stimuli/popup_images/article4_popup1_Georgia.jpg', 'stimuli/popup_images/article4_popup1_Roboto.jpg', 'stimuli/popup_images/article4_popup1_Times.jpg', 'stimuli/popup_images/article4_popup2_Georgia.jpg', 'stimuli/popup_images/article4_popup2_Roboto.jpg', 'stimuli/popup_images/article4_popup2_Times.jpg', 'stimuli/popup_images/article4_popup3_Georgia.jpg', 'stimuli/popup_images/article4_popup3_Roboto.jpg', 'stimuli/popup_images/article4_popup3_Times.jpg', 'stimuli/popup_images/article4_popup4_Georgia.jpg', 'stimuli/popup_images/article4_popup4_Roboto.jpg', 'stimuli/popup_images/article4_popup4_Times.jpg', 'stimuli/popup_images/article4_popup5_Georgia.jpg', 'stimuli/popup_images/article4_popup5_Roboto.jpg', 'stimuli/popup_images/article4_popup5_Times.jpg', 'stimuli/popup_images/article5_popup1_Georgia.jpg', 'stimuli/popup_images/article5_popup1_Roboto.jpg', 'stimuli/popup_images/article5_popup1_Times.jpg', 'stimuli/popup_images/article5_popup2_Georgia.jpg', 'stimuli/popup_images/article5_popup2_Roboto.jpg', 'stimuli/popup_images/article5_popup2_Times.jpg', 'stimuli/popup_images/article5_popup3_Georgia.jpg', 'stimuli/popup_images/article5_popup3_Roboto.jpg', 'stimuli/popup_images/article5_popup3_Times.jpg', 'stimuli/popup_images/article5_popup4_Georgia.jpg', 'stimuli/popup_images/article5_popup4_Roboto.jpg', 'stimuli/popup_images/article5_popup4_Times.jpg', 'stimuli/popup_images/article5_popup5_Georgia.jpg', 'stimuli/popup_images/article5_popup5_Roboto.jpg', 'stimuli/popup_images/article5_popup5_Times.jpg', 'stimuli/popup_images/article6_popup1_Georgia.jpg', 'stimuli/popup_images/article6_popup1_Roboto.jpg', 'stimuli/popup_images/article6_popup1_Times.jpg', 'stimuli/popup_images/article6_popup2_Georgia.jpg', 'stimuli/popup_images/article6_popup2_Roboto.jpg', 'stimuli/popup_images/article6_popup2_Times.jpg', 'stimuli/popup_images/article6_popup3_Georgia.jpg', 'stimuli/popup_images/article6_popup3_Roboto.jpg', 'stimuli/popup_images/article6_popup3_Times.jpg', 'stimuli/popup_images/article6_popup4_Georgia.jpg', 'stimuli/popup_images/article6_popup4_Roboto.jpg', 'stimuli/popup_images/article6_popup4_Times.jpg', 'stimuli/popup_images/article6_popup5_Georgia.jpg', 'stimuli/popup_images/article6_popup5_Roboto.jpg', 'stimuli/popup_images/article6_popup5_Times.jpg', 'stimuli/popup_images/article7_popup1_Open Sans.jpg', 'stimuli/popup_images/article7_popup2_Open Sans.jpg', 'stimuli/popup_images/article7_popup3_Open Sans.jpg', 'next_button.png', 'back_button.jpg', 'back_text.jpg', 'close_button.jpg', 'stimuli/stimulus_set.xlsx', 'stimuli/demographics.xlsx', 'blocks/blocks_1.xlsx', 'bank-1300155_640.png']
  Screen = 1
  Units = pix
  Use version = 2022.2.3
  Window size (pixels) = [1680, 1050]
  color = 0.4275, 0.4275, 0.4275
  expName = article_study_memory
  keyboardBackend = ioHub
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Routines
  Routine instructions_questions
    TextComponent text_2
      color [set every repeat] = $textColor
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = instructionTextSize*y_scale
      pos [set every repeat] = (xAxisCenter, 0)
      startVal [time (s)] = 0.0
      wrapWidth = wrapWidthText
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      text:
        You've read the article.

        Having completed the article, the next step involves addressing multiple-choice questions related to its content. Please select the answer that aligns best with your understanding of the article in the upcoming section.

        Please press the button on the right hand corner to continue.
    CodeComponent code_5
      Code Type = JS
      Begin JS Routine:
        text_2.setAlignHoriz("left");
    ImageComponent nextButton_questionInstructions
      image = next_button.png
      pos [set every repeat] = (buttonX,buttonY)
      size [set every repeat] = (buttonWidth,buttonHeight)
      startVal [time (s)] = .2
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    MouseComponent mouseQuestionInstructions
      clickable = nextButton_questionInstructions
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = $mouseDelayOther
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  Routine setBlockParameters
    CodeComponent blockParameters
      Code Type = JS
      Begin JS Routine:
        // block information (get from the blocks file) //

        // select the stimulus set file based on counterbalancing
        blockFileName                   = thisBlock['stimulus_file']   // name of the excel file that contains stim set for the block
        stimulus_file_counterbalanced   = blockFileName + ".xlsx"
        dotIndex                        = stimulus_file_counterbalanced.indexOf(".");
        blockName                       = stimulus_file_counterbalanced.slice(0, (dotIndex - 1)); // remove .xlsx from the file name
        blockName                       = blockName.substring(8)                  // remove "stimuli/" text from the block name
        blockName                       = "article_trials" // add counterbalance condition to the end of block name

        console.log({blockName, stimulus_file_counterbalanced, thisBlock})

        // practice and test trials, fonts and their names (get from the blocks file)
        practiceCount                   = thisBlock['practiceTrials']; // how many practice trials
        testCount                       = thisBlock['testTrials'];     // how many test trials
        practiceFonts                   = thisBlock['practiceFonts']; // font is used in practice
        practiceSpacings                = thisBlock['practiceSpacings']
        blockFonts                      = thisBlock['testFonts'];  // fonts used in this block
        blockSpacings                   = thisBlock['testSpacings']; // spacing levels used in this block

        /* Separate fonts and spacings, then count  */
        blockFonts                      = blockFonts.split(";")
        blockSpacings                   = blockSpacings.split(";")
        blockFontCount                  = blockFonts.length;
        blockSpacingCount               = blockSpacings.length;

        // add link conditions for the article study
        linkLabels                      = ['Link','NoLink']
        practiceLink                    = ['Link']
        linkCount                       = linkLabels.length

        repFontTrials                   = testCount / (blockFontCount * linkCount); // these two have to be divisible

        // reproduce block fonts in an array to match the trial count
        // e.g. blockFonts = ["arial", "helvetica"], blockSpacings = ["0","0.05"], testCount = 4,repFontTrials = 1
        // new block font variable: blockFonts = ["arial", "helvetica", "arial", "helvetica"];
        blockFontsForDisplay                = [];
        blockConditionsForDisplay_temp      = []; // parameters of a trial is stored in this variable - only in loop: temp -
        blockConditionsForRegistry_temp     = []; // parameters are registered as strings for registering fit-clashes - only in loop: temp -

        /* create a dictionary for registering most accurate and fastest conditions */
        getFitClash_all                 = {}; // fit clash for the combination of conditions
        getFitClash_spacing             = {}; // fit-clash for only spacings
        getFitClash_font                = {}; // fit clash for only fonts

        iteration = -1


        for (var i = 0; i < blockFontCount; i++) {

            // initialize fit-clash storage only for fonts
            getFitClash_font[blockFonts[i]] = { "setid": [], "wpm": [], "accuracy": [] };
            //console.log("getFitClash_font[" + blockFonts[i] + "]:", getFitClash_font[blockFonts[i]]);

            for (var j = 0; j < linkCount; j++) {
                iteration               = iteration+1
                if (i === 0) {
                    // initialize fit-clash storage only for link condition
                    // do not repeat this for other font iterations, we only need one of each spacing
                    getFitClash_spacing[linkLabels[j]] = { "setid": [], "wpm": [], "accuracy": [] };
                    //console.log("getFitClash_spacing[" + spacingLabels[blockSpacings[j]] + "]:", getFitClash_spacing[spacingLabels[blockSpacings[j]]]);
                }

                // register all possible condition parameters both as
                // separate parameters, and as labels that describe the interaction
                // of these parameters
                //
                // parameters = ["Roboto Flex","0.05"];
                // description = ["Roboto Flex_sp3"]; (assuming spacing has three levels [-0.05,0,0,05],
                // example would be the third level of the spacing condition: sp3
                var currentConditionText        = blockFonts[i] + '_' + linkLabels[blockSpacings[j]];
                var currentConditionParameters  = [blockFonts[i], linkLabels[j]];

                blockConditionsForRegistry_temp.push(currentConditionText);
                blockConditionsForDisplay_temp.push(currentConditionParameters);
                // initialize fit-clash storage for interactions of font and spacing conditions
                getFitClash_all[currentConditionText] = { "setid": [], "wpm": [], "accuracy": [] };
                //console.log("getFitClash_all[" + currentConditionText + "]:", getFitClash_all[currentConditionText]);
            }
        }

        console.log({blockConditionsForRegistry_temp, blockConditionsForDisplay_temp})

        // reproduce conditions lists to match test trial count
        // if there are 6 test trials, 1 font, and 3 spacings
        //      • 1 x 3 has to be repeated twice to match test count
        //      • conds = ['roboto_sp1','roboto_sp2','roboto_sp3']
        //      • reproduced_conds =  ['roboto_sp1','roboto_sp2','roboto_sp3','roboto_sp1','roboto_sp2','roboto_sp3']

        // counterbalance order of font weights
        // ["arial", "helvetica", "arial", "helvetica"]
        // ["arial", "arial", "helvetica", "helvetica"] = (group 'A') = (PID = 0)
        // ["arial","helvetica", "helvetica", "arial"] = (group 'B') = (PID = 1) etc.
        //if (repFontTrials > 1){
        blockConditionsForDisplay = [] // parameters of a trial is stored in this variable
        blockConditionsForRegistry = []  // parameters are registered as strings for registering fit-clashes
        for (var i = 0; i < repFontTrials; i++) {

            if (randomization_scheme === 'randomized') {
                // randomize the order of conditions
                blockConditionsForDisplay = blockConditionsForDisplay.concat(randomArrayShuffle(blockConditionsForDisplay_temp));
                blockConditionsForRegistry = blockConditionsForRegistry.concat(randomArrayShuffle(blockConditionsForRegistry_temp));
                } else if (randomization_scheme  === 'counterbalanced'){
                    // apply latin square counterbalancing to conditions
                                    switch (cb_index) {
                          case 0:
                            blockConditionsForDisplay = [['Times','Link'], ['Times','NoLink'], ['Roboto','Link'], ['Roboto','NoLink'], ['Georgia','Link'], ['Georgia','NoLink']]
                            break;
                          case 1:
                            blockConditionsForDisplay = [['Times','NoLink'], ['Times','Link'], ['Roboto','NoLink'], ['Roboto','Link'], ['Georgia','NoLink'], ['Georgia','Link']]
                            break;
                          case 2:
                            blockConditionsForDisplay = [['Georgia','Link'],  ['Georgia','NoLink'],  ['Times','NoLink'],['Times','Link'], ['Roboto','Link'], ['Roboto','NoLink']]
                            break;
                          case 3:
                            blockConditionsForDisplay = [['Georgia','NoLink'],['Georgia','Link'], ['Times','Link'], ['Times','NoLink'],  ['Roboto','NoLink'], ['Roboto','Link']]
                            break;
                          case 4:
                            blockConditionsForDisplay = [['Roboto','Link'], ['Roboto','NoLink'],['Georgia','Link'], ['Georgia','NoLink'],  ['Times','NoLink'],['Times','Link' ]]
                            break;
                          case 5:
                            blockConditionsForDisplay = [['Roboto','NoLink'],['Roboto','Link'], ['Georgia','NoLink'],['Georgia','Link'],['Times','Link'], ['Times','NoLink']]
                            break;
                          default:
                            throw new Error(`Got invalid option ${cb_index}`);
                        }
        //            blockConditionsForDisplay = blockConditionsForDisplay.concat(balancedLatinSquare(blockConditionsForDisplay_temp,cb_index));
                    blockConditionsForRegistry = blockConditionsForRegistry.concat(balancedLatinSquare(blockConditionsForRegistry_temp,cb_index));

                    }

        }

        console.log({blockConditionsForDisplay, blockConditionsForRegistry})

        if (practiceCount >= 1) {
            // if there is a practice trial
            //console.log('practiceSpacings: ',practiceSpacings)
            //console.log('practiceSpacings type: ',typeof practiceSpacings)
            //console.log('spacingLabels: ',spacingLabels)
            //console.log('spacingLabels['+practiceSpacings.toString()+']: ',spacingLabels[practiceSpacings.toString()])

            // add the practice font to the beginning of the counterbalanced font order
            blockConditionsForDisplay.unshift([practiceFonts,practiceLink[0]]);
            blockConditionsForRegistry.unshift(practiceFonts+"_"+practiceLink[0])

            // counterbalance order of passage sets
            passageSetIndices = range(1,testCount);
            passageSetOrder   = passageSetIndices //randomArrayShuffle(passageSetIndices)
        //    if (randomization_scheme === 'randomized') {
        //        // randomize passage order
        //        passageSetOrder   = randomArrayShuffle(passageSetIndices)
        //        } else if (randomization_scheme  === 'counterbalanced'){
        //            // apply latin square counterbalancing to passage order
        //            passageSetOrder   = balancedLatinSquare(passageSetIndices,PID);
        //            }
            // always show the practice trial (0 index) the first, so we concatenate the latin-square
            // balanced/randomized array to 0.
            passageSetOrder.unshift(0);

            } else {
                // Order passage sets according to counterbalance groups
                // counterbalance order of passage sets
                passageSetIndices = range(0,testCount);
                passageSetOrder   = randomArrayShuffle(passageSetIndices)
        //    if (randomization_scheme === 'randomized') {
        //        // randomize passage order
        //        passageSetOrder   = randomArrayShuffle(passageSetIndices)
        //        } else if (randomization_scheme  === 'counterbalanced'){
        //            // apply latin square counterbalancing to passage order
        //            passageSetOrder   = balancedLatinSquare(passageSetIndices,cb_index);
        //            }

            }
        // initiate/reset trial iteration index
        trialIteration = -1;

        // block iteration index
        blockIteration = thisBlock.thisN;


        console.log('finished block preparation')
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  Routine initialize
    CodeComponent functions_fitClash
      Code Type = JS
      Begin JS Routine:
        // FUNCTIONS FOR FIT AND CLASH ESTIMATIONS //

        // you'll notice that each of the functions have '2' in their name.
        // Reason is that we need to duplicate these into a new name to be
        // able to use them in other components. Otherwise Psychopy does not
        // recognize your functions.

        function getFit2(ftArray,field){

            // field is the key in which we make the first comparison: e.g. "accuracy".
            var conditions = Object.keys(ftArray)
            var fitCondition = conditions[0] // fit condition by acc
            var fitAcc = ftArray[fitCondition][field]; // fit acc score
            var fitWpm = ftArray[fitCondition]["wpm"]; // fit by acc wpm

            console.log('fit array: ',ftArray)

            for (var keyi = 1; keyi < conditions.length; keyi++){
                // starts from the second key
                if (ftArray[conditions[keyi]][field]  < fitAcc) {
                    // if remaining key's accuracy smaller than the first, stop loop, get first one as max
                    break;
                } else if (ftArray[conditions[keyi]]["wpm"]>fitWpm){
                     // if remaining keys have the same accuracy, compare if wpms are the same
                        fitWpm = ftArray[conditions[keyi]]["wpm"]
                        fitCondition = conditions[keyi]
                    }

            }
            return [fitCondition,fitWpm,fitAcc]
        }

        getFit = getFit2

        function getClash2(ftArray,field){

            // field is the key in which we make the first comparison: e.g. "accuracy".
            var conditions = Object.keys(ftArray)
            var clashCondition = conditions[conditions.length-1] // clash condition by acc
            var clashAcc = ftArray[clashCondition][field]; // clash acc score
            var clashWpm = ftArray[clashCondition]["wpm"]; // clash by acc wpm

            console.log('clash array: ',ftArray)

            for (var keyi = conditions.length-1; keyi > -1; keyi--){
                // starts from the last key and go towards the first key
                // because these are ordered from highest to lowest accuracy


                if (ftArray[conditions[keyi]][field]  > clashAcc) {
                    console.log('clash curr key: ',conditions[keyi])
                    console.log('clash curr acc: ',ftArray[conditions[keyi]][field])
                    // if remaining key's accuracy smaller than the first, stop loop, get first one as max
                    break;
                } else if (ftArray[conditions[keyi]]["wpm"]<clashWpm){
                     // if remaining keys have the same accuracy, compare if wpms are the same
                        clashWpm = ftArray[conditions[keyi]]["wpm"]
                        clashCondition = conditions[keyi]
                    }

            }

            return [clashCondition,clashWpm,clashAcc]

        }

        getClash = getClash2


        function sortObjects2(obj, num,field) {
            const requiredObj = {};
            if(num > Object.keys(obj).length){
               return false;
            };
            Object.keys(obj).sort((a, b) => obj[b][field] - obj[a][field]).forEach((key, ind) =>
            {
               if(ind < num){
                  requiredObj[key] = obj[key];
               }
            });
            return requiredObj;
         };

        sortObjects = sortObjects2

        function loopAverage2(ftArray, condArray){
            // ftArray =  fitClashArray (e.g. [[getFitClash_all] [getFitClash_spacing] [getFitClash_font]])


            // get averages of wpm and acc for all fit-clash objects (all, spacing, font etc.)
            for (var obji = 0; obji < ftArray.length; obji++){
                // loop over fit-clash objects
                var currObj = ftArray[obji]
                var currConds = Object.keys(currObj)
                console.log('currObj: ',currObj)
                console.log('currConds: ',currConds)
                console.log('averaging array: ',obji)

                // get avg of wpm and acc for this object (obji) and this condition (condi; e.g. flex_sp1, "-0.05","flex")
                for (var condi = 0; condi <currConds.length; condi++) {
                    console.log('averaging condition: ',currConds[condi])
                    currObj[currConds[condi]].wpm = Math.round(getAverage(currObj[currConds[condi]].wpm)*1000)/1000

                    currObj[currConds[condi]].accuracy = Math.round(getAverage(currObj[currConds[condi]].accuracy)*1000)/1000

                }
                ftArray[obji] = currObj
            }

            return ftArray
        }

        loopAverage = loopAverage2

        function getAverage2(myNums){

            // create a variable for the sum and initialize it
            let sum = 0;

            // iterate over each item in the array
            for (let i = 0; i < myNums.length; i++ ) {
            sum += myNums[i];
            }
            var result = sum / myNums.length
            return result
        }

        getAverage = getAverage2

        function isKeyPressed2(keyEvents, key) {
        return keyEvents.some(event => event.pigletKey === key && event.status === core.Keyboard.KeyStatus.KEY_DOWN)
        }

        isKeyPressed = isKeyPressed2
    CodeComponent functions
      Code Type = JS
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      Begin JS Experiment:
        // FUNCTIONS //

        // you'll notice that each of the functions have '2' in their name.
        // Reason is that we need to duplicate these into a new name to be
        // able to use them in other components. Otherwise Psychopy does not
        // recognize your functions.
        // FUNCTIONS //

        // you'll notice that each of the functions have '2' in their name.
        // Reason is that we need to duplicate these into a new name to be
        // able to use them in other components. Otherwise Psychopy does not
        // recognize your functions.

        // having multiple values in excel turns the coordinate values into strings
        // this function transforms strings into numbers


        function convertToNumber2(yourObject,imagesize,vsize,y_scale){
            var currentKeys = Object.keys(yourObject)
            console.log('all keys of list loop', currentKeys)
            // loop over all keys (except the first one which is "text")
            for (var k = 0; k < currentKeys.length; k++){
                var key             = currentKeys[k]
                var keyValue        = yourObject[key]
                // console.log('current value: ',keyValue)
                // console.log('current value type: ',typeof(keyValue))
                var isString = typeof(keyValue) === "string"
                console.log('current value: ',keyValue)
                console.log('is value string?:', isString)
                if (isString){
                    var isBracketText = keyValue.includes('[')
                    if (isBracketText){
                        keyValue = keyValue.replace('[','')
                        keyValue = keyValue.replace(']','')
                        keyValue = keyValue.split(',')
                        console.log('key value separated',keyValue)
                    }
                }

                var keyValueLength  = keyValue.length
                // console.log('key, keyvalue, keylength', key,keyValue,keyValueLength)
                if (key === "text"){
                    console.log('skipped text')
                    continue
                    }
                console.log('current key:', key)
                // if only one value  in the key
                if (keyValueLength === 1 || keyValueLength === undefined){

                    keyValue = Number(keyValue)*y_scale
                    console.log('1L - key value converted:', keyValue)
                    // process the values for screen alignment
                    if (key === "x"){
                        keyValue = keyValue - (imagesize[0]/2)
                        } else if (key === "y" || key.includes("_Y")){
                            keyValue = vsize/2 - keyValue
                            }
                    console.log('1L - key value processed:', keyValue)
                    // transform into float
                    // register backY if this is font dependent text height key
                    if (key.includes("_Y")){
                        console.log('backy time')
                        yourObject["backY"] = keyValue

                        } else {
                            console.log('NO back Y')
                            yourObject[key] = keyValue

                        }


                    // if multiple values in the key
                    } else if (keyValueLength > 1){
                        var tempList = []
                        console.log('list values:', keyValue)
                        for (var ind = 0; ind < keyValueLength; ind++){
                            // turn all values into float`
                            var currentValue = Number(keyValue[ind])*y_scale
                            console.log('2L - key value converted:', currentValue)


                            // process the values for screen alignment
                            if (key === "x"){
                                currentValue = currentValue - (imagesize[0]/2)
                                } else if (key === "y"){
                                    currentValue = vsize/2 - currentValue
                                    }
                            console.log('2L - key value processed:', currentValue)
                            tempList.push(currentValue)

                            }
                        // register numeric list into key
                        console.log('final list:', tempList)
                        yourObject[key] = tempList

                        }
                }

                return yourObject

            }


        convertToNumber = convertToNumber2

        function joinStringsWithUnderscore2(list1, list2) {
            var joinedStrings = [];
            for (var i = 0; i < list1.length; i++) {
                for (var j = 0; j < list2.length; j++) {
                    joinedStrings.push(list1[i] + '_' + list2[j]);
                }
            }
            return joinedStrings;
        }
        joinStringsWithUnderscore = joinStringsWithUnderscore2
        // check if mouse position is within underline word's bounds
        function rectangleClickCheck2(clickPosition, underlined_words){


            // get all underlined words
            var currentKeys = Object.keys(underlined_words)

            // get mouse positions
            var xpos = clickPosition[0]
            var ypos = clickPosition[1]

            for (var i = 0; i < currentKeys.length; i++){
                var underlineObject = underlined_words[currentKeys[i]];

        //        console.log('***********************')
        //        console.log(currentKeys[i])
        //        console.log('click x and y: ',xpos,ypos)
        //        console.log('rectx bounds : ', [underlineObject.x, underlineObject.x + underlineObject.width])
        //        console.log('recty bounds : ', [underlineObject.y, underlineObject.y + underlineObject.height])

                console.log('current object', underlineObject)
                var howManyCoordinates = underlineObject["x"].length
                console.log('how many coordinates', howManyCoordinates)
                // if this is a multiline hyperlink
                if (howManyCoordinates > 1){
                    var xcoordinates = underlineObject["x"]
                    var ycoordinates = underlineObject["y"]
                    var widthsizes   = underlineObject["width"]
                    console.log('x coordinates', xcoordinates)
                    console.log('y coordinates', ycoordinates)
                    console.log('width sizes', widthsizes)
                    var coordinateBooelan = []
                    // loop over coordinates of both lines to check if mouse was clicked on either one of them
                    for (var k = 0; k < howManyCoordinates; k++){
                        var current_x = xcoordinates[k]
                        var current_y = ycoordinates[k]
                        var current_width = widthsizes[k]
                        // check if mouse is within vertical bounds
                        var clickedVerticalArea = ((current_y < ypos) && (current_y + underlineObject.height > ypos))
                        // check if mouse is within horizontal bounds
                        var clickedHorizontalArea = ((current_x < xpos) && (current_x + current_width > xpos))
                        coordinateBooelan.push(clickedVerticalArea && clickedHorizontalArea)
                    }
                    console.log('coordinate booelan', coordinateBooelan)
                    // logical check for click region on multiple lines
                    var validClick = coordinateBooelan[0] || coordinateBooelan[1]

                } else{
                    // if there is only one link of hyperlinks


                    // check if mouse is within vertical bounds
                    var clickedVerticalArea = ((underlineObject.y < ypos) && (underlineObject.y + underlineObject.height > ypos))
                    // check if mouse is within horizontal bounds
                    var clickedHorizontalArea = ((underlineObject.x < xpos) && (underlineObject.x + underlineObject.width > xpos))

                    var validClick = clickedVerticalArea && clickedHorizontalArea


                }

                // if mouse is within one of word's bounds
                if (validClick){
                    // return key for that underlined word
                    return [true,currentKeys[i]]
                }

            }
            return [false,'undefined']

        }

        rectangleClickCheck = rectangleClickCheck2

        // check if mouse position is within popup back and close button's area
        // adjustment of coordinates was necessary for images because the way
        // psychopy places images (centers x and y, instead of top-right etc. placement)
        function rectangleClickCheckImage2(clickPosition, underlined_words){

            // get all underlined words
            var currentKeys = Object.keys(underlined_words)

            // get mouse positions
            var xpos = clickPosition[0]
            var ypos = clickPosition[1]

            for (var i = 0; i < currentKeys.length; i++){
                var underlineObject = underlined_words[currentKeys[i]];

                var adjusted_x =  underlineObject.x - underlineObject.width / 2
                var adjusted_y =  underlineObject.y - underlineObject.height / 2

                console.log('***********************')
                console.log(currentKeys[i])
        //        console.log('click x and y: ',xpos,ypos)
        //        console.log('rectx bounds : ', [adjusted_x, adjusted_x + underlineObject.width])
        //        console.log('recty bounds : ', [adjusted_y, adjusted_y + underlineObject.height])
        //
        //
                // check if mouse is within vertical bounds
                var clickedVerticalArea = ((adjusted_y < ypos) && (adjusted_y + underlineObject.height > ypos))
                // check if mouse is within horizontal bounds
                var clickedHorizontalArea = ((adjusted_x < xpos) && (adjusted_x + underlineObject.width > xpos))

                // if mouse is within one of word's bounds
                if (clickedVerticalArea && clickedHorizontalArea){
                    // return key for that underlined word
                    return [true,currentKeys[i]]
                }

            }
            return [false,'undefined']

        }

        rectangleClickCheckImage = rectangleClickCheckImage2



        // change position of words for every scroll

        // check if mouse position is within underline word's bounds
        function changeWordPosition2(deltaY, underlined_words){

            // change underlined word positions
            var currentKeys = Object.keys(underlined_words)
            for (var i = 0; i < currentKeys.length; i++){
                // change rectangle Y
                var lengthCoordinates = underlined_words[currentKeys[i]]["y"].length
                if (lengthCoordinates>1){
                    for (var k = 0; k<lengthCoordinates;k++){
                        underlined_words[currentKeys[i]]["y"][k] = underlined_words[currentKeys[i]]["y"][k] + deltaY;
                    }

                }else{
                    underlined_words[currentKeys[i]].y = underlined_words[currentKeys[i]].y + deltaY;
                }

                }

            return underlined_words


        }
        changeWordPosition = changeWordPosition2

        function letterToIndex2(letter,lettervector){
            var cb_index = lettervector.indexOf(letter)
            return cb_index
            }
        letterToIndex = letterToIndex2


        function getCounterbalanceGroup2(cb_groups,database,shelfKey) {
            var exitAll = false
            var recordShelf = true
            var totalGroupSize = database['total']

            if (totalGroupSize>0)
                {
                        // subtract one from the currently selected counterbalance group

                        while (true)
                        {

                            if (exitAll)
                                {
                                    break;
                                }
                                console.log('selecting cb group')
                                // initialize random index
                                var randomcbindex = Math.floor(Math.random() * cb_groups.length);
                                // get the letter at #randomindex
                                var cb_group = cb_groups[randomcbindex]
                                // get current groupsize from shelf
                                var cb_group_size = database[cb_group]

                                console.log('cb group: ', cb_group)
                                console.log('cb group size: ',cb_group_size)

                                if (cb_group_size > 0)
                                    {
                                        database[cb_group] = database[cb_group]-1
                                        database['total'] = database['total']-1
                                        exitAll = true
                                    }
                        }

                    } else {
                        recordShelf = false
                        psychoJS.quit({message: "We've reached the full number of participants!"})
                    }


            // write the counterbalance record to shelf after registery
            if (recordShelf){
                psychoJS.shelf.setDictionaryFieldValue({key: shelfKey, fieldName: 'cbgroups', fieldValue : database})
            }

            return cb_group

        }
        getCounterbalanceGroup = getCounterbalanceGroup2


        function getItemCount2(textVar) {

            var count1 = Number(textVar[textVar.length-1])
            var count2 = Number(textVar[textVar.length-2])
            if (isNaN(count2)===false) {
                // if there is more than 9 items get last two characters for counting how many items there are
                var itemCount = textVar[textVar.length-2]+ textVar[textVar.length-1]
                itemCount = Number(itemCount)

            } else {

                var itemCount = Number(textVar[textVar.length-1])

            }
            console.log('item count of: ',textVar, itemCount)
            return itemCount
        }
        getItemCount=getItemCount2


        // get all indexes of an element
        function getAllIndexes2(arr, val) {
            var indexes = [], i = -1;
            while ((i = arr.indexOf(val, i+1)) != -1){
                indexes.push(i);
            }
            return indexes;
        }

        getAllIndexes = getAllIndexes2

        // format date and time (transform to > mm.yy.tt)
        function formatDateTime2(date){
            var indices = getAllIndexes(date,'-')
            var underScoreIndex = date.indexOf('_')
            var firstDashIndex = indices[0] // this is the index for the first dash, if it is larger than 2, it means that first part of the date is years. If that is the case, we change it by moving the years at the end of date.
                if (firstDashIndex > 2){
                    var yearString = date.slice(0,firstDashIndex)
                    var monthDayString = date.slice(firstDashIndex+1,underScoreIndex)
                    var timeString = date.slice(underScoreIndex,date.length)
                    var newFormatDate = monthDayString + '-' + yearString + timeString
                    return newFormatDate
                } else {
                    return date
                    }
            }

        formatDateTime = formatDateTime2
        // shuffle array: randomly shuffles the order of elements in an array.
        function randomArrayShuffle2(o){
            for(var j, x, i = o.length; i; j = parseInt(Math.random() * i), x = o[--i], o[i] = o[j], o[j] = x);
            return o;
        }

        randomArrayShuffle = randomArrayShuffle2;

        function randomIntFromInterval2(min, max) { // min and max included
          return Math.floor(Math.random() * (max - min + 1) + min)
        }
        randomIntFromInterval = randomIntFromInterval2;

        // ranges from start to end, end is inclusive
        // e.g. range(1,5) = [1,2,3,4,5]
        function range2(start, end) {
            if(start === end) return [start];
            return [start, ...range(start + 1, end)];
        }
        range = range2;
        // Latin Square design generator

        // How to use:
        // var conditions = ["A", "B", "C", "D"];
        // balancedLatinSquare(conditions, 0)  //=> ["A", "B", "D", "C"]
        // balancedLatinSquare(conditions, 1)  //=> ["B", "C", "A", "D"]
        // balancedLatinSquare(conditions, 2)  //=> ["C", "D", "B", "A"]
        // ...
        function balancedLatinSquare2(array, participantId) {
         var result = [];
         // Based on "Bradley, J. V. Complete counterbalancing of immediate sequential effects in a Latin square design. J. Amer. Statist. Ass.,.1958, 53, 525-528. "
         for (var i = 0, j = 0, h = 0; i < array.length; ++i) {
          var val = 0;
          if (i < 2 || i % 2 != 0) {
           val = j++;
          } else {
           val = array.length - h - 1;
           ++h;
          }

          var idx = (val + participantId) % array.length;
          result.push(array[idx]);
         }

         if (array.length % 2 != 0 && participantId % 2 != 0) {
          result = result.reverse();
         }

         return result;
        }

        balancedLatinSquare = balancedLatinSquare2;



        /////////////////////////////////////
        //// font normalization function ////
        /////////////////////////////////////

        Array.prototype.sum = function() {
            return this.reduce(function(a,b){return a+b;});
        };

        Array.prototype.mean = function() {
            return this.sum() / this.length;
        };

        // CONTROL vars (Times)
        unitsPerEm_ctrl = 1000;
        xHeight_ctrl = 448;
        width_ctrl = 556.388855;
        height_ctrl = 707.977295;
        size_ctrl = 16;
        yourX=0
        xHeight_ctrl_weight = 448/unitsPerEm_ctrl;
        width_ctrl_weight   = 556.388855/unitsPerEm_ctrl;
        height_ctrl_weight  = 707.977295/unitsPerEm_ctrl;

        xHeightSourceDelta =  0.44970703125;
        widthSourceDelta =  0.5528367565524194;
        heightSourceDelta =  0.6362068422379032;

        chars = '1234567890qwertyuiopasdfghjklzxcvbnmQWERTYUIOPASDFGHJKLZXCVBNM';
        chars_check = chars.split('');
        chars_decimal = [49, 50, 51, 52, 53, 54, 55, 56, 57, 48, 113, 119, 101, 114, 116, 121, 117, 105, 111, 112, 97, 115, 100, 102, 103, 104, 106, 107, 108, 122, 120, 99, 118, 98, 110, 109, 81, 87, 69, 82, 84, 89, 85, 73, 79, 80, 65, 83, 68, 70, 71, 72, 74, 75, 76, 90, 88, 67, 86, 66, 78, 77];

        //chars = 'Adobe';
        chars_check = chars.split('');
        chars_decimal = [];
        chars_check.forEach(e => {
            chars_decimal.push(e.codePointAt());
        });


        chars_unicode = ['0x0031','0x0032','0x0033','0x0034','0x0035','0x0036','0x0037','0x0038','0x0039','0x0030','0x0071','0x0077','0x0065','0x0072','0x0074','0x0079','0x0075','0x0069','0x006f','0x0070','0x0061','0x0073','0x0064','0x0066','0x0067','0x0068','0x006a','0x006b','0x006c','0x007a','0x0078','0x0063','0x0076','0x0062','0x006e','0x006d','0x0051','0x0057','0x0045','0x0052','0x0054','0x0059','0x0055','0x0049','0x004f','0x0050','0x0041','0x0053','0x0044','0x0046','0x0047','0x0048','0x004a','0x004b','0x004c','0x005a','0x0058','0x0043','0x0056','0x0042','0x004e','0x004d'];

        function log(str) {
            console.log(str);
        };

        function print_server_load(name,path) {
            log("@font-face {");
            log("    font-family: '" + name + "';");
            log("    font-style: normal;");
            log("    font-weight: normal;");
            log("    src: local('" + name + "'), url('fonts/" + path + "') format('truetype');");
            log("}");
        };

        function print_css(name,name_css,factor,size) {
            log("p." + name_css + "_" + factor + " {");
            log("    font-family: '" + name + "' !important;");
            log("    font-size: " + size + "px;");
            log("}");
        }

        function gen_normalization2(fontPath,name,name_css) {
            opentype.load(fontPath, function(err, font) {
                if (err) {
                    alert('Font ' + fontPath + ' could not be loaded: ' + err);
                } else {
                    // Now let's display it on a canvas with id "canvas"
                    console.log('normalization')
                    //console.log(document.getElementById('canvas'))
                    //console.log(document.getElementById('canvas').getContext)
                    //console.log(document.getElementById('canvas').getContext('2d'))
                    //var ctx = document.getElementById('canvas').getContext('2d');

                    // Construct a Path object containing the letter shapes of the given text.
                    // The other parameters are x, y and fontSize. Note that y is the position of the baseline.
                    var path = font.getPath(chars, 0, 0, 16);

                    //
                    var xHeight = font.tables.os2.sxHeight; // sxHeight could be missing from some fonts
                    var widths = [];
                    var heights = [];

                   var xMinFont = 0;
                   var xMaxFont = 0;
                   var yMinFont = 0;
                   var yMaxFont = 0;

                    //compute max width/height
                    Object.keys(font.glyphs.glyphs).forEach(function (k) {
                        var glyph = font.glyphs.glyphs[k];
                        var unicode_decimal = glyph.unicode;
                        if (chars_decimal.includes(unicode_decimal)) {
                            if(glyph.xMin < xMinFont)
                                xMinFont = glyph.xMin;
                            if(glyph.xMax > xMaxFont)
                                xMaxFont = glyph.xMax;
                            if(glyph.yMin < yMinFont)
                                yMinFont = glyph.yMin;
                            if(glyph.yMax > yMaxFont)
                                yMaxFont = glyph.yMax;
                        }
                    });

                    Object.keys(font.glyphs.glyphs).forEach(function (k) {
                        var glyph = font.glyphs.glyphs[k];
                        var char = glyph.name;
                        var unicode_decimal = glyph.unicode;

                        var lsb = glyph.leftSideBearing;
                        var rsb = glyph.advanceWidth - (lsb + glyph.xMax - glyph.xMin); //right side bearing

                        var width = glyph.xMax - glyph.xMin;
                        width = glyph.advanceWidth;
                        //width = glyph.xMax - glyph.xMin;

                        var yMinGlyph = glyph.yMin;
                        var yMaxGlyph = glyph.yMax;
                        var yMinFinal = yMinFont;
                        var yMaxFinal = yMaxFont;

                        if (yMinFont > yMinGlyph)
                            yMinFinal = yMinGlyph;
                        if (yMaxFont < yMaxGlyph)
                            yMaxFinal = yMaxGlyph;

                        var height = glyph.yMax - glyph.yMin;
                        if (chars_decimal.includes(unicode_decimal)) {
                            widths.push(width);
                            heights.push(height);
                        }
                        if(unicode_decimal === 120) { // x
                            xHeight = yMaxGlyph - yMinGlyph;
                        }
                    });

                    let unitsPerEm = font.tables.head.unitsPerEm;

                    let xHeightDelta = xHeight/unitsPerEm;
                    let widthDelta = widths.mean()/unitsPerEm;
                    let heightDelta = heights.mean()/unitsPerEm;

                    let x = 16*(1+((xHeightSourceDelta-xHeightDelta)/xHeightDelta));
                    let w = 16*(1+((widthSourceDelta-widthDelta)/widthDelta));
                    let h = 16*(1+((heightSourceDelta-heightDelta)/heightDelta));

                    yourX = (1+((xHeightSourceDelta-xHeightDelta)/xHeightDelta));
                    console.log('yourX')
                    console.log(yourX)
                    return yourX

                }
            });

        }

        gen_normalization = gen_normalization2;
    CodeComponent specific_variables
      Code Type = JS
      Begin JS Experiment:
        document.body.style.zoom = "100%"

        newY = []


        consentsize = [2550,3000]
        consentDesiredWidth = 1460
        consentSizeMultiplier = consentDesiredWidth / consentsize[0];

        consentsize = [consentsize[0]*consentSizeMultiplier,consentsize[1]*consentSizeMultiplier]

        imagesize = [2560,1900]

        popupsize = [1024,1000]

        preferencesize = [1247,302]


        // window pixel sizes below (h horizontal, v vertical)
        vsize = psychoJS.window._size[1];
        hsize = psychoJS.window._size[0];

        halfimg_x = popupsize[0]/2
        halfscreen_y = vsize/2


        preference_y = (halfscreen_y-preferencesize[1])
        preference_question_y = preference_y-(vsize*.2)
        preference_slider_y   = preference_question_y-(vsize*.2)


        popup_buttons = {}
        popup_buttons.back_button = {}
        popup_buttons.back_text = {}
        popup_buttons.close_button = {}
        // register position and size of popup's back button
        popup_buttons.back_button.width  = 200
        popup_buttons.back_button.height = 50
        popup_buttons.back_button.x      = (-halfimg_x+(popup_buttons.back_button.width/2))
        popup_buttons.back_button.y      = (-halfscreen_y + (halfscreen_y*.1)) + popup_buttons.back_button.height


        // register position and size of popup's back text
        popup_buttons.back_text.width  = 200
        popup_buttons.back_text.height = 50
        popup_buttons.back_text.x      = popup_buttons.back_button.x + popup_buttons.back_button.width/2 +popup_buttons.back_text.width/2
        popup_buttons.back_text.y      = popup_buttons.back_button.y


        // register position and size of popup's close button
        popup_buttons.close_button.width  = 25
        popup_buttons.close_button.height = 25
        popup_buttons.close_button.x      = (halfimg_x - (halfimg_x*.1))
        popup_buttons.close_button.y      = (halfscreen_y-(halfscreen_y*.05)) - popup_buttons.close_button.height

        // memory test buttons
        memory_button            = {}
        memory_button.yes_button = {}
        memory_button.no_button  = {}

        memory_button.yes_button.width      = hsize/10
        memory_button.yes_button.height     = hsize/20
        memory_button.yes_button.x          = -hsize/10
        memory_button.yes_button.y          = -hsize/10

        memory_button.no_button.width       = hsize/10
        memory_button.no_button.height      = hsize/20
        memory_button.no_button.x           = hsize/10
        memory_button.no_button.y           = -hsize/10
      Begin JS Routine:
        document.body.style.zoom = "100%"

        newY = []



        imagesize = [2560,1900]

        popupsize = [1024,1000]

        preferencesize = [1247,302]


        // window pixel sizes below (h horizontal, v vertical)
        vsize = psychoJS.window._size[1];
        hsize = psychoJS.window._size[0];

        console.log('vsize', vsize)

        halfimg_x = popupsize[0]/2
        halfscreen_y = vsize/2


        preference_y = (halfscreen_y-preferencesize[1])
        preference_question_y = preference_y-(vsize*.2)
        preference_slider_y   = preference_question_y-(vsize*.2)


        popup_buttons = {}
        popup_buttons.back_button = {}
        popup_buttons.back_text = {}
        popup_buttons.close_button = {}
        // register position and size of popup's back button
        popup_buttons.back_button.width  = 200
        popup_buttons.back_button.height = 50
        popup_buttons.back_button.x      = (-halfimg_x+(popup_buttons.back_button.width/2))
        popup_buttons.back_button.y      = (-halfscreen_y + (halfscreen_y*.1)) + popup_buttons.back_button.height


        // register position and size of popup's back text
        popup_buttons.back_text.width  = 200
        popup_buttons.back_text.height = 50
        popup_buttons.back_text.x      = popup_buttons.back_button.x + popup_buttons.back_button.width/2 +popup_buttons.back_text.width/2
        popup_buttons.back_text.y      = popup_buttons.back_button.y


        // register position and size of popup's close button
        popup_buttons.close_button.width  = 25
        popup_buttons.close_button.height = 25
        popup_buttons.close_button.x      = (halfimg_x - (halfimg_x*.1))
        popup_buttons.close_button.y      = (halfscreen_y-(halfscreen_y*.05)) - popup_buttons.close_button.height

        // memory test buttons
        memory_button            = {}
        memory_button.yes_button = {}
        memory_button.no_button  = {}

        memory_button.yes_button.width      = hsize/10
        memory_button.yes_button.height     = hsize/20
        memory_button.yes_button.x          = -hsize/10
        memory_button.yes_button.y          = -hsize/10

        memory_button.no_button.width       = hsize/10
        memory_button.no_button.height      = hsize/20
        memory_button.no_button.x           = hsize/10
        memory_button.no_button.y           = -hsize/10
    CodeComponent initialize_variables
      Code Type = JS
      Begin JS Experiment:
        ///////////////////////////////////////////////////////
        //// EXPERIMENT TYPE (FONT OR SPACING COMPARISONS) ////
        ///////////////////////////////////////////////////////

        // assign which fit clash conditions will be displayed at the end
        experimentType      = 'font' // 'spacing', or 'font'

        //////////////////////////////////////////////////////////////////////////
        //// TEXT PARAMETERS (pixels, size multipliers, wrapwidth, position.) ////
        //////////////////////////////////////////////////////////////////////////

        /////////////////
        // IMAGE SIZES //
        /////////////////

        // make sure to change these vales according to the image pixels you've rendered
        // with the readability text to image conversion tool

        // horizontal axis
        xaxis                               = 2560
        // vertical axis
        yaxis                               = 1900

        ////////////////
        // FONT SIZES //
        ////////////////

        // base font size (font size in pixels)
        baseSizePixels                      = 16;

        // size multiplier's for different types of text
        // multipliers work on the base pixel size
        // values lower than 1 are smaller than base size
        // values greater than 1 are smaller than base size

        // comprehension, feedback, and demographic question size multiplier
        questionSizeMultiplier              = 1.2;
        //
        passageSizeMultiplier               = 1.5;
        //
        instructionSizeMultiplier           = 1.5;

        // apply multipliers to base pixel size
        passageTextSize                     = baseSizePixels * passageSizeMultiplier;
        questionTextSize                    = baseSizePixels * questionSizeMultiplier;      // used in comprehension, feedback, and demographic questions
        labelTextSize                       = baseSizePixels * questionSizeMultiplier;      // used in labels of the question sliders (each option of the likert items)
        instructionTextSize                 = baseSizePixels * instructionSizeMultiplier;   // used for instructions and consent forms

        // text COLOR (questions and instructions)
        textColor                           = "black"

        // text font (questions and instructions)
        textFont                            = "Arial"

        // keyboard pause duration for each screen of passages (if key press is applicable)
        // waits until these seconds passes to allow to skip the passage
        keyboardPauseDuration               = 3;

        // mouse delay (time required for enabling button click)
        mouseDelay                          = 3;  // between screens of a passage
        mouseDelayOther                     = 3;  // between instructions, consent form pages, or questions


        // screen scale variables, we are initializing these here
        y_scale                             = 1;
        x_scale                             = 1;

        // window pixel sizes below (h horizontal, v vertical)
        screen_height                       = psychoJS.window.size[1];
        screen_width                        = psychoJS.window.size[0];
        hsize                               = screen_height;
        vsize                               = screen_width;

        passageYaxis                        = -200;


        // text wrapping and position parameters (questions, instructions)
        wrapWidthText                       = screen_width*4/5;
        wrapWidthPassages                   = screen_width/2;

        // x axis starting point for passages (not applicable for image-based studies)
        xAxisCenterPassages                 =  -screen_width/4;

        // x axis starting point for other text (questions, instructions)
        xAxisCenter                         = -screen_width * 2/5;

        // screen scale instructions positions
        topScreenInstruction                = screen_height * 4/10;
        bottomScreenInstruction             = -screen_height * 4/10;

        // question text positions
        questionsXaxis                      = -screen_width*45/100;     // horizontal alignment of text during comprehension/feedback/demographic questions
        questionsTopYaxis                   = screen_height*10/100;     // vertical position of the actual question text (e.g. What is the main idea of the passage?)
        questionsBottomYaxis                = -screen_height*35/100;    // vertical position of question-related instructions (press space, press button etc.)

        // slider positions and size (radio button slider positions)
        sliderPosition                      = [-screen_width*45/100, -screen_height*10/100];
        sliderSize                          = [screen_width*1/100, screen_height*26/100];       // slider size, do not change this unless you know what you are doing
        sliderPositionPreference            = [sliderPosition[0], preference_slider_y]

        // slider colors
        colBlack                            = new util.Color('black');
        colWhite                            = new util.Color('black')
        col_white                           = new util.Color('white');
        col_grey                            = new util.Color('grey');
        col_red                             = new util.Color('red');
        col_black                           = new util.Color('black');
        sliderLineLabelColor                = colBlack;
        sliderMarkerColor                   = colWhite;

        // textbox position and size (demographics)
        textboxSize                         = [screen_width * 2/5, screen_height*7.5/100];
        textboxPosition                     = [xAxisCenter, 0];

        ccImageY = -(screen_width * 0.02)

        //console.log("screen_width",screen_width,"screen_height",screen_height);
        //console.log("wrapwidthText",wrapWidthText,"xAxis",xAxisCenter);
        //console.log("wrapwidthPass",wrapWidthPassages,"xAxisPass",xAxisCenterPassages) ;

        // next button size and position
        buttonWidth                         = screen_width/10;
        buttonHeight                        = screen_height/10;

        buttonX                             = screen_width * 4/10;
        buttonY                             = 0-(screen_height * 4/10);

        ss_right_buttonX = screen_width * 5.5/15;
        ss_right_buttonY = 0;

        ss_left_buttonX = ss_right_buttonX - buttonWidth;

        ss_up_buttonX = (ss_right_buttonX + ss_left_buttonX) / 2
        ss_up_buttonY = buttonHeight + (screen_width * 1/30);



        console.log({ss_right_buttonX,ss_right_buttonY, buttonX, buttonY})

        // password textbox parameters
        textboxSize                         = [screen_width * 2/5, screen_height*7.5/100];
        textboxPosition                     = [xAxisCenter, 0];

        // memory test variables, list position
        listx = screen_width/10;

        // clock
        myClock                             = new util.Clock();

        // initialize passage index order list
        passageSetOrder                     = [];
        questionReactionTime                = [];

        radiobutton_size = 23

        const searchParams = new URLSearchParams(location.search);
        const imageParam = parseInt(searchParams.get('image')) || 0;


        if (imageParam==0) {
            // prolific
            psychoJS.setRedirectUrls('https://app.prolific.com/submissions/complete?cc=C1HZYXNB','')
        } else {
            // life
            psychoJS.setRedirectUrls('https://forms.gle/twgaBP6X4os6dk767','')
        }

        console.log('passed initialization')
      Begin JS Routine:
        ///////////////////////////////////////////////////////
        //// EXPERIMENT TYPE (FONT OR SPACING COMPARISONS) ////
        ///////////////////////////////////////////////////////
        //
        // assign which fit clash conditions will be displayed at the end
        //experimentType      = 'font' // 'spacing', or 'font'
        //
        //////////////////////////////////////////////////////////////////////////
        //// TEXT PARAMETERS (pixels, size multipliers, wrapwidth, position.) ////
        //////////////////////////////////////////////////////////////////////////
        //
        /////////////////
        // IMAGE SIZES //
        /////////////////
        //
        // make sure to change these vales according to the image pixels you've rendered
        // with the readability text to image conversion tool
        //
        // horizontal axis
        //xaxis                               = 1024
        // vertical axis
        //yaxis                               = 768
        //
        ////////////////
        // FONT SIZES //
        ////////////////
        //
        // base font size (font size in pixels)
        //baseSizePixels                      = 16;
        //
        // size multiplier's for different types of text
        // multipliers work on the base pixel size
        // values lower than 1 are smaller than base size
        // values greater than 1 are smaller than base size
        //
        // comprehension, feedback, and demographic question size multiplier
        //questionSizeMultiplier              = 1.2;
        //
        //passageSizeMultiplier               = 1.5;
        //
        //instructionSizeMultiplier           = 1.5;
        //
        // apply multipliers to base pixel size
        //passageTextSize                     = baseSizePixels * passageSizeMultiplier;
        //questionTextSize                    = baseSizePixels * questionSizeMultiplier;      // used in comprehension, feedback, and demographic questions
        //labelTextSize                       = baseSizePixels * questionSizeMultiplier;      // used in labels of the question sliders (each option of the likert items)
        //instructionTextSize                 = baseSizePixels * instructionSizeMultiplier;   // used for instructions and consent forms
        //
        // text COLOR (questions and instructions)
        //textColor                           = "black"
        //
        // text font (questions and instructions)
        //textFont                            = "Arial"
        //
        // keyboard pause duration for each screen of passages (if key press is applicable)
        // waits until these seconds passes to allow to skip the passage
        //keyboardPauseDuration               = .05;
        //
        // mouse delay (time required for enabling button click)
        //mouseDelay                          = .05;  // between screens of a passage
        //mouseDelayOther                     = .05;  // between instructions, consent form pages, or questions
        //
        //
        // screen scale variables, we are initializing these here
        //y_scale                             = 1;
        //x_scale                             = 1;
        //
        // window pixel sizes below (h horizontal, v vertical)
        //screen_height                       = psychoJS.window.size[1];
        //screen_width                        = psychoJS.window.size[0];
        //hsize                               = screen_height;
        //vsize                               = screen_width;
        //
        //passageYaxis                        = -200;
        //
        //
        // text wrapping and position parameters (questions, instructions)
        //wrapWidthText                       = screen_width*4/5;
        //wrapWidthPassages                   = screen_width/2;
        //
        // x axis starting point for passages (not applicable for image-based studies)
        //xAxisCenterPassages                 =  -screen_width/4;
        //
        // x axis starting point for other text (questions, instructions)
        //xAxisCenter                         = -screen_width * 2/5;
        //
        // screen scale instructions positions
        //topScreenInstruction                = screen_height * 3/10;
        //bottomScreenInstruction             = -screen_height * 3/10;
        //
        // question text positions
        //questionsXaxis                      = -screen_width*45/100;     // horizontal alignment of text during comprehension/feedback/demographic questions
        //questionsTopYaxis                   = screen_height*10/100;     // vertical position of the actual question text (e.g. What is the main idea of the passage?)
        //questionsBottomYaxis                = -screen_height*35/100;    // vertical position of question-related instructions (press space, press button etc.)
        //
        // slider positions and size (radio button slider positions)
        //sliderPosition                      = [-screen_width*45/100, -screen_height*10/100];
        //sliderSize                          = [screen_width*1/100, screen_height*26/100];       // slider size, do not change this unless you know what you are doing
        //sliderPositionPreference            = [sliderPosition[0], preference_slider_y]
        //
        // slider colors
        //colBlack                            = new util.Color('black');
        //colWhite                            = new util.Color('black');
        //sliderLineLabelColor                = colBlack;
        //sliderMarkerColor                   = colWhite;
        //
        // textbox position and size (demographics)
        //textboxSize                         = [screen_width * 2/5, screen_height*7.5/100];
        //textboxPosition                     = [xAxisCenter, 0];
        //
        //console.log("screen_width",screen_width,"screen_height",screen_height);
        //console.log("wrapwidthText",wrapWidthText,"xAxis",xAxisCenter);
        //console.log("wrapwidthPass",wrapWidthPassages,"xAxisPass",xAxisCenterPassages) ;
        //
        // next button size and position
        //buttonWidth                         = screen_width/10;
        //buttonHeight                        = screen_height/10;
        //
        //buttonX                             = screen_width * 4/10;
        //buttonY                             = 0-(screen_height * 4/10);
        //
        // password textbox parameters
        //textboxSize                         = [screen_width * 2/5, screen_height*7.5/100];
        //textboxPosition                     = [xAxisCenter, 0];
        //
        // memory test variables, list position
        //listx = screen_width/10;
        //
        // clock
        //myClock                             = new util.Clock();
        //
        // initialize passage index order list
        //passageSetOrder                     = [];
        //questionReactionTime                = [];
        //
        //
        //console.log('passed initialization')
    CodeComponent counterbalancing
      Code Type = JS
      Begin JS Experiment:
        // - * BEGIN EXPERIMENT * - //

        // use 'counterbalanced' for counterbalancing conditions across groups
        // use 'randomized' for randomizing the order of conditions for each participant
        randomization_scheme            = 'counterbalanced' // or 'counterbalanced'

        // name of the shelf record used for counterbalancing
        cbRegistry                      = ['cb_article']

        if (randomization_scheme === 'counterbalanced'){


            // cb_groups is used for ordering exp conditions and passage orders.
            // Each letter represents a different group. Name of the groups are irrelevant.
            // number of counterbalance groups (cb_groups) will change according to
            // the number of conditions you have. Whether condition count is even or odd
            // also changes the number of groups
            // • Even number of conditions: Add as many groups as the number of your conditions. (4 conditions result in 4 groups)
            // • Odd number of conditions: Add twice as many groups as the number of conditions. (3 conditions result in 6 groups)

            // Make sure that you have a dictionary shelf record that have all the groups specified below.
            cb_groups                       = ['A','B','C','D','E','F'];

            registeryName                   = [] // data file name for registry
            thisGroup                       = {} // counterbalance group
            cb_group                        = [] // letter representation of counterbalance group
            cb_index                        = [] // index of counterbalance group for latin-square function


            // GET COUNTERBALANCE DICTIONARY FROM SHELF
            cbDatabase                      = await psychoJS.shelf.getDictionaryFieldValue({key: cbRegistry, fieldName: 'cbgroups', defaultValue: "none"});

            /* Get a counterbalance group */
            cb_group                        = getCounterbalanceGroup(cb_groups,cbDatabase,cbRegistry)
            cb_index                        = letterToIndex(cb_group,cb_groups)
        //
        //    cb_group = "A"
        //    cb_index = 0
        } else if (randomization_scheme === 'randomized') {

            // used for ordering exp conditions and passage orders
            cb_groups                       = [];
            registeryName                   = [] // data file name for registry
            thisGroup                       = {} // counterbalance group
            cb_group                        = [] // letter representation of counterbalance group
            cb_index                        = [] // index of counterbalance group for latin-square function

        }
      Begin JS Routine:
        psychoJS.experiment.dataFileName = (("." + "/") + `data/${registeryName}_${expName}_${expInfo["date"]}`);
    CodeComponent data_registry
      Code Type = JS
      Begin JS Routine:
        // PARTICIPANT REGISTRY VARIABLES

        // get a random subject ID
        participantCode                   = randomIntFromInterval(100000,999999)

        // experimental group name
        exp_group                         = "unnamed"

        // registered participant name (id + cb_group-if exists)
        expInfo["participant"]            = participantCode.toString() +"_" +cb_group;

        // get date and time in a uniform format
        registeryDate                     = util.MonotonicClock.getDateStr()

        // format registry date for a uniform date-time across browsers and OSs
        registeryDate                     = formatDateTime(registeryDate)

        // register date
        expInfo["date"]                   = registeryDate

        // change data file name
        psychoJS.experiment.dataFileName  = (("." + "/") + `data/${registeryName}_${expName}_${expInfo["date"]}`);

        //////////////////////////////////////////////////////////////////////////
        //// DATA REGISTRY VARIABLES (accuracy, rt, date, blocks, trials etc) ////
        //////////////////////////////////////////////////////////////////////////
        totalTrialIterationIndex            = 0;
        data_totalTrialIndex                = [];
        data_dateTime                       = [];
        data_feedbackRating                 = [];
        data_trialType                      = [];
        data_itemID                         = [];
        data_setID                          = [];
        data_passageType                    = [];

        data_passageWPM                     = [];
        data_passageRT                      = [];
        data_passageFont                    = [];
        data_passageSpacing                 = [];
        data_passageWordCount               = [];
        data_passageType                    = [];
        data_passageLevel                   = [];
        data_articleSkipType                = [];

        data_compAccuracy                   = [];
        data_compChoice                     = [];
        data_surveyRT                       = [];

        data_blockName                      = [];
        data_zoomLevel                      = [];
        currentFontType                     = [];
        currentRT                           = [];
        browserZoom                         = [];


        thisExp = psychoJS.experiment;
        // write trial by trial data
        trialColumNames = ["trialNo","setID","itemID" ,"blockName", "trialType","fontName","linkCondition","articleSkipType","wordCount","passageRT", "wordsPerMinute", "comprehensionAccuracy", "comprehensionChoice","choiceRT","feedbackSurveyRating"];

        // add headers right above the data
        psychoJS.experiment.addData("dateTime", "dateTime")
        psychoJS.experiment.addData(trialColumNames[0], trialColumNames[0]);
        psychoJS.experiment.addData("subid", "subid")
        psychoJS.experiment.addData("gender", "gender")
        psychoJS.experiment.addData("age", "age")
        psychoJS.experiment.addData("counterbalance_group", "counterbalance_group")

            for (let columni = 1; columni < trialColumNames.length; columni++) {
                // loop over trialColumnNames and create headers for the datasheet
              psychoJS.experiment.addData(trialColumNames[columni], trialColumNames[columni]);
            }

        psychoJS.experiment.addData("X_Scale", "X_Scale");
        psychoJS.experiment.addData("Y_Scale", "Y_Scale");
        psychoJS.experiment.addData("IsFullScreen", "IsFullScreen");
        psychoJS.experiment.addData("window_width", "window_width");
        psychoJS.experiment.addData("window_height", "window_height");
        psychoJS.experiment.addData("browser", "browser");
        psychoJS.experiment.addData("browserZoomLevel", "browserZoomLevel");
        psychoJS.experiment.nextEntry();
  Routine instructions_passage
    TextComponent readPassageInstructions
      color [set every repeat] = $textColor
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = instructionTextSize*y_scale
      pos [set every repeat] = (xAxisCenter, 0)
      startVal [time (s)] = 0.0
      wrapWidth = wrapWidthText
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      text:
        In the next section, please try to read each article at your normal speed without reading aloud, re-reading, or taking breaks, and then press the button at the bottom of the screen when you are finished. Please sit 14 inches from the screen and try not to move your chair or move the distance of your head relative to the screen. Use your mouse or the up and down arrow keys to scroll through the articles and ensure you read the entire text. Do not refresh the browser as it will reset the test.

        • ﻿﻿Keep in mind you will answer questions after reading.

        ﻿﻿• If you need to take a very short break please do so now.

        ﻿• Verify that you are 14 inches from the screen using a ruler

        Once you are ready, please press the button below to continue.
    CodeComponent code_4
      Code Type = JS
      Begin JS Routine:
        readPassageInstructions.setAlignHoriz("left");
    ImageComponent nextButton_readingInstructions
      image = next_button.png
      pos [set every repeat] = (buttonX,buttonY)
      size [set every repeat] = (buttonWidth,buttonHeight)
      startVal [time (s)] = .2
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    MouseComponent mouseReadingInstructions
      clickable = nextButton_readingInstructions
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = $mouseDelayOther
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  Routine setTrialParameters
    CodeComponent getTrialParameters
      Code Type = JS
      Begin JS Routine:
        // setup trial parameters
        trialproperties         = thisStimulus_list["trialproperties"] // cell that indicates the number of passages and questions
        trialproperties         = trialproperties.split(";")

        //passage counts
        passageCount            = trialproperties[0]
        passageCount            = getItemCount(passageCount)
        //passageCount = Number(passageCount[passageCount.length-1]) // get the last element (count)

        //question counts
        questionCount           = trialproperties[1]
        questionCount           = getItemCount(questionCount)

        //questionCount = Number(questionCount[questionCount.length-1]) // get the last element (count)
        // proxy count
        proxyCount              = trialproperties[2]
        proxyCount              = getItemCount(proxyCount)

        //mini survey count
        feedbackCount           = trialproperties[3]
        feedbackCount           = getItemCount(feedbackCount)

        //feedbackSurveyCount = Number(feedbackSurveyCount[feedbackSurveyCount.length-1]) // get the last element (count)
        //randomization of passages within a set (1= yes, 0=no)
        randomizePassages       = trialproperties[3]
        randomizePassages       = Number(randomizePassages[randomizePassages.length-1]) // get the last element (count)
        //randomization of questions within a set (1= yes, 0=no)
        randomizeQuestions      = trialproperties[4]
        randomizeQuestions      = Number(randomizeQuestions[randomizeQuestions.length-1]) // get the last element (count)

        // create passage index array
        rand_po = [];
        for (var i = 0; i < passageCount; i++){
            rand_po.push(i+1);
        }

        // create question index array
        rand_qo = [];
        for (var i = 0; i < questionCount; i++){
            rand_qo.push(i+1);
        }

        // create proxy survey index array
        rand_proxyo = [];
        for (var i = 0; i < proxyCount; i++){
            rand_proxyo.push(i+1);
        }

        // create mini survey index array
        rand_fo = [];
        for (var i = 0; i < feedbackCount; i++){
            rand_fo.push(i+1);
        }

        //randomize passage and question orders
        if (randomizePassages === 1) {
            rand_po             = randomArrayShuffle(rand_po);

        }

        if (randomizeQuestions === 1) {
             rand_qo            = randomArrayShuffle(rand_qo);
             rand_fo            = randomArrayShuffle(rand_fo);
             rand_proxyo        = randomArrayShuffle(rand_proxyo);
        }

        // what is this trial: practice or test?
        trialType               = thisStimulus_list['trialType'];
        // increase trial iteration index for each iteration of stimulus list
        trialIteration          = trialIteration +1;
        totalTrialIterationIndex = totalTrialIterationIndex+1;

        //console.log('trialIteration: ',trialIteration)
        //console.log('leftTrialIndex: ',trialIteration + leftPassageTrial)
        //console.log('blockConditionsForRegistry',blockConditionsForRegistry)
        //console.log('blockConditionsForRegistry['+trialIteration+']',blockConditionsForRegistry[trialIteration])
    CodeComponent articleTrial
      Code Type = JS
      Begin JS Routine:
        popupN = []

        popupN  = 0
        wordN   = 0

        loopCount = 999

        articleid               = thisStimulus_list["setID"];

        currentFont             = blockConditionsForDisplay[trialIteration][0];
        currentLink             = blockConditionsForDisplay[trialIteration][1];

        currentArticle          = "stimuli/article_images/"+articleid + "_" + currentFont +"_"+currentLink + ".jpg"


        console.log('current font', currentFont)
        console.log('current link', currentLink)

        if (currentLink === "NoLink"){
            // assign a dummy sheet to prevent error in popup_selection loop when
            // there is no links in the article.
            linksheet               = "stimuli/link_sheets/article1_Times_links.xlsx";
            enableLinkClick         = 0
            } else {
                // assign the current article's link sheet if this article has linked words (blue words for popups)
                  enableLinkClick         = 1
                  linksheet               = "stimuli/link_sheets/"+articleid + "_"+ currentFont + "_links.xlsx";
                }

        console.log('current linksheet', linksheet)
  Routine displayQuestions
    CodeComponent questionCode
      Code Type = JS
      Begin JS Routine:
        // create the excel column name that represents the current question text
        questionIdentifier              = ('ques'+((rand_qo[question_trials.thisN]).toString())+'text')
        labelIdentifier                 = ('ques'+((rand_qo[question_trials.thisN]).toString())+'label')
        itemIDIdentifier                = ('ques'+((rand_qo[question_trials.thisN]).toString())+'ID')
        correctLabelIdentifier          = ('ques'+((rand_qo[question_trials.thisN]).toString())+'correct')

        console.log('current question ID: ',questionIdentifier)

        // call the question text
        currentQuestion                 = thisStimulus_list[questionIdentifier];
        currentlabel                    = thisStimulus_list[labelIdentifier];

        // what is the item type (passage, comp question, mini survey?)
        itemID                          = thisStimulus_list[itemIDIdentifier];

        //what is the set ID
        setID                           = thisStimulus_list["setID"]

        // change additional question text's centering and style
        questionText.setAlignHoriz('left')
        questionText.bold = true;
        questionPressInstruction.setAlignHoriz('left')
        questionPressInstruction.bold = true;

        // adjust slider vertical size depending on the number of options
        // get slider labels from the excel file

        sliderLabels                    = thisStimulus_list[labelIdentifier];
        sliderLabels                    = sliderLabels.split(";");

        if (sliderLabels.length > 2) {
            sliderLabels.push("I don't know");
        }
        //sliderLabels.unshift("Prefer not to answer");
        // how many labels?
        labelCount                      = sliderLabels.length;

        // call correct label no
        correctLabelNo                  = thisStimulus_list[correctLabelIdentifier]

        if (correctLabelNo === undefined){
            // if there is no correct answer cell in the sheet, accept last label as correct
            correctLabelNo              = labelCount - 1 // (last label will be correct)


            }else {
                // if there is a cell that indicate correct answer for comp questions
                if (isNaN(correctLabelNo)){
                    // if label number is a string, convert it to number
                    correctLabelNo      = Number(correctLabelNo);
                }
                // subtract one from the label number because javascript starts to read from 0
                correctLabelNo          = correctLabelNo -1;

                if (sliderLabels.length > 2) {
                    correctLabelNo -= 1;
                }

        }

        // console.log('correct label indx: ',correctLabelNo)

        // if there are less then 3 options on the slider,
        // decrease the vertical size of the slider by half
        if (labelCount < 3){
                sliderSize[1] = (vsize*26/100)/2.5
            } else {
                 sliderSize[1] = vsize*26/100;
                }


        // console.log('slider labels: ',sliderLabels)
        // console.log('slider size: ',sliderSize)
    TextComponent questionText
      color [set every repeat] = $textColor
      font [set every repeat] = Arial
      letterHeight [set every repeat] = questionTextSize*y_scale
      pos [set every repeat] = (questionsXaxis, questionsTopYaxis)
      startVal [time (s)] = 0.0
      text [set every repeat] = $currentQuestion
      wrapWidth = wrapWidthText
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    TextComponent questionPressInstruction
      color [set every repeat] = $textColor
      font [set every repeat] = Arial
      letterHeight [set every repeat] = questionTextSize*y_scale
      pos [set every repeat] = (questionsXaxis, questionsBottomYaxis)
      startVal [time (s)] = 0.0
      wrapWidth = wrapWidthText
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      text [set every repeat]:
        Click on the dot to the left of the correct answer

        Please press the button on the right hand corner to continue after your choice
    PolygonComponent radiobutton_1
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (0,0)
      shape = circle
      size [set every repeat] = (radiobutton_size, radiobutton_size)
      startVal [time (s)] = 0.0
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    PolygonComponent radiobutton_2
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (0,0)
      shape = circle
      size [set every repeat] = (radiobutton_size, radiobutton_size)
      startVal [time (s)] = 0.0
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    PolygonComponent radiobutton_3
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (0,0)
      shape = circle
      size [set every repeat] = (radiobutton_size, radiobutton_size)
      startVal [time (s)] = 0.0
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    PolygonComponent radiobutton_4
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (0,0)
      shape = circle
      size [set every repeat] = (radiobutton_size, radiobutton_size)
      startVal [time (s)] = 0.0
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    PolygonComponent radiobutton_5
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (0,0)
      shape = circle
      size [set every repeat] = (radiobutton_size, radiobutton_size)
      startVal [time (s)] = 0.0
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    PolygonComponent radiobutton_6
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (0,0)
      shape = circle
      size [set every repeat] = (radiobutton_size, radiobutton_size)
      startVal [time (s)] = 0.0
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    PolygonComponent radiobutton_7
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (0,0)
      shape = circle
      size [set every repeat] = (radiobutton_size, radiobutton_size)
      startVal [time (s)] = 0.0
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    PolygonComponent radiobutton_8
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (0,0)
      shape = circle
      size [set every repeat] = (radiobutton_size, radiobutton_size)
      startVal [time (s)] = 0.0
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    PolygonComponent radiobutton_9
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (0,0)
      shape = circle
      size [set every repeat] = (radiobutton_size, radiobutton_size)
      startVal [time (s)] = 0.0
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    SliderComponent questionSlider
      borderColor = black
      color = black
      fillColor = black
      flip = True
      font [set every repeat] = Calibri
      forceEndRoutine = False
      granularity = 1
      letterHeight [set every repeat] = labelTextSize*y_scale
      pos [set every repeat] = sliderPosition
      size [set every repeat] = sliderSize
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3)
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    CodeComponent updateAndRegister
      Code Type = JS
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      Begin JS Experiment:
        positions                       = []
        radiobutton_size                = 23


        // initialize colors for slider
        col_white                       = new util.Color('white');
        col_grey                        = new util.Color('grey');
        col_red                         = new util.Color('red');
        col_black                       = new util.Color('black');
      Begin JS Routine:
        ////////////////////////////////////////////////
        //// UPDATE SLIDER LABELS, SIZE, COLOR ETC. ////
        ////////////////////////////////////////////////

        // get slider labels from the excel file
        sliderLabels                    = thisStimulus_list[labelIdentifier];
        sliderLabels                    = [...sliderLabels.split(";"), "I don't know"];

        if (sliderLabels.length == 3 ) {
            sliderLabels.pop()
        }

        //sliderLabels.unshift("Prefer not to answer");
        labelCount                      = sliderLabels.length;

        // create tick marks so that data registry makes sense in terms of scores of each
        // label: start from 1 not 0.
        tickMarks                       = range(1,labelCount);


        // get the correct answer which is indexed by correct question headers from the excel file
        correctAnswer                   = sliderLabels[sliderLabels.length - 2]; // -1 because index starts with 0

        // print correct label
        //console.log('correct answer: ',correctAnswer)
        // shuffle slider labels after you get the correct answer
        if (sliderLabels.length > 2 ) {
            sliderLabels.pop()
        }
        shuffledLabels                  = randomArrayShuffle(sliderLabels)

        if (sliderLabels.length > 2 ) {
            shuffledLabels = ["I don't know", ...shuffledLabels]
        }

        // display shuffled labels as tick marks
        // console.log('slider labels shuffled', shuffledLabels)
        questionSlider.setLabels(shuffledLabels);

        // change ticks of the slider
        questionSlider.setTicks(tickMarks);

        // change font of the slider text
        // console.log('slider font size', labelTextSize*y_scale)
        questionSlider.setFontSize(labelTextSize*y_scale);

        // adjust slider's position and size
        questionSlider._pos             = sliderPosition;
        questionSlider._size            = sliderSize;
        // change slider's color and marker properties
        questionSlider._lineColor       = col_white; // color of static circle ;

        labelPosition_y                 = Math.abs(sliderSize[1] / (labelCount-1));
        positions                       = [];

        // what are the maximum amount of radio buttons of this slider
        // count radiobutton_# components, now it is 9.
        maxLabels                       = 9;

        radiobutton_size                = [sliderSize[0]* 1.15, sliderSize[0]* 1.15];

        evenLabelCount                  = ((labelCount % 2) === 0);
        // name of radio components
        radioComponentName              = 'radiobutton_'

        if (evenLabelCount) {
            // console.log('here even label')
            // there is no middle label, so get the half of the distance
            // of labels and move on from there while positioning the radio buttons
            labelPosition_y = labelPosition_y / 2;

            // initialize label position coordinate multiplier
            positionMultiplier = 1;

            // loop over number of labels
            for (var k = 0; k < labelCount; k++){

                // initialize label number index
                var buttonNo = k + 1;

                if ((k % 2) === 0) {
                    // increase the position multipler at every odd number
                    // this increases the distance from the middle label every third label
                    if (k > 1) {

                        positionMultiplier = positionMultiplier+2;
                    }
                    positions[k] = [sliderPosition[0], sliderPosition[1]+(positionMultiplier*labelPosition_y)];

                } else{

                    positions[k] = [sliderPosition[0], sliderPosition[1]-(positionMultiplier*labelPosition_y)];

                }
                // enter the position and size values into individual label radio buttons
                // position
                eval(radioComponentName + buttonNo + '._pos' +'= ['+positions[k][0] +', '+positions[k][1]+'];' );
                // size
                eval(radioComponentName + buttonNo + '._size' +'= ['+sliderSize[0]* 1.15+', '+sliderSize[0]* 1.15+'];' );
                // draw the changes
                eval(radioComponentName + buttonNo + '._autoDraw' +'='+true+';');
                console.log('comprehension radio button'+buttonNo.toString(),eval(radioComponentName + buttonNo + '._pos' +'= ['+positions[k][0] +', '+positions[k][1]+'];' ));
            }

        } else {
                // if there are odd number of labels

                // there will be a middle label which should be placed at the
                // default position of the slider
                radiobutton_1._pos      = [sliderPosition[0], sliderPosition[1]];
                radiobutton_1._size     = radiobutton_size;
                eval(radioComponentName + 1 + '._pos' +'= ['+ sliderPosition[0] +','+ sliderPosition[1]+'];' );

                // size
                eval(radioComponentName + 1 + '._size' +'= ['+sliderSize[0]* 1.15+', '+sliderSize[0]* 1.15+'];' );
                // initialize label position coordinate multiplier
                positionMultiplier = 0;
                // loop over labels
                for (var k = 1; k < labelCount; k++){
                    // initialize label number index
                    var buttonNo = k + 1;

                    if ((k % 2) === 0) {

                        positions[k] = [sliderPosition[0], sliderPosition[1]+(positionMultiplier*labelPosition_y)];

                    } else{
                        // increase the position multipler at every odd number
                        // this increases the distance from the middle label every third label
                        positionMultiplier =positionMultiplier+1
                        positions[k] = [sliderPosition[0], sliderPosition[1]-(positionMultiplier*labelPosition_y)];

                    }
                    console.log('uneven k',k)
                    console.log('uneven positionMultiplier',positionMultiplier)
                    // enter the position and size values into individual label radio buttons
                    // position
                    eval(radioComponentName + buttonNo + '._pos' +'= ['+ positions[k][0] +','+ positions[k][1]+'];' );
                    // size
                    eval(radioComponentName + buttonNo + '._size' +'= ['+sliderSize[0]* 1.15+', '+sliderSize[0]* 1.15+'];' );
                    // draw the changes
                    eval(radioComponentName + buttonNo + '._autoDraw' +'='+true+';');

                    console.log('comprehension radio button'+buttonNo.toString(),eval(radioComponentName + buttonNo + '._pos' +'= ['+positions[k][0] +', '+positions[k][1]+'];' ));
                }

            }



        // remove radio buttons of slider labels that do not exist
        for (var i = labelCount; i <= maxLabels-1 ; i++){
            console.log(i);
            var buttonNo = i + 1;
            positions[i] = [sliderPosition[0], sliderPosition[1]+labelPosition_y];
            eval(radioComponentName + buttonNo + '._pos'+'= ['+ 0 +','+ 0+'];' );
            eval(radioComponentName + buttonNo + '._size'+'='+1+';' );
            eval(radioComponentName + buttonNo + '._autoDraw' +'='+true+';');

        }


        // console.log('comprehension slider', questionSlider)
        //////////////////////////////////////////////////////////////////
        // initiate input monitoring for conditional next-page command
        // (next page command does not work unless participant chose one of
        // the labels.
        psychoJS.eventManager.clearEvents();
        clearEventAfterChoice = 1;

        // start Timer for question reaction time
        myClock.reset(); // reset the timer
        startTime = myClock.getTime();
      Each JS Frame:
        compChoice = questionSlider.getRating();

        // create a for loop using length of labels and update these like that
        for (let i = 0; i < labelCount; i++) {
            //console.log('current label for wrapwidth',i)
            //console.log('type of I',typeof i.toString())
            questionSlider._pixiLabels[i.toString()]._style._wordWrap = true
            questionSlider._pixiLabels[i.toString()]._style._wordWrapWidth = wrapWidthText
            questionSlider._pixiLabels[i.toString()]._style._align = "left"
        }
      End JS Routine:
        // get the selected option among the labels
        compChoiceText = shuffledLabels[compChoice-1]; // -1 because label index starts with 0, tick mark starts with 1.
        // check if selected answer matches the correct answer
        if (correctAnswer === compChoiceText) {
                compAccuracy = 1;
                // console.log("CORRECT ANSWER TO COMP")

            } else {
                compAccuracy = 0;
                // console.log("WRONG ANSWER TO COMP")
            }



        // console.log('mouse-comp: ',mouseComprehension)
        // console.log('mouse-comp-time: ',mouseComprehension.time)


        // get reaction time from psychopy's mouse component

        // get the amount of mouse clicks
        mouselength         = comprehensionMouse.time.length
        // get the start time of mouse click component
        mouse_tStart        = comprehensionMouse.tStart;
        // get 'next button's starting second
        button_tStart       = questionText.tStart
        // get the latest mouse click-- which terminates the loop
        validClick          = comprehensionMouse.time[mouselength-1];
        // add mouse's and button's starting seconds to the click RT, because it starts to count RT after these are displayed
        compRT              = validClick + mouse_tStart - button_tStart;

        // console.log('mouse time',validClick)
        // console.log('mouse rt', compRT)


        // get browser zoom
        browserZoom         = window.outerWidth*100 / window.innerWidth;
        // format date
        registeryDate       = util.MonotonicClock.getDateStr()
        registeryDate       = formatDateTime(registeryDate)

        // register data into lists
        data_setID.push(setID); // type of the set (AI or Human)
        data_itemID.push(itemID); // item ID is the unique ID assigned to each stimulus displayed on the screen
        data_trialType.push(trialType); // is this a test or a practice trial
        data_blockName.push(blockName); // what is the name of this block
        data_totalTrialIndex.push(totalTrialIterationIndex); // what is the trial number (total across all blocks)

        data_dateTime.push(registeryDate); // date and time
        data_zoomLevel.push(browserZoom);
        data_passageFont.push(currentFont); // what was the font used in this passage
        data_passageSpacing.push(currentLink); // what was spacing used in this passage
        data_passageType.push([]);// what is the type of this set (informative, narrative)?
        data_passageLevel.push([]); // what is the grade level (2nd, 3rd)
        data_articleSkipType.push([]) // which button did they press (next or popup link)



        data_passageRT.push([]); // words per minute
        data_passageWPM.push([]); // words per minute
        data_passageWordCount.push([]);
        data_feedbackRating.push([]) // rating of the likert scale

        data_compChoice.push(compChoiceText); // chosen option is registered as text
        data_surveyRT.push(compRT); // time to respond to comprehension question
        data_compAccuracy.push(compAccuracy); // empty because there is no accuracy during passages

        /* accuracy registery for fit-clash  */
        if (trialType != "practice"){

            // enable registery for test trials, exclude practice trials
            getFitClash_all[currentConditions].accuracy.push(compAccuracy) // push current accuracy for cond interaction registry
            getFitClash_spacing[currentLink].accuracy.push(compAccuracy) // push accuracy only for spacing conditions
            getFitClash_font[currentFont].accuracy.push(compAccuracy) // push accuracy for only font conditions

        }

        // remove radio buttons so that they won't appear at the center in next trial
        for (var i = 0; i < maxLabels; i++) {
            var buttonNo = i + 1;
            eval(radioComponentName + buttonNo + '._pos'+'= ['+ 0 +','+ 0+'];' );
            eval(radioComponentName + buttonNo + '._size'+'='+1+';' );

            }
    ImageComponent comprehensionButton
      image = next_button.png
      pos [set every repeat] = (buttonX,buttonY)
      size [set every repeat] = (buttonWidth,buttonHeight)
      startVal [condition] = questionSlider.rating
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    MouseComponent comprehensionMouse
      clickable = comprehensionButton
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [condition] = questionSlider.rating
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  Routine screenScale
    CodeComponent scaleCode
      Code Type = JS
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      Begin JS Experiment:
        win=psychoJS.window;
        console.log('below screen size')
        console.log("whole window",win)
        console.log("sizes",win.size[0],win.size[1])
        hsize = 0;
        vsize = 0;
        // initialize screen scale bank for
        // repeated scaling of the screen
        scaleBank = {"x": [NaN,NaN],"y":[NaN,NaN]}

        snellenHeight= 0
        snellenWidth = 0

        oldt = 0;
        x_size = 8.56;
        y_size = 5.398;
        x_size_pix = 640;
        y_size_pix = 401;
        screen_height = 0;
        if ((psychoJS.window.units === "norm")) {
            x_scale = 0.05;
            y_scale = 0.1;
            dbase = 0.0001;
            unittext = " norm units";
            vsize = 2;
        } else {
            if ((psychoJS.window.units === "pix")) {
                x_scale = 60;
                y_scale = 40;
                dbase = 0.1;
                unittext = " pixels";
            } else {
                x_scale = 0.05;
                y_scale = 0.05;
                dbase = 0.0001;
                unittext = " height units";
                vsize = 1;
            }
        }
        console.log((x_size * x_scale), (y_size * y_scale));
      Begin JS Routine:
        psychoJS.eventManager.clearEvents();

        console.log('this n value: ',screenScaleTrials.thisN)


        oldt = 0;
        ccStart = Date.now();
        x_size = 8.56;
        y_size = 5.398;
        x_size_pix = 640;
        y_size_pix = 401;
        screen_height = 0;
        if ((psychoJS.window.units === "norm")) {
            x_scale = 0.05;
            y_scale = 0.1;
            dbase = 0.0001;
            unittext = " norm units";
            vsize = 2;
        } else {
            if ((psychoJS.window.units === "pix")) {
                x_scale = 60;
                y_scale = 40;
                dbase = 0.1;
                unittext = " pixels";
            } else {
                x_scale = 0.05;
                y_scale = 0.05;
                dbase = 0.0001;
                unittext = " height units";
                vsize = 1;
            }
        }
        console.log((x_size * x_scale), (y_size * y_scale));
      Each JS Frame:
        var _pj;
        var scale_buttons            = {};
        scale_buttons.up_button = {width: up_button._size[1], height: up_button._size[0], x: up_button._pos[0], y: up_button._pos[1]};
        scale_buttons.down_button = {width: down_button._size[1], height: down_button._size[0], x: down_button._pos[0], y: down_button._pos[1]};
        scale_buttons.right_button = {width: right_button._size[0], height: right_button._size[1], x: right_button._pos[0], y: right_button._pos[1]};
        scale_buttons.left_button = {width: left_button._size[0], height: left_button._size[1], x: left_button._pos[0], y: left_button._pos[1]};

        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (-1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }

        function has_clicked_arrow() {

        }
        _pj = {};
        _pj_snippets(_pj);
        keys = psychoJS.eventManager.getKeys();
        arrowClicked = screenScaleMouse.getPressed().some((key) => key != 0)
        //rectangleClickCheckImage(clickPosition, underlined_words)
        let buttonClicked = ""
        if (arrowClicked) {
            let output = rectangleClickCheckImage(screenScaleMouse.getPos(), scale_buttons)

            arrowClicked = output[0]
            buttonClicked = output[1]
         }

        if ((keys.length || arrowClicked) && (Date.now() - ccStart) > 1500) {
            console.log(rectangleClickCheckImage(screenScaleMouse.getPos(), scale_buttons))
            console.log({mouse: screenScaleMouse, pos: screenScaleMouse.getPos(), buttonClicked, right_button})
            if (((t - oldt) < 0.5)) {
                dscale = (5 * dbase);
                oldt = t;
            } else {
                dscale = dbase;
                oldt = t;
            }
            if ((_pj.in_es6("space", keys)) && (t > 1)) {
                continueRoutine = false;
            } else {
                if (_pj.in_es6("up", keys) || buttonClicked == "up_button") {
                    y_scale = (Math.round(((y_scale + dscale) * 10000)) / 10000);
                } else {
                    if (_pj.in_es6("down", keys) || buttonClicked == "down_button") {
                        y_scale = (Math.round(((y_scale - dscale) * 10000)) / 10000);
                    } else {
                        if (_pj.in_es6("left", keys) || buttonClicked == "left_button") {
                            x_scale = (Math.round(((x_scale - dscale) * 10000)) / 10000);
                        } else {
                            if (_pj.in_es6("right", keys) || buttonClicked == "right_button") {
                                x_scale = (Math.round(((x_scale + dscale) * 10000)) / 10000);
                            }
                        }
                    }
                }
            }
            screen_height = (Math.round(((vsize * 10) / y_scale)) / 10);
            textBottom.text = (((((((("X Scale = " + x_scale.toString()) + unittext) + " per cm, Y Scale = ") + y_scale.toString()) + unittext) + " per cm\nScreen height = ") + screen_height.toString()) + " cm\n\nPress the space bar when done");
            ccimage.size = [(x_size * x_scale), (y_size * y_scale)];
            console.log((x_size * x_scale), (y_size * y_scale));
        }
      End JS Routine:
        psychoJS.experiment.addData("X Scale", x_scale);
        psychoJS.experiment.addData("Y Scale", y_scale);

        scaleBank["y"][screenScaleTrials.thisN] = y_scale
        scaleBank["x"][screenScaleTrials.thisN] = y_scale
        if (screenScaleTrials.thisN === 1){
                y_scale = (scaleBank["y"][0]+scaleBank["y"][1])/2
                x_scale = (scaleBank["x"][0]+scaleBank["x"][1])/2
                console.log('y_scale', y_scale)
                // get desired snellen chart height
                // 14.7 = iphone X screen height in cm
                // 7.9 = iphone X screen width in cm
                snellenHeight   = y_scale * 14.36;
                snellenWidth    = y_scale * 7.9;

                pelliWidth      = snellenWidth;
                pelliHeight     = pelliWidth * 1.1955;

                snellenY = (snellenHeight-vsize)/2


                //y_scale= y_scale/40;
                y_scale= y_scale/40;
                x_scale = x_scale / 60;

                imagesize = [imagesize[0]*y_scale,imagesize[1]*y_scale]

                popupsize = [popupsize[0]*y_scale,popupsize[1]*y_scale]

                preferencesize = [1247,302]



                halfimg_x = popupsize[0]/2
                halfscreen_y = vsize/2


                preference_y = (halfscreen_y-preferencesize[1])
                preference_question_y = preference_y-(vsize*.2)
                preference_slider_y   = preference_question_y-(vsize*.2)


                popup_buttons = {}
                popup_buttons.back_button = {}
                popup_buttons.back_text = {}
                popup_buttons.close_button = {}
                // register position and size of popup's back button
                popup_buttons.back_button.width  = 200
                popup_buttons.back_button.height = 50
                popup_buttons.back_button.x      = (-halfimg_x+(popup_buttons.back_button.width/2))
                popup_buttons.back_button.y      = (-halfscreen_y + (halfscreen_y*.1)) + popup_buttons.back_button.height


                // register position and size of popup's back text
                popup_buttons.back_text.width  = 200
                popup_buttons.back_text.height = 50
                popup_buttons.back_text.x      = popup_buttons.back_button.x + popup_buttons.back_button.width/2 +popup_buttons.back_text.width/2
                popup_buttons.back_text.y      = popup_buttons.back_button.y


                // register position and size of popup's close button
                popup_buttons.close_button.width  = 25
                popup_buttons.close_button.height = 25
                popup_buttons.close_button.x      = (halfimg_x - (halfimg_x*.1))
                popup_buttons.close_button.y      = (halfscreen_y-(halfscreen_y*.05)) - popup_buttons.close_button.height

                // memory test buttons
                memory_button            = {}
                memory_button.yes_button = {}
                memory_button.no_button  = {}

                memory_button.yes_button.width      = hsize/10
                memory_button.yes_button.height     = hsize/20
                memory_button.yes_button.x          = -hsize/10
                memory_button.yes_button.y          = -hsize/10

                memory_button.no_button.width       = hsize/10
                memory_button.no_button.height      = hsize/20
                memory_button.no_button.x           = hsize/10
                memory_button.no_button.y           = -hsize/10
                console.log('y_scale-ratio', y_scale)
            }
    TextComponent textTop
      color [set every repeat] = $textColor
      font = $textFont
      letterHeight [set every repeat] = 20
      pos [set every repeat] = (0, topScreenInstruction)
      startVal [time (s)] = 0.0
      units = pix
      wrapWidth = wrapWidthText
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      text:
        Resize the Image: Grab a physical credit card for reference and adjust the image on the screen so that it matches the size of your physical credit card.

        Use the Arrow Keys for Resizing:
        ⬆ Up Arrow: Increase the height (make the image taller).
        ⬇ Down Arrow: Decrease the height (make the image shorter).
        ⬅ Left Arrow: Decrease the width (make the image narrower).
        ➡ Right Arrow: Increase the width (make the image wider).
    TextComponent textBottom
      color [set every repeat] = $textColor
      font = $textFont
      letterHeight [set every repeat] = 20
      pos [set every repeat] = (0,bottomScreenInstruction)
      startVal [time (s)] = 0.0
      text = Please press the SPACE BAR to advance to the next page when you are done.
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    ImageComponent ccimage
      image = bank-1300155_640.png
      pos = (0, ccImageY)
      size [set every repeat] = (x_size*x_scale, y_size*y_scale)
      startVal [time (s)] = 0.0
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    ImageComponent up_button
      image = next_button.png
      ori = -90
      pos [set every repeat] = (ss_up_buttonX,ss_up_buttonY)
      size [set every repeat] = (buttonWidth,buttonHeight)
      startVal [time (s)] = 0.5
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    ImageComponent down_button
      image = next_button.png
      ori = 90
      pos [set every repeat] = (ss_up_buttonX,-ss_up_buttonY)
      size [set every repeat] = (buttonWidth,buttonHeight)
      startVal [time (s)] = 0.5
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    ImageComponent left_button
      image = next_button.png
      ori = 180
      pos [set every repeat] = (ss_left_buttonX,ss_right_buttonY)
      size [set every repeat] = (buttonWidth,buttonHeight)
      startVal [time (s)] = 0.5
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    ImageComponent right_button
      image = next_button.png
      pos [set every repeat] = (ss_right_buttonX,ss_right_buttonY)
      size [set every repeat] = (buttonWidth,buttonHeight)
      startVal [time (s)] = 0.5
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    MouseComponent screenScaleMouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 1
      stopVal [duration (s)] = 1.0
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
  Routine setTrialParametersDemographic
    CodeComponent getTrialParametersDemographic
      Code Type = JS
      Begin JS Experiment:
        demogBlockIndx = 0
      Begin JS Routine:
        console.log('slider size demog init: ', sliderSize)

        // setup trial parameters
        trialproperties         = thisStimulus_listD["trialproperties"] // cell that indicates the number of passages and questions
        //console.log('stim list D', thisStimulus_listD)
        trialproperties         = trialproperties.split(";")
        //console.log('trialdata',trialproperties)
        // likert counts
        likertCount             = trialproperties[0]
        //console.log('likertCount text',likertCount)
        likertCount             = getItemCount(likertCount)
        //likertCount = Number(likertCount[likertCount.length-1]) // get the last element (count)

        // textbox counts
        textboxCount            = trialproperties[1]
        //console.log('textboxCount text',textboxCount)
        textboxCount            = getItemCount(textboxCount)

        //textboxCount = Number(textboxCount[textboxCount.length-1]) // get the last element (count)


        //randomization of questions within a set (1= yes, 0=no)
        randomizeQuestions      = trialproperties[2]
        randomizeQuestions      = Number(randomizeQuestions[randomizeQuestions.length-1]) // get the last element (count)

        // create likert questions' index array
        rand_lo = [];
        for (var i, _pj_c = 0, _pj_a = range(0, likertCount), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            rand_lo.push(_pj_c+1);
        }
        //console.log(rand_lo)
        // create textbox questions' index array
        rand_to = [];//[1,2,3,4,5,6,7,8,9,10];
        for (var i, _pj_c = 0, _pj_a = range(0, textboxCount), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            rand_to.push(_pj_c+1);
        }

        if (randomizeQuestions === 1) {
             rand_lo            = randomArrayShuffle(rand_lo);
             rand_to            = randomArrayShuffle(rand_to);
            }


        // what is this trial: practice or test?
        trialType               = thisStimulus_listD['trialType'];


        blockName               = "demographic_scale";
  Routine displayDemographicQuestions
    CodeComponent initiateQuestionDemographic
      Code Type = JS
      Begin JS Routine:
        // call the question text
        let questions = [
          [
            "hyperlkinkAwarenss",
            "Have you heard of the word hyperlinks?",
            "Yes;No"
          ],
          [
            "hyperlkinkKnowledge",
            "Do you know what Hyperlinks are?",
            "Yes;No"
          ],
          [
            "hyperlinkBenefit",
            "If you read information in the hyperlinks, did they help you understand the main article better?",
            "Strongly Agree;Agree;Neutral;Disagree;Strongly Disagree",
          ],
          [
            "postAttention",
            "To what extent did you pay attention to each question and consider your responses before answering?",
            "Extremely attentive;Attentive;Neutral;Inattentive;Extremely Inattentive",
          ],
          [
            "postRandomly",
            "Did you provide responses randomly or without careful consideration during any part of the  experiment?",
            "No all responses were thoughtful;Yes, a few responses were random;Yes, several responses were random;I'm not sure;Prefer not to say.",
          ],
        ];

        currentQuestionDescription = questions[post_survey_loop.thisN][0];
        currentQuestionDemographic = questions[post_survey_loop.thisN][1];
        sliderLabels = questions[post_survey_loop.thisN][2];


        // what is the item type (passage, comp question, mini survey?)
        itemID                          = currentQuestionDescription;

        //what is the set ID
        setID = "post_survey"

        // change additional question text's centering and style
        questionTextDemographic.setAlignHoriz('left')
        questionTextDemographic.bold = true;
        pressSpaceTextDemographic.setAlignHoriz('left')
        pressSpaceTextDemographic.bold = true;

        // adjust slider vertical size depending on the number of options
        // get slider labels from the excel file
        console.log('slider size hyper pref before: ', sliderSize)

        //sliderLabels.unshift("Prefer not to answer");
        labelCount = (sliderLabels.length);
        // if there are less then 3 options on the slider,
        // decrease the vertical size of the slider by half
        if (labelCount < 3){
                sliderSize[1] = (vsize*26/100)/2.5
            } else {
                 sliderSize[1] = vsize*26/100;
                }

        console.log('slider size hyper pref after: ', sliderSize)
    TextComponent questionTextDemographic
      color [set every repeat] = $textColor
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = questionTextSize*y_scale
      pos [set every repeat] = (questionsXaxis, questionsTopYaxis)
      startVal [time (s)] = 0.0
      text [set every repeat] = $currentQuestionDemographic
      wrapWidth = wrapWidthText
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    TextComponent pressSpaceTextDemographic
      color [set every repeat] = $textColor
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = questionTextSize*y_scale
      pos [set every repeat] = (questionsXaxis, questionsBottomYaxis)
      startVal [time (s)] = 0.0
      text [set every repeat] = Please press the button below to proceed after your choice.
      wrapWidth = wrapWidthText
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    PolygonComponent dradiobutton_1
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (0,0)
      shape = circle
      size [set every repeat] = (radiobutton_size, radiobutton_size)
      startVal [time (s)] = 0.0
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    PolygonComponent dradiobutton_2
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (0,0)
      shape = circle
      size [set every repeat] = (radiobutton_size, radiobutton_size)
      startVal [time (s)] = 0.0
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    PolygonComponent dradiobutton_3
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (0,0)
      shape = circle
      size [set every repeat] = (radiobutton_size, radiobutton_size)
      startVal [time (s)] = 0.0
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    PolygonComponent dradiobutton_4
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (0,0)
      shape = circle
      size [set every repeat] = (radiobutton_size, radiobutton_size)
      startVal [time (s)] = 0.0
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    PolygonComponent dradiobutton_5
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (0,0)
      shape = circle
      size [set every repeat] = (radiobutton_size, radiobutton_size)
      startVal [time (s)] = 0.0
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    PolygonComponent dradiobutton_6
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (0,0)
      shape = circle
      size [set every repeat] = (radiobutton_size, radiobutton_size)
      startVal [time (s)] = 0.0
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    PolygonComponent dradiobutton_7
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (0,0)
      shape = circle
      size [set every repeat] = (radiobutton_size, radiobutton_size)
      startVal [time (s)] = 0.0
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    PolygonComponent dradiobutton_8
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (0,0)
      shape = circle
      size [set every repeat] = (radiobutton_size, radiobutton_size)
      startVal [time (s)] = 0.0
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    PolygonComponent dradiobutton_9
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (0,0)
      shape = circle
      size [set every repeat] = (radiobutton_size, radiobutton_size)
      startVal [time (s)] = 0.0
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    SliderComponent questionSliderDemographic
      borderColor = black
      color = black
      fillColor = black
      flip = True
      font [set every repeat] = $textFont
      forceEndRoutine = False
      granularity = 1
      letterHeight [set every repeat] = questionTextSize*y_scale
      pos [set every repeat] = sliderPosition
      size [set every repeat] = sliderSize
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3)
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    CodeComponent updateAndRegisterDemographic
      Code Type = JS
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      Begin JS Routine:
        ////////////////////////////////////////////////
        //// UPDATE SLIDER LABELS, SIZE, COLOR ETC. ////
        ////////////////////////////////////////////////

        // get slider labels from the excel file
        sliderLabels                        = sliderLabels.split(";");
        //sliderLabels.unshift("Prefer not to answer");
        labelCount                          = (sliderLabels.length);
        sliderLabels                        = sliderLabels.reverse();

        // create tick marks so that data registry makes sense in terms of scores of each
        // label: start from 1 not 0.
        tickMarks                           = range(1,labelCount);

        // display shuffled labels as tick marks
        questionSliderDemographic.setLabels(sliderLabels);

        // change ticks of the slider
        questionSliderDemographic.setTicks(tickMarks);

        // change font of the slider text
        questionSliderDemographic.setFontSize(labelTextSize*y_scale);

        // adjust slider's position and size
        questionSliderDemographic._pos      = sliderPosition;
        questionSliderDemographic._size     = sliderSize;

        // change slider's color and marker properties
        questionSliderDemographic._lineColor = col_white // color of static circle ;

        // what are the maximum amount of radio buttons of this slider
        // count radiobutton_# components, now it is 9.
        labelPosition_y                     = Math.abs(sliderSize[1] / (labelCount-1));

        positions                           = [];

        maxLabels                           = 9;

        radiobutton_size                    = [sliderSize[0]* 1.15, sliderSize[0]* 1.15];

        evenLabelCount                      = ((labelCount % 2) === 0);
        // name of radio components
        radioComponentName                  = 'dradiobutton_';

        if (evenLabelCount) {
            console.log('here even label')
            // there is no middle label, so get the half of the distance
            // of labels and move on from there while positioning the radio buttons
            labelPosition_y                 = labelPosition_y / 2;

            // initialize label position coordinate multiplier
            positionMultiplier              = 1;

            // loop over number of labels
            for (var k = 0; k < labelCount; k++){

                // initialize label number index
                var buttonNo                = k + 1;

                if ((k % 2) === 0) {
                    // increase the position multipler at every odd number
                    // this increases the distance from the middle label every third label
                    if (k > 1) {

                        positionMultiplier  = positionMultiplier+2;
                    }
                    positions[k]            = [sliderPosition[0], sliderPosition[1]+(positionMultiplier*labelPosition_y)];

                } else{

                    positions[k]            = [sliderPosition[0], sliderPosition[1]-(positionMultiplier*labelPosition_y)];

                }
                // enter the position and size values into individual label radio buttons
                // position
                eval(radioComponentName + buttonNo + '._pos' +'= ['+positions[k][0] +', '+positions[k][1]+'];' );
                // size
                eval(radioComponentName + buttonNo + '._size' +'= ['+sliderSize[0]* 1.15+', '+sliderSize[0]* 1.15+'];' );
                // draw the changes
                eval(radioComponentName + buttonNo + '._autoDraw' +'='+true+';');
                // console.log('comprehension radio button'+buttonNo.toString(),eval(radioComponentName + buttonNo + '._pos' +'= ['+positions[k][0] +', '+positions[k][1]+'];' ));
            }

        } else {
                // if there are odd number of labels

                // there will be a middle label which should be placed at the
                // default position of the slider
                dradiobutton_1._pos         = [sliderPosition[0], sliderPosition[1]];
                dradiobutton_1._size        = radiobutton_size;

                eval(radioComponentName + 1 + '._pos' +'= ['+ sliderPosition[0] +','+ sliderPosition[1]+'];' );
                // size
                eval(radioComponentName + 1 + '._size' +'= ['+sliderSize[0]* 1.15+', '+sliderSize[0]* 1.15+'];' );

                // initialize label position coordinate multiplier
                positionMultiplier          = 0;

                // loop over labels
                for (var k = 1; k < labelCount; k++){
                    // initialize label number index
                    var buttonNo = k + 1;

                    if ((k % 2) === 0) {

                        positions[k]        = [sliderPosition[0], sliderPosition[1]+(positionMultiplier*labelPosition_y)];

                    } else{
                        // increase the position multipler at every odd number
                        // this increases the distance from the middle label every third label
                        positionMultiplier  = positionMultiplier+1;
                        positions[k]        = [sliderPosition[0], sliderPosition[1]-(positionMultiplier*labelPosition_y)];

                    }
                    // console.log('uneven k',k);
                    // console.log('uneven positionMultiplier',positionMultiplier);
                    // enter the position and size values into individual label radio buttons
                    // position
                    eval(radioComponentName + buttonNo + '._pos' +'= ['+ positions[k][0] +','+ positions[k][1]+'];' );
                    // size
                    eval(radioComponentName + buttonNo + '._size' +'= ['+sliderSize[0]* 1.15+', '+sliderSize[0]* 1.15+'];' );
                    // draw the changes
                    eval(radioComponentName + buttonNo + '._autoDraw' +'='+true+';');

                    // console.log('comprehension radio button'+buttonNo.toString(),eval(radioComponentName + buttonNo + '._pos' +'= ['+positions[k][0] +', '+positions[k][1]+'];' ));
                }

            }


        // remove radio buttons of slider labels that do not exist
        for (var i = labelCount; i <= maxLabels - 1 ; i++){
            console.log(i);
            var buttonNo = i + 1;
            positions[i] = [sliderPosition[0], sliderPosition[1]+labelPosition_y];
            eval(radioComponentName + buttonNo + '._pos'+'= ['+ 0 +','+ 0+'];' );
            eval(radioComponentName + buttonNo + '._size'+'='+1+';' );
        }


        //////////////////////////////////////////////////////////////////
        // initiate input monitoring for conditional next-page command
        // (next page command does not work unless participant chose one of
        // the labels.
        psychoJS.eventManager.clearEvents();
        clearEventAfterChoice = 1;


        // start Timer for question reaction time
        myClock.reset(); // reset the timer
        startTime = myClock.getTime();
      Each JS Frame:
        compChoice = questionSliderDemographic.getRating();

        // create a for loop using length of labels and update these like that
        for (let i = 0; i < labelCount; i++) {
            //console.log('current label for wrapwidth',i)
            //console.log('type of I',typeof i.toString())
            questionSliderDemographic._pixiLabels[i.toString()]._style._wordWrap = true
            questionSliderDemographic._pixiLabels[i.toString()]._style._wordWrapWidth = wrapWidthText
        }
      End JS Routine:
        // get the selected option among the labels
        compChoiceText = sliderLabels[compChoice-1]; // -1 because label index starts with 0, tick mark starts with 1.

        isGender = currentQuestionDescription === "gender";
        isVision = currentQuestionDescription === "visionCorrection";

        if (isGender === true){
                participantGender = (sliderLabels[compChoice-1]);
            }

        if (isVision === true) {
                participantVision = (sliderLabels[compChoice-1]);
            }


        // get reaction time from psychopy's mouse component
        mouselength             = mouseDemographic.time.length;
        // get the mouse component's starting second
        mouse_tStart            = mouseDemographic.tStart;
        // get 'next button's starting second
        button_tStart           = questionTextDemographic.tStart;
        // get the latest mouse click-- which terminates the loop
        validClick              = mouseDemographic.time[mouselength-1];
        // add mouse's and button's starting seconds to the click RT, because it starts to count RT after these are displayed
        demographicRT           = validClick + mouse_tStart - button_tStart;

        // get the zoom level of browser
        var browserZoom     = window.outerWidth*100 / window.innerWidth;
        // format date
        registeryDate       = util.MonotonicClock.getDateStr();
        registeryDate       = formatDateTime(registeryDate);

        // register data
        data_setID.push(setID); // type of the set (AI or Human)
        data_itemID.push(itemID); // item ID is the unique ID assigned to each stimulus displayed on the screen
        data_trialType.push(trialType); // is this a test or a practice trial
        data_blockName.push("post_survey"); // what is the name of this block
        data_totalTrialIndex.push(totalTrialIterationIndex); // what is the trial number (total across all blocks)

        data_dateTime.push(registeryDate); // date and time
        data_zoomLevel.push(browserZoom);
        data_passageFont.push(currentFont); // what was the font used in this passage
        data_articleSkipType.push([]) // which button did they press (next or popup link)
        data_passageSpacing.push([]); // what was the spacing used in this passage

        // reaction time
        data_passageRT.push(demographicRT);
        // words per minute
        data_passageWPM.push([]);
        data_passageWordCount.push([]);

        data_compAccuracy.push([]); // empty because there is no accuracy during passages
        data_feedbackRating.push([]) // rating of the likert scale

        data_surveyRT.push(questionReactionTime); // time to respond to comprehension question
        data_compChoice.push(compChoiceText) // chosen option is registered as text
        // remove radio buttons so that they won't appear at the center in next trial
        for (var i = 0; i < maxLabels; i++) {
            var buttonNo = i + 1;
            eval(radioComponentName + buttonNo + '._pos'+'= ['+ 0 +','+ 0+'];' );
            eval(radioComponentName + buttonNo + '._size'+'='+1+';' );

            }
    ImageComponent nextButton_demographic
      image = next_button.png
      pos [set every repeat] = (buttonX,buttonY)
      size [set every repeat] = (buttonWidth,buttonHeight)
      startVal [condition] = questionSliderDemographic.rating
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    MouseComponent mouseDemographic
      clickable = nextButton_demographic
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [condition] = questionSliderDemographic.rating
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  Routine textBoxQuestions
    CodeComponent initiateTextbox
      Code Type = JS
      Begin JS Routine:
        // create the excel column name that represents the current question text
        questionIdentifier              = ('textbox'+((rand_to[textbox_trials.thisN]).toString())+'text')
        itemIDIdentifier                = ('textbox'+((rand_to[textbox_trials.thisN]).toString())+'ID')
        // call the question text
        currentTextboxItem              = thisStimulus_listD[questionIdentifier];
        currentTextboxItem              = currentTextboxItem.split(";")
        currentTextboxDescription       = currentTextboxItem[0] // label for this question, used for registry
        currentTextboxTextDemographic   = currentTextboxItem[1] // question text itself
        //console.log("text box items",currentTextboxItem);

        // what is the item type (passage, comp question, mini survey?)
        itemID                          = currentTextboxDescription

        //what is the set ID
        setID                           = thisStimulus_listD["setID"];

        // determine which of the text box question is about to be displayed
        // this is done to change the instructions regarding how to fill out
        // the textbox depending on the question.
        isMail                          = currentTextboxDescription === "email";
        isAge                           = currentTextboxDescription === "age";
        isOtherText                     = (isAge || isMail) === false;
        //console.log("ismail",isMail,"isAge",isAge,"isOtherText",isOtherText);

        // change additional question text's centering and weight
        pressSpaceTextTextbox.bold      = true;
        question_textbox.bold           = true;

        pressSpaceTextTextbox.setAlignHoriz('left')
        question_textbox.setAlignHoriz('left')
        // start Timer for 500 ms periods to scan for the text
        myClock.reset(); // reset the timer
        startTime                       = myClock.getTime();


        // conditional instructions on how to fill out the text box
        if (isMail === true) {
                // how to fill the mail textbox
                textBoxFill = "";
                pressSpaceTextFill = "Do not use spaces, enter a valid email format: example@gmail.com\n\n";
            }
        if (isAge === true) {
                // how to fill the age textbox
                textBoxFill = "";
                pressSpaceTextFill ="Do not use spaces, enter your age in numbers; example: 31\n\n";
            }
        if (isOtherText === true) {
                // how to fill other textboxes
                textBoxFill = "";
                pressSpaceTextFill = "Do not use paragraph breaks at the start or end of your response \n\n";
            }
    TextboxComponent fill_textbox
      alignment = center-left
      anchor = center-left
      bold = False
      borderColor = black
      borderWidth = 30
      color = -0.5373, -0.5608, -0.5608
      editable = True
      fillColor = white
      font [set every repeat] = $textFont
      letterHeight = 25
      pos [set every repeat] = [xAxisCenter, -50]
      size [set every repeat] = textboxSize
      startVal [time (s)] = 0.0
      text [set every repeat] = $textBoxFill
      units = pix
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    CodeComponent getTextFill
      Code Type = JS
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      Begin JS Routine:
        psychoJS.eventManager.clearEvents();
        clearEventAfterChoice = 1;
        fill_textbox.refresh()
        console.log("text box items",fill_textbox);


        // start Timer for question reaction time
        myClock.reset(); // reset the timer
        startTime = myClock.getTime();
      Each JS Frame:
        // get the text inside the text box
        sliderChoice = demoSlider.getRating();
        textInput = fill_textbox._pixi.text;
        textInput = textInput.trim();

        if (currentTextboxTextDemographic.includes('highest degree')) {
            textInput = demoSliderLabels[sliderChoice - 1] || '';
            console.error(textInput)
        }
        // check if text input contains "@" and "." for mail input and not SPACES
        //containsSpace = (textInput.indexOf(' ') === -1);
        containsMail = ((textInput.indexOf('@') > -1) && (textInput.indexOf('.') > -1) &&  (textInput.indexOf("example") === -1));
        containsMail = containsMail;
        //console.log('contains mail')
        //console.log(containsMail);
        // allow continue only if age input consists of two characters, does not check for number type
        validAge = (textInput.length >= 2);
        anyCharacterTyped = (textInput.length >= 1);
        isNumber = isNaN(textInput) === false; //this condition returns true when input is a number
        validAge = validAge && isNumber;

        if (clearEventAfterChoice === 1){
            psychoJS.eventManager.clearEvents();    // clears keypress events
                                                    // does not terminate the loop prematurely
            }

        currentTime = myClock.getTime();
        twoSecondElapsed = currentTime-startTime >=keyboardPauseDuration;
        if (twoSecondElapsed===true){
            if ((isMail && containsMail) || (isAge && validAge) || (isOtherText && anyCharacterTyped)) {
                //fill_textbox.borderColor= [0, 1, 0];
                if (clearEventAfterChoice === 1){
                    psychoJS.eventManager.clearEvents(); // clears keypress events after choice so that previous unrelated space
                    clearEventAfterChoice=0;             // does not terminate the loop prematurely
                    }
                var _pj;
                function _pj_snippets(container) {
                    function in_es6(left, right) {
                        if (((right instanceof Array) || ((typeof right) === "string"))) {
                            return (right.indexOf(left) > (- 1));
                        } else {
                            if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                                return right.has(left);
                            } else {
                                return (left in right);
                            }
                        }
                    }
                    container["in_es6"] = in_es6;
                    return container;
                }

                _pj = {};
                _pj_snippets(_pj);
                keys = psychoJS.eventManager.getKeys();
                console.log(keys);
                    if (keys.length) {
                        if (_pj.in_es6("return", keys)) {
                            continueRoutine = false;
                        } else {
                                psychoJS.eventManager.clearEvents();
                                questionReactionTime = myClock.getTime()-startTime
                            }
                    }
            } else {
                    //fill_textbox.borderColor= [1, 0, 0];
                    psychoJS.eventManager.clearEvents();
                }
        }
      End JS Routine:
        if (isAge===true) {
                participantAge = textInput;
            }

        // get browser zoom
        browserZoom = window.outerWidth*100 / window.innerWidth;

        // format date
        registeryDate = util.MonotonicClock.getDateStr()
        registeryDate = formatDateTime(registeryDate)

        // register data
        data_setID.push(setID); // type of the set (AI or Human)
        data_itemID.push(itemID); // item ID is the unique ID assigned to each stimulus displayed on the screen
        data_trialType.push(trialType); // is this a test or a practice trial
        data_blockName.push(blockName); // what is the name of this block
        data_totalTrialIndex.push("demographic_trials"); // what is the trial number (total across all blocks)

        data_dateTime.push(registeryDate); // date and time
        data_zoomLevel.push(browserZoom);
        data_passageFont.push(currentFont); // what was the font used in this passage
        data_articleSkipType.push([]) // which button did they press (next or popup link)

        data_passageRT.push([]); // words per minute
        data_passageWPM.push([]); // words per minute
        data_passageWordCount.push([]);
        data_passageSpacing.push([]); // what was the spacing used in this passage


        data_compAccuracy.push([]); // empty because there is no accuracy during passages
        data_feedbackRating.push([]) // rating of the likert scale

        data_surveyRT.push(questionReactionTime); // time to respond to comprehension question
        data_compChoice.push(textInput) // chosen option is registered as text
    TextComponent question_textbox
      color [set every repeat] = $textColor
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = questionTextSize*y_scale
      pos [set every repeat] = (xAxisCenter,questionsTopYaxis)
      startVal [time (s)] = 0.0
      text [set every repeat] = $currentTextboxTextDemographic + "\n(enter the text into the box below)"
      wrapWidth = wrapWidthText
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    TextComponent pressSpaceTextTextbox
      color [set every repeat] = $textColor
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = questionTextSize*y_scale
      pos [set every repeat] = (xAxisCenter, questionsBottomYaxis)
      startVal [time (s)] = 0.0
      text [set every repeat] = $(pressSpaceTextFill+ "Please press the ENTER to advance to the next page after you type in.")
      wrapWidth = wrapWidthText
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    PolygonComponent demoRadio_1
      fillColor = white
      lineColor = black
      lineWidth = 2
      shape = circle
      size = (radiobutton_size, radiobutton_size)
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    PolygonComponent demoRadio_2
      fillColor = white
      lineColor = black
      lineWidth = 2
      shape = circle
      size = (radiobutton_size, radiobutton_size)
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    PolygonComponent demoRadio_3
      fillColor = white
      lineColor = black
      lineWidth = 2
      shape = circle
      size = (radiobutton_size, radiobutton_size)
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    PolygonComponent demoRadio_4
      fillColor = white
      lineColor = black
      lineWidth = 2
      shape = circle
      size = (radiobutton_size, radiobutton_size)
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    PolygonComponent demoRadio_5
      fillColor = white
      lineColor = black
      lineWidth = 2
      shape = circle
      size = (radiobutton_size, radiobutton_size)
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    PolygonComponent demoRadio_6
      fillColor = white
      lineColor = black
      lineWidth = 2
      shape = circle
      size = (radiobutton_size, radiobutton_size)
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    SliderComponent demoSlider
      borderColor = white
      color = black
      fillColor = black
      flip = True
      forceEndRoutine = False
      granularity = 1
      labels = "PhD/Doctoral Degree", "Masters Degree",  "Bachelor Degree", "Associates Degree", "Some College", "High School"
      letterHeight = labelTextSize*y_scale
      pos = [sliderPosition[0]+125,sliderPosition[1]];
      saveStartStop = False
      size = sliderSize
      storeRating = False
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3, 4, 5, 6)
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    CodeComponent initDemoSlider
      Code Type = JS
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      Begin JS Experiment:
        positions                       = []
        radiobutton_size                = 23


        // initialize colors for slider
        col_white                       = new util.Color('white');
        col_grey                        = new util.Color('grey');
        col_red                         = new util.Color('red');
        col_black                       = new util.Color('black');



        demoRadios = [
            demoRadio_1,
            demoRadio_2,
            demoRadio_3,
            demoRadio_4,
            demoRadio_5,
            demoRadio_6,
        ];

        demoSliderLabels = [
            "PhD/Doctoral Degree",
            "Masters Degree",
            "Bachelor Degree",
            "Associates Degree",
            "Some College",
            "High School"
        ];
      Begin JS Routine:
        ////////////////////////////////////////////////
        //// UPDATE SLIDER LABELS, SIZE, COLOR ETC. ////
        ////////////////////////////////////////////////



        labelCount                      = 6;


        // 5 (number of labels - 1)
        labelPosition_y                 = Math.abs(sliderSize[1] / (5));
        positions                       = [];

        demoSlider.setFontSize(labelTextSize*y_scale);

        // what are the maximum amount of radio buttons of this slider
        // count radiobutton_# components, now it is 9.
        radiobutton_size                = [sliderSize[0]* 1.15, sliderSize[0]* 1.15];

        // name of radio components
        radioComponentName              = 'demoRadio_'


        // console.log('here even label')
        // there is no middle label, so get the half of the distance
        // of labels and move on from there while positioning the radio buttons
        labelPosition_y = labelPosition_y / 2;

        // initialize label position coordinate multiplier
        positionMultiplier = 1;

        // loop over number of labels
        for (var k = 0; k < labelCount; k++){

            // initialize label number index
            var buttonNo = k + 1;

            if ((k % 2) === 0) {
                // increase the position multipler at every odd number
                // this increases the distance from the middle label every third label
                if (k > 1) {

                    positionMultiplier = positionMultiplier+2;
                }
                positions[k] = [sliderPosition[0]+125, sliderPosition[1]+(positionMultiplier*labelPosition_y)];

            } else{

                positions[k] = [sliderPosition[0]+125, sliderPosition[1]-(positionMultiplier*labelPosition_y)];

            }
            // enter the position and size values into individual label radio buttons
            // position
            eval(radioComponentName + buttonNo + '._pos' +'= ['+positions[k][0] +', '+positions[k][1]+'];' );
            // size
            eval(radioComponentName + buttonNo + '._size' +'= ['+sliderSize[0]* 1.15+', '+sliderSize[0]* 1.15+'];' );
            // draw the changes
            eval(radioComponentName + buttonNo + '._autoDraw' +'='+true+';');
            console.log('comprehension radio button'+buttonNo.toString(),eval(radioComponentName + buttonNo + '._pos' +'= ['+positions[k][0] +', '+positions[k][1]+'];' ));
        }





        // remove radio buttons of slider labels that do not exist
        for (var i = labelCount; i <= maxLabels-1 ; i++){
            console.log(i);
            var buttonNo = i + 1;
            positions[i] = [sliderPosition[0]+125, sliderPosition[1]+labelPosition_y];
            eval(radioComponentName + buttonNo + '._pos'+'= ['+ 0 +','+ 0+'];' );
            eval(radioComponentName + buttonNo + '._size'+'='+1+';' );
            eval(radioComponentName + buttonNo + '._autoDraw' +'='+true+';');

        }


        // console.log('comprehension slider', questionSlider)
        //////////////////////////////////////////////////////////////////
        // initiate input monitoring for conditional next-page command
        // (next page command does not work unless participant chose one of
        // the labels.
        psychoJS.eventManager.clearEvents();
        clearEventAfterChoice = 1;

        // start Timer for question reaction time
        myClock.reset(); // reset the timer
        startTime = myClock.getTime();
      Each JS Frame:
        // create a for loop using length of labels and update these like that
        for (let i = 0; i < labelCount; i++) {
            //console.log('current label for wrapwidth',i)
            //console.log('type of I',typeof i.toString())
            demoSlider._pixiLabels[i.toString()]._style._wordWrap = true
            demoSlider._pixiLabels[i.toString()]._style._wordWrapWidth = wrapWidthText
            demoSlider._pixiLabels[i.toString()]._style._align = "left"
        }


        if (currentTextboxTextDemographic.includes('highest degree')) {

            demoSlider.status = PsychoJS.Status.STARTED;
            demoSlider.setAutoDraw(true);

            fill_textbox.status = PsychoJS.Status.PAUSED;
            fill_textbox.setAutoDraw(false);

            for (let button of demoRadios) {
                button.status = PsychoJS.Status.STARTED;
                button.setAutoDraw(true);
            }
        }
        else {

            demoSlider.status = PsychoJS.Status.PAUSED;
            demoSlider.setAutoDraw(false);

            fill_textbox.status = PsychoJS.Status.STARTED;
            fill_textbox.setAutoDraw(true);

            for (let button of demoRadios) {
                button.status = PsychoJS.Status.PAUSED;
                button.setAutoDraw(false);
            }
        }
  Routine writeDataToFile
    CodeComponent writeToFile
      Code Type = JS
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      Begin JS Routine:
        iterationCountTrials = data_totalTrialIndex.length;
        trialColumNames = ["trialNo","setID","itemID" ,"blockName", "trialType","fontName","linkCondition","articleSkipType","wordCount","passageRT", "wordsPerMinute", "comprehensionAccuracy", "comprehensionChoice","choiceRT","feedbackSurveyRating"];

        // add headers right above the data
        psychoJS.experiment.addData("dateTime", "dateTime")
        psychoJS.experiment.addData(trialColumNames[0], trialColumNames[0]);
        psychoJS.experiment.addData("subid", "subid")
        psychoJS.experiment.addData("gender", "gender")
        psychoJS.experiment.addData("age", "age")
        psychoJS.experiment.addData("counterbalance_group", "counterbalance_group")
        for (let columni = 1; columni < trialColumNames.length; columni++) {
            // loop over trialColumnNames and create headers for the datasheet
          psychoJS.experiment.addData(trialColumNames[columni], trialColumNames[columni]);
        }
        psychoJS.experiment.addData("X_Scale", "X_Scale");
        psychoJS.experiment.addData("Y_Scale", "Y_Scale");
        psychoJS.experiment.addData("IsFullScreen", "IsFullScreen")
        psychoJS.experiment.addData("window_width", "window_width")
        psychoJS.experiment.addData("window_height", "window_height")
        psychoJS.experiment.addData("browser", "browser")
        psychoJS.experiment.addData("browserZoomLevel", "browserZoomLevel")
        psychoJS.experiment.nextEntry();

        //
        // NOTE: REGISTER FASTEST FONT, SPACING, AND INTERACTION CONDITION TO ALL ROWS
        //

        // write data in long format
        for (var i, _pj_c = 0, _pj_a = util.range(0, iterationCountTrials), _pj_b = _pj_a.length; (_pj_c < _pj_b); _pj_c += 1) {
            i = _pj_a[_pj_c];
            psychoJS.experiment.addData("dateTime", data_dateTime[i])
            psychoJS.experiment.addData(trialColumNames[0], data_totalTrialIndex[i]);
            psychoJS.experiment.addData("subid", participantCode)
            psychoJS.experiment.addData("gender", "gender")
            psychoJS.experiment.addData("age", "age")
            //psychoJS.experiment.addData("prolific_id", prolific_ID)
            psychoJS.experiment.addData("counterbalance_group", cb_group)
            psychoJS.experiment.addData(trialColumNames[1],  data_setID[i]);
            psychoJS.experiment.addData(trialColumNames[2],  data_itemID[i]);
            psychoJS.experiment.addData(trialColumNames[3],  data_blockName[i]);
            psychoJS.experiment.addData(trialColumNames[4],  data_trialType[i]);
            psychoJS.experiment.addData(trialColumNames[5],  data_passageFont[i]);
            psychoJS.experiment.addData(trialColumNames[6],  data_passageSpacing[i]);
            psychoJS.experiment.addData(trialColumNames[7],  data_articleSkipType[i]);
            psychoJS.experiment.addData(trialColumNames[8],  data_passageWordCount[i]);
            psychoJS.experiment.addData(trialColumNames[9],  data_passageRT[i]);
            psychoJS.experiment.addData(trialColumNames[10],  data_passageWPM[i]);
            psychoJS.experiment.addData(trialColumNames[11], data_compAccuracy[i]);
            psychoJS.experiment.addData(trialColumNames[12], data_compChoice[i]);
            psychoJS.experiment.addData(trialColumNames[13], data_surveyRT[i]);
            psychoJS.experiment.addData(trialColumNames[14], data_feedbackRating[i]);
            thisExp.addData("X_Scale", x_scale);
            thisExp.addData("Y_Scale", y_scale);
            psychoJS.experiment.addData("IsFullScreen", psychoJS.window._windowAlreadyInFullScreen)
            psychoJS.experiment.addData("window_width", psychoJS.window._size[0])
            psychoJS.experiment.addData("window_height", psychoJS.window._size[1])
            psychoJS.experiment.addData("browser", psychoJS._browser)
            psychoJS.experiment.addData("browserZoomLevel", data_zoomLevel[i])
            psychoJS.experiment.nextEntry();
        }

        // add the date and time of completion to the database
        currentDateTime = util.MonotonicClock.getDateStr();
        currentDateTime = formatDateTime(currentDateTime);
  Routine finalInstructions
    CodeComponent code
      Code Type = JS
      Begin JS Routine:
        thanksText = "Thank you for participating to this test!\n\n\n\n"

        fitText = 'Your best ' +experimentType +' is ' + disp_fitCondition + ' with '+ disp_fitWpm + ' words per minute and %'+ disp_fitAcc + ' correct responses on comprehension questions.' + "\n\n\n"
        clashText = 'Your worst ' +experimentType + ' is ' + disp_clashCondition + ' with '+ disp_clashWpm + ' words per minute and %'+ disp_clashAcc + ' correct responses on comprehension questions.' + "\n\n\n\n"

        pressSpace = "You will be redirected to Prolific to receive your participation compensation.\n\nPress space to finish the experiment."
        wholeFinalInstruction = thanksText+fitText+clashText + pressSpace;
        finish_instructions.setAlignHoriz('left')
    TextComponent finish_instructions
      color [set every repeat] = $textColor
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = instructionTextSize*y_scale
      pos [set every repeat] = (xAxisCenter, 0)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 30
      text [set every repeat] = $wholeFinalInstruction
      wrapWidth = wrapWidthText
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 9
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  Routine general_instructions
    TextComponent generalInstructionsText
      color = black
      letterHeight [set every repeat] = instructionTextSize*y_scale
      pos [set every repeat] = (xAxisCenter, 0)
      startVal [time (s)] = 0.0
      wrapWidth = wrapWidthText
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      text:
        This test consists of 7 Newspaper Articles following a set of questions.

        During the reading sections, please read as quickly as you can, without reading out-loud or re-reading.

        However, be prepared to answer comprehension questions about the passage. You must select an answer to each question and press the button at the bottom of the screen to advance to the next page.

        If you want to take a break, please do so while on an instruction page, not during the reading rounds as the timer will be running.

        If you have questions, contact the primary investigator: Shalah Dean Thomas, 616-808-4832.

        Please press the button below to continue.
    CodeComponent code_3
      Code Type = JS
      Begin JS Routine:
        generalInstructionsText.setAlignHoriz("left");


        console.log('slider size initial: ', sliderSize)
    ImageComponent nextButton_Instructions_4
      image = next_button.png
      pos [set every repeat] = (buttonX,buttonY)
      size [set every repeat] = (buttonWidth,buttonHeight)
      startVal [time (s)] = .2
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    MouseComponent mouseInstructions_4
      clickable = nextButton_Instructions_4
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = $mouseDelayOther
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
  Routine generalInstructions2
    CodeComponent code_8
      Code Type = JS
      Begin JS Routine:
        generalInstructionsText_2.setAlignHoriz("left");
    TextComponent generalInstructionsText_2
      color = black
      letterHeight [set every repeat] = instructionTextSize*y_scale
      pos [set every repeat] = (xAxisCenter, 0)
      startVal [time (s)] = 0.0
      wrapWidth = wrapWidthText
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      text:
        Thank you for agreeing to participate in this experiment. To receive compensation, please ensure you complete the following steps:

        1. Consent Form
        2. Seating Instructions
        3. Demographic Survey
        4. Screening Activity
        5. Read seven newspaper articles
        6. Respond to all questions

        If you have questions, contact the primary investigator: Shalah Dean Thomas, 616-808-4832.

        Please press the button below to continue.
    ImageComponent nextButton_GeneralInst
      image = next_button.png
      pos [set every repeat] = (buttonX,buttonY)
      size [set every repeat] = (buttonWidth,buttonHeight)
      startVal [time (s)] = .2
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    MouseComponent mouseGeneralInstructions
      clickable = nextButton_GeneralInst
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = $mouseDelayOther
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  Routine creditCardInstructions
    CodeComponent align_3
      Code Type = JS
      Begin JS Routine:
        if (screenScaleTrials.thisN === 0){
                cardInstructions = "Dear participant,\n\nYou will need to use your credit/debit card and adjust the size of a credit card image in the next step.\n\nYou will be asked to place your credit/debit card onto that image and will use arrow keys for resizing the image. Once the image is the same size as your credit/debit card, press space to confirm. You will do this twice for better measurement.\n\nPlease press the button below to advance to the next page."
            } else {
                cardInstructions = "Please resize the image once more.\n\nPlease press the button below to advance to the next page."
                }

        creditCardInstructionText.setAlignHoriz("left");
    TextComponent creditCardInstructionText
      color [set every repeat] = $textColor
      font = $textFont
      letterHeight [set every repeat] = instructionTextSize
      pos [set every repeat] = (xAxisCenter, 0)
      startVal [time (s)] = 0
      text [set every repeat] = $cardInstructions
      wrapWidth = wrapWidthText
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    ImageComponent nextButton_card
      image = next_button.png
      pos [set every repeat] = (buttonX,buttonY)
      size [set every repeat] = (buttonWidth,buttonHeight)
      startVal [time (s)] = .2
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    MouseComponent mouseCardInstructions
      clickable = nextButton_card
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = $mouseDelayOther
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  Routine displayFeedbackSurvey
    CodeComponent feedbackCode
      Code Type = JS
      Begin JS Routine:
        // create the excel column name that represents the current question text
        feedbackSurveyIdentifier    = ('feedback'+((rand_fo[feedback_trials.thisN]).toString())+'text')
        labelIdentifier             = ('feedback'+((rand_fo[feedback_trials.thisN]).toString())+'label')
        itemIDIdentifier            = ('feedback'+((rand_fo[feedback_trials.thisN]).toString())+'ID')

        // console.log('rand_fo',rand_fo)
        // console.log('feedback this N',feedback_trials.thisN)
        // console.log('feedback survey identifier', feedbackSurveyIdentifier)
        // console.log('feedback label identifier', labelIdentifier)
        // console.log('feedback ID identifier', itemIDIdentifier)

        // call the question text
        currentMiniQuestion         = thisStimulus_list[feedbackSurveyIdentifier];
        currentMiniLabel            = thisStimulus_list[labelIdentifier];
        // what is the item type (passage, comp question, mini survey?)
        itemID                      = thisStimulus_list[itemIDIdentifier];
        //what is the set ID
        setID                       = thisStimulus_list["setID"]
        // change additional question text's centering and style
        feedbackSurveyText.setAlignHoriz('left')
        feedbackSurveyText.bold     = true;
        pressFeedbackSpaceText.setAlignHoriz('left')
        pressFeedbackSpaceText.bold = true;

        // adjust slider vertical size depending on the number of options
        // get slider labels from the excel file
        sliderLabels                = thisStimulus_list[labelIdentifier];
        sliderLabels                = sliderLabels.split(";");
        //sliderLabels.unshift("Prefer not to answer");
        labelCount                  = (sliderLabels.length);
        // if there are less then 3 options on the slider,
        // decrease the vertical size of the slider by half
        if (labelCount < 3){
                sliderSize[1] = (vsize*26/100)/2.5
            } else {
                 sliderSize[1] = vsize*26/100;
                }
    TextComponent feedbackSurveyText
      color [set every repeat] = $textColor
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = questionTextSize*y_scale
      pos [set every repeat] = (questionsXaxis, questionsTopYaxis)
      startVal [time (s)] = 0.0
      text [set every repeat] = $currentMiniQuestion
      wrapWidth = wrapWidthText
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    TextComponent pressFeedbackSpaceText
      color [set every repeat] = $textColor
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = questionTextSize*y_scale
      pos [set every repeat] = (questionsXaxis, questionsBottomYaxis)
      startVal [time (s)] = 0.0
      text [set every repeat] = Please press the button on the right hand corner to continue after your choice.
      wrapWidth = wrapWidthText
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    PolygonComponent fradiobutton_1
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (0,0)
      shape = circle
      size [set every repeat] = (radiobutton_size, radiobutton_size)
      startVal [time (s)] = 0.0
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    PolygonComponent fradiobutton_2
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (0,0)
      shape = circle
      size [set every repeat] = (radiobutton_size, radiobutton_size)
      startVal [time (s)] = 0.0
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    PolygonComponent fradiobutton_3
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (0,0)
      shape = circle
      size [set every repeat] = (radiobutton_size, radiobutton_size)
      startVal [time (s)] = 0.0
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    PolygonComponent fradiobutton_4
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (0,0)
      shape = circle
      size [set every repeat] = (radiobutton_size, radiobutton_size)
      startVal [time (s)] = 0.0
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    PolygonComponent fradiobutton_5
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (0,0)
      shape = circle
      size [set every repeat] = (radiobutton_size, radiobutton_size)
      startVal [time (s)] = 0.0
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    PolygonComponent fradiobutton_6
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (0,0)
      shape = circle
      size [set every repeat] = (radiobutton_size, radiobutton_size)
      startVal [time (s)] = 0.0
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    PolygonComponent fradiobutton_7
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (0,0)
      shape = circle
      size [set every repeat] = (radiobutton_size, radiobutton_size)
      startVal [time (s)] = 0.0
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    PolygonComponent fradiobutton_8
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (0,0)
      shape = circle
      size [set every repeat] = (radiobutton_size, radiobutton_size)
      startVal [time (s)] = 0.0
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    PolygonComponent fradiobutton_9
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (0,0)
      shape = circle
      size [set every repeat] = (radiobutton_size, radiobutton_size)
      startVal [time (s)] = 0.0
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    SliderComponent feedbackSurveySlider
      borderColor = black
      color = black
      fillColor = black
      flip = True
      font [set every repeat] = Calibri
      forceEndRoutine = False
      granularity = 1
      letterHeight [set every repeat] = labelTextSize*y_scale
      pos [set every repeat] = sliderPosition
      size [set every repeat] = sliderSize
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3, 4, 5)
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    CodeComponent updateAndRegisterFeedback
      Code Type = JS
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      Begin JS Routine:
        ////////////////////////////////////////////////
        //// UPDATE SLIDER LABELS, SIZE, COLOR ETC. ////
        ////////////////////////////////////////////////

        // get slider labels from the excel file
        sliderLabels = thisStimulus_list[labelIdentifier];
        sliderLabels = sliderLabels.split(";");
        //sliderLabels.unshift("Prefer not to answer");
        labelCount = (sliderLabels.length);
        sliderLabels = sliderLabels.reverse();
        // create tick marks so that data registry makes sense in terms of scores of each
        // label: start from 1 not 0.
        tickMarks = range(1,labelCount);

        // display shuffled labels as tick marks
        feedbackSurveySlider.setLabels(sliderLabels);
        // change ticks of the slider
        feedbackSurveySlider.setTicks(tickMarks);
        // change font of the slider text
        feedbackSurveySlider.setFontSize(labelTextSize*y_scale);
        // adjust slider's position and size
        feedbackSurveySlider._pos = sliderPosition;
        feedbackSurveySlider._size = sliderSize;

        // change slider's color and marker properties
        feedbackSurveySlider._lineColor = col_white; // color of static circle ;

        labelPosition_y  = Math.abs(sliderSize[1] / (labelCount-1));
        positions = [];

        // what are the maximum amount of radio buttons of this slider
        // count radiobutton_# components, now it is 9.
        maxLabels = 9;

        radiobutton_size = [sliderSize[0]* 1.15, sliderSize[0]* 1.15];

        evenLabelCount = ((labelCount % 2) === 0);
        // name of radio components
        radioComponentName = 'fradiobutton_'

        if (evenLabelCount) {
            console.log('here even label')
            // there is no middle label, so get the half of the distance
            // of labels and move on from there while positioning the radio buttons
            labelPosition_y = labelPosition_y / 2;

            // initialize label position coordinate multiplier
            positionMultiplier = 1;

            // loop over number of labels
            for (var k = 0; k < labelCount; k++){

                // initialize label number index
                var buttonNo = k + 1;

                if ((k % 2) === 0) {
                    // increase the position multipler at every odd number
                    // this increases the distance from the middle label every third label
                    if (k > 1) {

                        positionMultiplier =positionMultiplier+2;
                    }
                    positions[k] = [sliderPosition[0], sliderPosition[1]+(positionMultiplier*labelPosition_y)];

                } else{

                    positions[k] = [sliderPosition[0], sliderPosition[1]-(positionMultiplier*labelPosition_y)];

                }
                // enter the position and size values into individual label radio buttons
                // position
                eval(radioComponentName + buttonNo + '._pos' +'= ['+positions[k][0] +', '+positions[k][1]+'];' );
                // size
                eval(radioComponentName + buttonNo + '._size' +'= ['+sliderSize[0]* 1.15+', '+sliderSize[0]* 1.15+'];' );
                // draw the changes
                eval(radioComponentName + buttonNo + '._autoDraw' +'='+true+';');
                console.log('comprehension radio button'+buttonNo.toString(),eval(radioComponentName + buttonNo + '._pos' +'= ['+positions[k][0] +', '+positions[k][1]+'];' ));
            }

        } else {
                // if there are odd number of labels

                // there will be a middle label which should be placed at the
                // default position of the slider
                fradiobutton_1._pos      = [sliderPosition[0], sliderPosition[1]];
                fradiobutton_1._size     = radiobutton_size;
                eval(radioComponentName + 1 + '._pos' +'= ['+ sliderPosition[0] +','+ sliderPosition[1]+'];' );
                // size
                eval(radioComponentName + 1 + '._size' +'= ['+sliderSize[0]* 1.15+', '+sliderSize[0]* 1.15+'];' );
                // initialize label position coordinate multiplier
                positionMultiplier = 0;
                // loop over labels
                for (var k = 1; k < labelCount; k++){
                    // initialize label number index
                    var buttonNo = k + 1;

                    if ((k % 2) === 0) {

                        positions[k] = [sliderPosition[0], sliderPosition[1]+(positionMultiplier*labelPosition_y)];

                    } else{
                        // increase the position multipler at every odd number
                        // this increases the distance from the middle label every third label
                        positionMultiplier =positionMultiplier+1
                        positions[k] = [sliderPosition[0], sliderPosition[1]-(positionMultiplier*labelPosition_y)];

                    }
                    console.log('uneven k',k)
                    console.log('uneven positionMultiplier',positionMultiplier)
                    // enter the position and size values into individual label radio buttons
                    // position
                    eval(radioComponentName + buttonNo + '._pos' +'= ['+ positions[k][0] +','+ positions[k][1]+'];' );
                    // size
                    eval(radioComponentName + buttonNo + '._size' +'= ['+sliderSize[0]* 1.15+', '+sliderSize[0]* 1.15+'];' );
                    // draw the changes
                    eval(radioComponentName + buttonNo + '._autoDraw' +'='+true+';');

                    console.log('comprehension radio button'+buttonNo.toString(),eval(radioComponentName + buttonNo + '._pos' +'= ['+positions[k][0] +', '+positions[k][1]+'];' ));
                }

            }


        // remove radio buttons of slider labels that do not exist
        for (var i = labelCount; i <= maxLabels - 1 ; i++){
            console.log(i);
            var buttonNo = i + 1;
            positions[i] = [sliderPosition[0], sliderPosition[1]+labelPosition_y];
            eval(radioComponentName + buttonNo + '._pos'+'= ['+ 0 +','+ 0+'];' );
            eval(radioComponentName + buttonNo + '._size'+'='+1+';' );
            eval(radioComponentName + buttonNo + '._autoDraw' +'='+true+';');
        }
        //////////////////////////////////////////////////////////////////
        // initiate input monitoring for conditional next-page command
        // (next page command does not work unless participant chose one of
        // the labels.
        psychoJS.eventManager.clearEvents();
        clearEventAfterChoice = 1;

        // start Timer for question reaction time
        myClock.reset(); // reset the timer
        startTime = myClock.getTime();
      Each JS Frame:
        feedbackChoice = feedbackSurveySlider.getRating();

        // create a for loop using length of labels and update wrap width of these labels
        for (let i = 0; i < labelCount; i++) {
            //console.log('current label for wrapwidth',i)
            //console.log('type of I',typeof i.toString())
            feedbackSurveySlider._pixiLabels[i.toString()]._style._wordWrap = true
            feedbackSurveySlider._pixiLabels[i.toString()]._style._wordWrapWidth = wrapWidthText
        }
      End JS Routine:
        // get the selected option among the labels
        feedbackChoiceText = sliderLabels[feedbackChoice-1]; // -1 because label index starts with 0, tick mark starts with 1.

        // console.log('mouse-feedback: ',     mouseFeedback)
        // console.log('mouse-feedback-time: ',mouseFeedback.time)

        // get reaction time from psychopy's mouse component
        mouselength             = feedbackMouse.time.length;
        // get the mouse component's starting second
        mouse_tStart            = feedbackMouse.tStart;
        // get 'next button's starting second
        button_tStart           = feedbackSurveyText.tStart;
        // get the latest mouse click-- which terminates the loop
        validClick              = feedbackMouse.time[mouselength-1];
        // add mouse's and button's starting seconds to the click RT, because it starts to count RT after these are displayed
        feedbackRT          = validClick + mouse_tStart - button_tStart;


        // console.log('mouse time',validClick)
        // console.log('mouse rt', feedbackRT)


        // get browser zoom
        browserZoom             = window.outerWidth*100 / window.innerWidth;

        // format date
        registeryDate           = util.MonotonicClock.getDateStr()
        registeryDate           = formatDateTime(registeryDate)

        // register data
        data_setID.push(setID); // type of the set (AI or Human)
        data_itemID.push(itemID); // item ID is the unique ID assigned to each stimulus displayed on the screen
        data_trialType.push(trialType); // is this a test or a practice trial
        data_blockName.push(blockName); // what is the name of this block
        data_totalTrialIndex.push(totalTrialIterationIndex); // what is the trial number (total across all blocks)

        data_dateTime.push(registeryDate); // date and time
        data_zoomLevel.push(browserZoom);
        data_passageFont.push(currentFont); // what was the font used in this passage
        data_passageSpacing.push(currentLink); // what was spacing used in this passage
        data_passageType.push([]);// what is the type of this set (informative, narrative)?
        data_passageLevel.push([]); // what is the grade level (2nd, 3rd)
        data_articleSkipType.push([]) // which button did they press (next or popup link)

        data_passageRT.push([]); // words per minute
        data_passageWPM.push([]); // words per minute
        data_passageWordCount.push([]);
        data_compAccuracy.push([]); // empty because there is no accuracy during passages

        data_surveyRT.push(feedbackRT); // time to respond to comprehension question
        data_compChoice.push(feedbackChoiceText) // chosen option is registered as text
        data_feedbackRating.push(feedbackChoice) // rating of the likert scale


        // remove radio buttons so that they won't appear at the center in next trial
        for (var i = 0; i < maxLabels; i++) {
            var buttonNo = i + 1;
            eval(radioComponentName + buttonNo + '._pos'+'= ['+ 0 +','+ 0+'];' );
            eval(radioComponentName + buttonNo + '._size'+'='+1+';' );

            }
    ImageComponent feedbackButton
      image = next_button.png
      pos [set every repeat] = (buttonX,buttonY)
      size [set every repeat] = (buttonWidth,buttonHeight)
      startVal [condition] = feedbackSurveySlider.rating
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    MouseComponent feedbackMouse
      clickable = feedbackButton
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [condition] = feedbackSurveySlider.rating
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
  Routine informedConsent1
    TextComponent informedConsentText
      color [set every repeat] = $textColor
      disabled = True
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = instructionTextSize*y_scale
      pos [set every repeat] = (xAxisCenter, 0)
      startVal [time (s)] = 0
      wrapWidth = wrapWidthText
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      text:
        Hello, thank you for taking our online test!

        This is a readability tool that evaluates your best and worst reading performance on different fonts or letter spacings.

        In this test, you will be asked to read passages and press the button on right-hand corner whenever you finish reading them. Each passage will consist of two screens, making you press the button twice to finish one passage. After that, you will first encounter comprehension questions and then feedback questions about that passage.

        There will be a short survey about your gender, age, and reading habits at the end of this test.

        Please press the button on the right hand corner to continue.
    CodeComponent scrolling_consent
      Code Type = JS
      Each JS Frame:
        // register current Y position
        oldY = consent_image.pos[1];
        // estimate change in Y
        deltaY = (mouseInstructions.getWheelRel()[1]);

        //Check for keyboard up/down
        let skEvents = consent_keyboard.getEvents()
        if(isKeyPressed(skEvents, 'up')) {
             deltaY = -25;
        }

        if(isKeyPressed(skEvents, 'down')) {
             deltaY = 25;
        }
        // add to image position
        imageY = (oldY + deltaY);



        if (scrolling_amount != 0) {
            const newY = scrolling_amount + article_image.pos[1]

            if ((newY >= ydifference*3) && (Math.abs(newY - ydifference) <= (Math.abs(ydifference*4)))) {
                console.log('old y, new y: ',article_image.pos[1],newY)
                 article_image.pos = [0, newY];
                underlined_words = changeWordPosition(scrolling_amount,underlined_words);
            }

        }

        scrolling_keyboard.clearEvents()



        if (imageY != oldY) {
            // print coordinates and bounds for debugging
        //    console.log('new y, y difference, condition :', imageY, ydifference, imageY>=ydifference*2)
        //    console.log('abs(newy-oldy), abs(ydiff*2), condition :', Math.abs(imageY-oldY), Math.abs(ydifference*3), (Math.abs(imageY - oldY) < (Math.abs(ydifference*2))))
            // change img position if 1) it does not exceed the upper limit, 2) lower limit of image
            if ((imageY >= ydifference*2) && (Math.abs(imageY - ydifference) <= (Math.abs(ydifference*3)))) {
                // change image position
                consent_image.pos = [0, imageY];
                }
        }
    CodeComponent set_position_consent
      Code Type = JS
      Begin JS Routine:
        popupN = popupN + 1

        ydifference = (vsize - consentsize[1])/2
        xdifference = (hsize - consentsize[0])/2
        consentY = ydifference;
      Each JS Frame:
        document.body.style.zoom = "100%";
    ImageComponent consent_image
      image = stimuli/prolific_consent.png
      pos [set every repeat] = (0,consentY)
      size = consentsize
      startVal [time (s)] = 0.0
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    CodeComponent align
      Code Type = JS
      disabled = True
      Begin JS Routine:
        informedConsentText.setAlignHoriz("left");

        //console.log(informedConsentText)
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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    MouseComponent mouseInstructions
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    KeyboardComponent consent_keyboard
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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    CodeComponent set_consent_image
      Code Type = JS
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      Begin JS Routine:
        const searchParams = new URLSearchParams(location.search);

        const imageParam = parseInt(searchParams.get('image')) || 0;

        let image = "stimuli/";

        if ( imageParam == 0 ) {
            console.log("prolific")
            image += "prolific_consent.png"
        } else {
            console.log("life")
            image += "life_consent.png"
        }

        consent_image.setImage(image)
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
  Routine scaleBlank
    TextComponent blankScreenForRefresh
      font = $textFont
      letterHeight = 10
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine checkResources
    CodeComponent passageCode_2
      Code Type = JS
      Begin JS Routine:
        fontIteration       = fontIteration+1
        // call font to be displayed in this trial
        currentFont         = allFonts[loop_fonts.thisN]
        // call spacing to be displayed in this trial
        currentSpacing      = testSpacings[loop_spacings.thisN];
        // call spacing label
        currentLink         = linkLabels[loop_spacings.thisN];
        //console.log('currentSize', currentFontSize);
        //console.log('currentFont', currentFont)
        //console.log('current spacing: ', currentSpacing)
        // create the excel column name that represents the current passage text
        iterationString     = (screens.thisN+1).toString()

        passageIdentifier   = 'art1text'
        itemIDIdentifier    = 'art1ID'

        //what is the set ID
        setID               = thisSet_file_check["setID"]
        // what is the passage ID (RX00001a etc.)
        itemID              = thisSet_file_check[itemIDIdentifier];
        // get trial type
        trialType           = thisSet_file_check["trialType"];

        if ((currentLink === 'NoLink') && (currentFont === 'Open Sans')  || (trialType === 'test') && (currentFont === 'Open Sans') ||(trialType === 'practice') && ((currentFont === 'Georgia') || (currentFont === 'Roboto') ||(currentFont === 'Times')) ){
                console.log('pass this image: ', setID+'_'+currentFont+'_'+currentLink+'.jpg')
                continueRoutine = false
            } else {
                    console.log('test this image: ', setID+'_'+currentFont+'_'+currentLink+'.jpg')
                    currentArticleImage = 'stimuli/article_images/'+setID+'_'+currentFont+'_'+currentLink+'.jpg'
                }
    ImageComponent passageImage_2
      image [set every repeat] = $currentArticleImage
      pos [set every repeat] = (0, 0)
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [frame N] = 1
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    TextComponent waitForCalibration
      color [set every repeat] = $textColor
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = instructionTextSize
      startVal [time (s)] = 0.0
      stopVal [frame N] = 1
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      text:
        We are checking if all experiment resources are correctly downloaded.

        This may take up to 30 seconds.

        If there was a connection issue while downloading, you will encounter an "Unknown resource error" on this screen.

        If that error occurs, please go back and re-enter to the experiment.

        Otherwise, please wait until the test instructions appear on the screen.
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  Routine merge_fonts
    CodeComponent merge_font_names
      Code Type = JS
      Begin JS Experiment:
        fontIteration = 0
      Begin JS Routine:
        /*bewary: this loop only uses the first row of "blocks_file.xlsx".
        Therefore, font names and labels should be specified within that first row.
        Please adjust the "Selected Rows" value of this loop if it is not suitable for your design.*/

        /* below code extracts font names from the excel file
        these names are then used for creating variables for the database */
        testFonts = thisGet_font["testFonts"]

        /* split font names and labels by ";" */
        testFonts = testFonts.split(";")

        /* extracts spacing levels from the blocks excel file */
        testSpacings = thisGet_font["testSpacings"]

        /* split spacing levels by ";" */
        testSpacings = testSpacings.split(";")

        /* get practice font and convert to string - split ddoes that for above */
        practiceFonts = String(thisGet_font["practiceFonts"]);
        /* add practice font to fonts to be tested */
        testFonts.unshift(practiceFonts);

        /* store all fonts to a variable */
        allFonts = testFonts
        console.log('test fonts: ', testFonts)
        console.log('practice fonts: ', practiceFonts)
        console.log('all fonts: ', allFonts)

        /* count of fonts in the study */
        fontCount = allFonts.length

        /* get how many screens a passage is split to */
        //screenCount = thisSet_file_check["trialproperties"]
        //screenCount = screenCount.split(";")
        screenCount = 1
        /* get the passage count number from stimulus sheet */
        //screenCount = getItemCount(screenCount)
        console.log('screen count', screenCount)

        // initialize link conditions
        linkLabels                      = ['Link','NoLink']
        practiceLink                    = ['NoLink']
        linkCount                       = linkLabels.length


        spacingCount = testSpacings.length;
        spacingLabels = {};
        spacingLevels = [];
        /* below creates a dictionary to convert spacing levels in blocks file
        to standardized spacing levels. Standardized ones used for naming images
        and using them for display. Actual levels will be registered to sheet */
        for (var fi = 0; fi < spacingCount; fi++){
            spacingLevels.push("sp"+(fi+1).toString())
            spacingLabels[testSpacings[fi]] = spacingLevels[fi]
            }


        /* print out spacing labels */

        console.log('spacing labels: ', spacingLabels)
  Routine preCheckScreen
    TextComponent waitForCalibration_2
      color [set every repeat] = $textColor
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = instructionTextSize
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 15
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      text:
        We are checking if all experiment resources are correctly downloaded.

        This may take up to 30 seconds.

        If there was a connection issue while downloading, you will encounter an "Unknown resource error" on this screen.

        If that error occurs, please go back and re-enter to the experiment.

        Otherwise, please wait until the test instructions appear on the screen.
    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        console.log('calibration text screen')
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
  Routine findFastest
    CodeComponent fontWPM
      Code Type = JS
      Begin JS Routine:
        /* Register WPM of the fonts to the database */
        // console.log('getFitClash_spacing',getFitClash_spacing)

        endOfTest = passageSetOrder.length    // get the trial number of the last test trials

        if (trialIteration+1 === endOfTest) {
        // initiate estimation of FIT-CLASH conditions at THE LAST TEST trial
             performanceConditions = blockConditionsForRegistry

             // remove the practice conditions from the fit-clash estimation conditions
             for (var i = 0; i < practiceCount; i++){
                performanceConditions.shift()
                }

            // console.log('performanceConditions: ',performanceConditions)
            // store all fit-clash dictionaries into an array
            fitClashArray = []
            fitClashArray.push(getFitClash_all)
            fitClashArray.push(getFitClash_spacing)
            fitClashArray.push(getFitClash_font)
            // console.log('fitClashArray: ',fitClashArray)
            // store all conditions of individual fit-clash arrays into another array
            conditionArray = []
            conditionArray.push(performanceConditions)
            conditionArray.push(Object.values(spacingLabels)) // actual spacing levels ("0","0.05",...) disrupt sorting algorithm, therefore we use std labels (sp1, sp2, ..., spN)
            conditionArray.push(blockFonts)
            // console.log('conditionArray: ',conditionArray)

            // get average of all fit-clash dictionaries for estimation
            fitClashArray       = loopAverage(fitClashArray,conditionArray)

            // sort conditions by accuracy ratings
            if (experimentType === 'all'){
                typeIndex = 0
                } else if (experimentType === 'spacing'){
                    typeIndex = 1
                    } else if (experimentType === 'font'){
                        typeIndex = 2

                        }

            sortedObject        = sortObjects(fitClashArray[typeIndex],Object.keys(fitClashArray[typeIndex]).length,"accuracy")

            // estimate fit: first by accuracy (highest) then wpm (fastest)
            fitParameters       = getFit(sortedObject,"wpm")
            // estimate clash: first by accuracy (lowest) then wpm (slowest)
            clashParameters     = getClash(sortedObject,"wpm")

            disp_fitCondition   = fitParameters[0]
            disp_fitWpm         = Math.round(fitParameters[1]).toString()
            disp_fitAcc         = Math.round(fitParameters[2] * 100).toString()
            disp_clashCondition = clashParameters[0]
            disp_clashWpm       = Math.round(clashParameters[1]).toString()
            disp_clashAcc       = Math.round(clashParameters[2] * 100).toString()
        }
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  Routine getWords
    CodeComponent store_words
      Code Type = JS
      Begin JS Experiment:
        underlined_words = {}
        init_temp_list = {}
      Begin JS Routine:
        console.log('current word from sheet ', thisWord_list_loop["text"])

        // create backup for word list
        init_temp_list = thisWord_list_loop

        wordN = wordN + 1
        // initialize dictionary for underlined word positions
        if (wordN === 1){
            underlined_words = {}
            }
        // initialize the key for this word
        underlined_words[thisWord_list_loop["text"]] = {}

        // process coordinates for screen alignment of words etc.
        underlined_words[thisWord_list_loop["text"]] = convertToNumber(init_temp_list,imagesize,vsize,y_scale)

        // print out for debugging
        console.log('all underlined words: ', underlined_words)
        console.log('current word ['+init_temp_list["text"]+']', underlined_words[init_temp_list["text"]])
  Routine displayArticle
    CodeComponent set_article
      Code Type = JS
      Begin JS Routine:
        // call font to be displayed in this trial
        stdSpacing              = spacingLabels[currentSpacing];
        currentConditions       = blockConditionsForRegistry[trialIteration];

        // create the excel column name that represents the current article's text
        articleIdentifier       = 'art1text'
        itemIDIdentifier        = 'art1ID'

        //what is the set ID
        setID                   = thisStimulus_list["setID"]

        // what is the passage ID (RX00001a etc.)
        itemID                  = thisStimulus_list[itemIDIdentifier];

        if(blockSpacingCount === 1){
            // omit spacing level name for the image file if there is only one spacing
            currentArticleImage     = 'stimuli/article_images/'+setID+'_'+currentFont+'_'+currentLink+'.jpg'
        } else {
            // add spacing level name if there are multiple spacing levels which will be written in image file names
            currentArticleImage     = 'stimuli/article_images/'+setID+'_'+currentFont+'_'+currentLink+'_'+stdSpacing+'.jpg'
            }



        // call the passage text
        currentArticle          = thisStimulus_list[articleIdentifier];
        console.log('current article text: ', currentArticle)
        currentArticle          = currentArticle.split(':').join("")
        currentArticle          = currentArticle.split('.').join("")
        // count how many words there are in this passage
        wordCount               = currentArticle;
        wordCount               = wordCount.replace(/'+/g, ''); // remove apostrophes
        wordCount               = wordCount.replace(/-+/g, ' '); // turn dashes into sapce
        wordCount               = wordCount.replace(/\s+/g, ' '); // turn more than one space into one space
        wordCount               = wordCount.replace(/\n\n/g," "); // turn line breaks into space
        wordCount               = wordCount.replace(/[\W_]+/g," "); // turn all non alphanumericals into space
        wordCount               = wordCount.trim(); // remove spaces at the beginning and end
        wordCount               = wordCount.split(" "); // split the text by spaces
        wordCount               = wordCount.length // count how many words there are
    CodeComponent set_position
      Code Type = JS
      Begin JS Routine:
        popupN = popupN + 1

        ydifference = (vsize - imagesize[1])/2
        xdifference = (hsize - imagesize[0])/2

        // at first display, setup the article such that its borders
        // meet screen's vertical size, then continue with the scrolled position
        if (popupN === 1){
            imageY = ydifference;
            }
        console.log('vertical size: ',vsize)
        console.log('difference   : ',ydifference)
      Each JS Frame:
        document.body.style.zoom = "100%";
    CodeComponent scrolling
      Code Type = JS
      Each JS Frame:
        // register current Y position
        oldY = article_image.pos[1];
        // estimate change in Y
        deltaY = (article_mouse.getWheelRel()[1]);
        // add to image position
        imageY = (oldY + deltaY);

        if (imageY != oldY) {
            // print coordinates and bounds for debugging
        //    console.log('new y, y difference, condition :', imageY, ydifference, imageY>=ydifference*2)
        //    console.log('abs(newy-oldy), abs(ydiff*2), condition :', Math.abs(imageY-oldY), Math.abs(ydifference*3), (Math.abs(imageY - oldY) < (Math.abs(ydifference*2))))
            // change img position if 1) it does not exceed the upper limit, 2) lower limit of image
            if ((imageY >= ydifference*3) && (Math.abs(imageY - ydifference) <= (Math.abs(ydifference*4)))) {
                console.log('old y, new y: ',oldY,imageY)
                // change image position
                article_image.pos = [0, imageY];
                // change position of clickable area of every underlined word after scrolling up/down
                underlined_words = changeWordPosition(deltaY,underlined_words)
                }
        }
    CodeComponent clicking_popup
      Code Type = JS
      Begin JS Routine:
        enablePopup = 0
        linkText = ""

        // start Timer for question reaction time
        myClock.reset(); // reset the timer
        startTime = myClock.getTime();
      Each JS Frame:
        if (enableLinkClick){



        //    console.log('popup click enabled')
            // register current Y position
            oldY = article_image.pos[1];
            // estimate change in Y
            mousePressed = article_mouse.getPressed()[0]

            // debug
            if (mousePressed){
                clickPosition = article_mouse.getPos()
                checkTime = myClock.getTime();

                if (checkTime - startTime > 1){
                    startTime = myClock.getTime();
                    checkClick = rectangleClickCheck(clickPosition,underlined_words)
                    console.log('click position', clickPosition)
                    console.log('check click - article var: ', checkClick)


                    if (checkClick[0]) {
                        enablePopup = 1
                        linkText = checkClick[1];
                        continueRoutine = false;
                    }

                }

                }
        }
      End JS Routine:
        if (enablePopup) {
            currentKeys = Object.keys(underlined_words)

            popupIndex  = currentKeys.indexOf(checkClick[1])

            console.log('currentKeys', currentKeys)
            console.log('clicked', checkClick[1])
            console.log('popupIndex', popupIndex)

            // adjust back button and text Y axis based on paragraph length
            popup_buttons.back_text.y           = underlined_words[checkClick[1]].backY
            popup_buttons.back_button.y         = underlined_words[checkClick[1]].backY
            // register what the participant clicked
            pressedButtonArticle = "toPopup"

            console.log('popup buttons',popup_buttons)
        } else {
            pressedButtonArticle = "articleCompleted"
            popup_loop.finished = true
            }
    CodeComponent articleRegistry
      Code Type = JS
      End JS Routine:
        // get reaction time from psychopy's mouse component
        mouselength             = article_mouse.time.length
        // get the mouse component's starting second
        mouse_tStart            = article_mouse.tStart;
        // get 'next button's starting second
        button_tStart           = articleNextButton.tStart
        // get the latest mouse click-- which terminates the loop
        validClick              = article_mouse.time[mouselength-1] || 0;
         // add mouse's and button's starting seconds to the click RT, because it starts to count RT after these are displayed
        passageReactionTime     = validClick + mouse_tStart - button_tStart;

        // console.log('mouse time',validClick)
        // console.log('mouse rt', validClickTime)


        // calculate words per minute
        currentWPM              = wordCount/(passageReactionTime/60);

        // get browser zoom
        browserZoom             = window.outerWidth*100 / window.innerWidth;

        // format date
        registeryDate           = util.MonotonicClock.getDateStr()
        registeryDate           = formatDateTime(registeryDate)

        // register data
        data_setID.push(setID); // type of the set (AI or Human)
        data_itemID.push(itemID); // item ID is the unique ID assigned to each stimulus displayed on the screen
        data_trialType.push(trialType); // is this a test or a practice trial
        data_blockName.push(blockName); // what is the name of this block
        data_totalTrialIndex.push(totalTrialIterationIndex); // what is the trial number (total across all blocks)

        data_dateTime.push(registeryDate); // date and time
        data_zoomLevel.push(browserZoom);

        data_passageFont.push(currentFont); // what was the font used in this passage
        data_passageSpacing.push(currentLink); // what was the spacing used in this passage
        data_passageRT.push(passageReactionTime); // reaction time
        data_passageWPM.push(currentWPM); // words per minute
        data_passageWordCount.push(wordCount); // how many words in this passage?
        data_passageType.push([]);// what is the type of this set (informative, narrative)?
        data_passageLevel.push([]); // what is the grade level (2nd, 3rd)
        data_articleSkipType.push(pressedButtonArticle) // which button did they press (next or popup link)


        data_feedbackRating.push([])        // rating of the likert scale
        data_compChoice.push(linkText);           // chosen option is registered as text
        data_surveyRT.push([]); // time to respond to comprehension question
        data_compAccuracy.push([]); // empty because there is no accuracy during passages


        /* words per minute registery for fit-clash  */
        if (trialType != "practice"){

            // console.log('getFitClash_spacing: ', getFitClash_spacing)
            // console.log('getFitClash_spacing['+stdSpacing+']: ', getFitClash_spacing[stdSpacing])
            // console.log('getFitClash_spacing['+stdSpacing+'][wpm]: ', getFitClash_spacing[stdSpacing]["wpm"])

            // console.log('getFitClashAll: ', getFitClash_all)
            // console.log('getFitClashAll['+currentConditions+']: ', getFitClash_all[currentConditions])
            // console.log('getFitClashAll['+currentConditions+'][wpm]: ', getFitClash_all[currentConditions]["wpm"])

            // console.log('getFitClash_font: ', getFitClash_font)
            // console.log('getFitClash_font['+currentFont+']: ', getFitClash_font[currentFont])
            // console.log('getFitClash_font['+currentFont+'][wpm]: ', getFitClash_font[currentFont]["wpm"])



            // enable registery for test trials, exclude practice trials
            getFitClash_all[currentConditions].wpm.push(currentWPM) // push current wpm for cond interaction registry
            getFitClash_spacing[currentLink].wpm.push(currentWPM) // push wpm only for spacing conditions
            getFitClash_font[currentFont].wpm.push(currentWPM) // push wpm for only font conditions

            // register set ids
            getFitClash_all[currentConditions].setid.push(setID) // push SET ID for cond interaction registry
            getFitClash_spacing[currentLink].setid.push(setID) // push SET ID only for spacing conditions
            getFitClash_font[currentFont].setid.push(setID) // push SET ID for only font conditions

        }
    CodeComponent button_scrolling
      Code Type = JS
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      Each JS Frame:
        let scrolling_amount = 0;
        let skEvents = scrolling_keyboard.getEvents()
        if(isKeyPressed(skEvents, 'up')) {
             scrolling_amount = -25;
        }

        if(isKeyPressed(skEvents, 'down')) {
             scrolling_amount = 25;
        }

        if (scrolling_amount != 0) {
            const newY = scrolling_amount + article_image.pos[1]

            if ((newY >= ydifference*3) && (Math.abs(newY - ydifference) <= (Math.abs(ydifference*4)))) {
                console.log('old y, new y: ',article_image.pos[1],newY)
                 article_image.pos = [0, newY];
                underlined_words = changeWordPosition(scrolling_amount,underlined_words);
            }

        }

        scrolling_keyboard.clearEvents()

        // Check if left mouse button is pressed
        //if (scrolling_mouse.getPressed()[0]) {
        //    const [result, clicked_button] = rectangleClickCheckImage(scrolling_mouse.getPos(),scrolling_buttons)
        //    let deltaY = 0;
        //    console.error(result, clicked_button)
        //    if (result) {
        //        if (clicked_button === 'up_button') {
        //                console.error('scrolling up')
        //                deltaY = 10
        //        }
        //        else if( clicked_button === 'down_button') {
        //                console.error('scrolling down')
        //                deltaY = -10
        //        } else {
        //                console.error('uknown button')
        //
        //        }
        //
        //        article_image.pos = [0, article_image.pos[1] + deltaY];
        //        underlined_words = changeWordPosition(deltaY,underlined_words)
        //    }
        //
        //}
        //
        //
    ImageComponent article_image
      image [set every repeat] = $currentArticleImage
      pos [set every repeat] = (0,imageY)
      size [set every repeat] = imagesize
      startVal [time (s)] = 0.0
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    ImageComponent articleNextButton
      image = next_button.png
      pos [set every repeat] = (buttonX,buttonY)
      size [set every repeat] = (buttonWidth,buttonHeight)
      startVal [time (s)] = .3
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    MouseComponent article_mouse
      clickable = articleNextButton
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = $mouseDelay
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    KeyboardComponent scrolling_keyboard
      forceEndRoutine = False
      startVal [time (s)] = 0.0
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  Routine displayPopup
    CodeComponent set_position_popup
      Code Type = JS
      Begin JS Routine:
        ydifference_pop = (vsize - popupsize[1])/2
        xdifference_pop = (hsize - popupsize[0])/2

        // at first display, setup the article such that its borders
        // meet screen's vertical size, then continue with the scrolled position
        if (popupN === 1){
            imageY_pop = ydifference_pop;
            }


        itemID = articleid + "_" + "popup" + (popupIndex+1).toString()
        popupImageName = "stimuli/popup_images/" +itemID+"_"+currentFont+ ".jpg"

        console.log('popupimage: ',popupImageName)
      Each JS Frame:
        document.body.style.zoom = "100%";
    CodeComponent clicking_buttons
      Code Type = JS
      Begin JS Routine:
        // start Timer for question reaction time
        myClock.reset(); // reset the timer
        startTime = myClock.getTime();
      Each JS Frame:
        // estimate change in Y
        mousePressed = popup_mouse.getPressed()[0]


        // enable pressing buttons after 1 s
        currentTime = myClock.getTime();

        if (currentTime - startTime > 1){
            if (mousePressed){
                clickPosition = popup_mouse.getPos()
                checkClick = rectangleClickCheckImage(clickPosition,popup_buttons)
                console.log('check click - popup var: ', checkClick)
                if (checkClick[0]) {
                    continueRoutine = false;
                    }
                }
        }
    CodeComponent popupRegistry
      Code Type = JS
      End JS Routine:
        // get reaction time from psychopy's mouse component
        mouselength             = popup_mouse.time.length
        // get the mouse component's starting second
        mouse_tStart            = popup_mouse.tStart;
        // get 'next button's starting second
        button_tStart           = back_button.tStart
        // get the latest mouse click-- which terminates the loop
        validClick              = popup_mouse.time[mouselength-1] || 0;
         // add mouse's and button's starting seconds to the click RT, because it starts to count RT after these are displayed
        popupReactionTime       = validClick + mouse_tStart - button_tStart;

        // console.log('mouse time',validClick)
        // console.log('mouse rt', validClickTime)

        // register which button they have pressed
        pressedButtonPopup      = checkClick[1]

        // calculate words per minute
        currentWPM              = (wordCount/(popupReactionTime/60));

        // get browser zoom
        browserZoom             = window.outerWidth*100 / window.innerWidth;

        // format date
        registeryDate           = util.MonotonicClock.getDateStr()
        registeryDate           = formatDateTime(registeryDate)

        // register data
        data_setID.push(setID); // type of the set (AI or Human)
        data_itemID.push(itemID); // item ID is the unique ID assigned to each stimulus displayed on the screen
        data_trialType.push(trialType); // is this a test or a practice trial
        data_blockName.push(blockName); // what is the name of this block
        data_totalTrialIndex.push(totalTrialIterationIndex); // what is the trial number (total across all blocks)

        data_dateTime.push(registeryDate); // date and time
        data_zoomLevel.push(browserZoom);

        data_passageFont.push(currentFont); // what was the font used in this passage
        data_passageSpacing.push(currentLink); // what was the spacing used in this passage
        data_passageRT.push(popupReactionTime); // reaction time
        data_passageWPM.push(currentWPM); // words per minute
        data_passageWordCount.push(wordCount); // how many words in this passage?
        data_passageType.push([]);// what is the type of this set (informative, narrative)?
        data_passageLevel.push([]); // what is the grade level (2nd, 3rd)
        data_articleSkipType.push(pressedButtonPopup) // which button did they press (next or popup link)


        data_feedbackRating.push([])        // rating of the likert scale
        data_compChoice.push([]);           // chosen option is registered as text
        data_surveyRT.push([]); // time to respond to comprehension question
        data_compAccuracy.push([]); // empty because there is no accuracy during passages

        /* words per minute registery for fit-clash  */
        if (trialType != "practice"){

            // console.log('getFitClash_spacing: ', getFitClash_spacing)
            // console.log('getFitClash_spacing['+stdSpacing+']: ', getFitClash_spacing[stdSpacing])
            // console.log('getFitClash_spacing['+stdSpacing+'][wpm]: ', getFitClash_spacing[stdSpacing]["wpm"])

            // console.log('getFitClashAll: ', getFitClash_all)
            // console.log('getFitClashAll['+currentConditions+']: ', getFitClash_all[currentConditions])
            // console.log('getFitClashAll['+currentConditions+'][wpm]: ', getFitClash_all[currentConditions]["wpm"])

            // console.log('getFitClash_font: ', getFitClash_font)
            // console.log('getFitClash_font['+currentFont+']: ', getFitClash_font[currentFont])
            // console.log('getFitClash_font['+currentFont+'][wpm]: ', getFitClash_font[currentFont]["wpm"])



            // enable registery for test trials, exclude practice trials
            getFitClash_all[currentConditions].wpm.push(currentWPM) // push current wpm for cond interaction registry
            getFitClash_spacing[currentLink].wpm.push(currentWPM) // push wpm only for spacing conditions
            getFitClash_font[currentFont].wpm.push(currentWPM) // push wpm for only font conditions

            // register set ids
            getFitClash_all[currentConditions].setid.push(setID) // push SET ID for cond interaction registry
            getFitClash_spacing[currentLink].setid.push(setID) // push SET ID only for spacing conditions
            getFitClash_font[currentFont].setid.push(setID) // push SET ID for only font conditions

        }
    ImageComponent popup_image
      image [set every repeat] = $popupImageName
      pos [set every repeat] = (0, imageY_pop)
      size [set every repeat] = popupsize
      startVal [time (s)] = 0.0
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    ImageComponent close_button
      anchor = bottom-left
      image = close_button.jpg
      pos [set every repeat] = (popup_buttons.close_button.x, popup_buttons.close_button.y)
      size [set every repeat] = (popup_buttons.close_button.width, popup_buttons.close_button.height)
      startVal [time (s)] = 0.0
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    ImageComponent back_button
      anchor = bottom-left
      image = back_button.jpg
      pos [set every repeat] = (popup_buttons.back_button.x, popup_buttons.back_button.y)
      size [set every repeat] = (popup_buttons.back_button.width, popup_buttons.back_button.height)
      startVal [time (s)] = 0.0
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    ImageComponent back_text
      anchor = bottom-left
      image = back_text.jpg
      pos [set every repeat] = (popup_buttons.back_text.x, popup_buttons.back_text.y)
      size [set every repeat] = (popup_buttons.back_text.width, popup_buttons.back_text.height)
      startVal [time (s)] = 0.0
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    MouseComponent popup_mouse
      forceEndRoutineOnPress = never
      saveMouseState = on click
      startVal [time (s)] = 0
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  Routine waitPopup
    TextComponent waitPopupBlank
      letterHeight = 5
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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  Routine trial_textbox
    CodeComponent initiateTextbox_2
      Code Type = JS
      Begin JS Routine:
        // create the excel column name that represents the current question text
        questionIdentifier              = ('proxy'+((rand_proxyo[first_textbox_trials.thisN]).toString())+'text')
        itemIDIdentifier                = ('proxy'+((rand_proxyo[first_textbox_trials.thisN]).toString())+'ID')
        // call the question text
        currentTextboxItem              = thisStimulus_list[questionIdentifier];
        currentTextboxItem              = currentTextboxItem.split(";")
        currentTextboxDescription       = currentTextboxItem[0] // label for this question, used for registry
        currentTextboxTextDemographic   = currentTextboxItem[1] // question text itself
        //console.log("text box items",currentTextboxItem);

        // what is the item type (passage, comp question, mini survey?)
        itemID                          = thisStimulus_list[itemIDIdentifier]+currentTextboxDescription;

        //what is the set ID
        setID                           = thisStimulus_list["setID"];

        // determine which of the text box question is about to be displayed
        // this is done to change the instructions regarding how to fill out
        // the textbox depending on the question.
        isMail                          = currentTextboxDescription === "email";
        isAge                           = currentTextboxDescription === "Age";
        isOtherText                     = (isAge || isMail) === false;
        //console.log("ismail",isMail,"isAge",isAge,"isOtherText",isOtherText);

        // change additional question text's centering and weight
        pressSpaceTextTextbox_2.bold      = true;
        question_textbox_2.bold           = true;

        pressSpaceTextTextbox_2.setAlignHoriz('left')
        question_textbox_2.setAlignHoriz('left')
        // start Timer for 500 ms periods to scan for the text
        myClock.reset(); // reset the timer
        startTime                       = myClock.getTime();


        // conditional instructions on how to fill out the text box
        if (isMail === true) {
                // how to fill the mail textbox
                textBoxFill = "";
                pressSpaceTextFill = "Do not use spaces, enter a valid email format: example@gmail.com\n\n";
            }
        if (isAge === true) {
                // how to fill the age textbox
                textBoxFill = "";
                pressSpaceTextFill ="Do not use spaces, enter your age in numbers; example: 31\n\n";
            }
        if (isOtherText === true) {
                // how to fill other textboxes
                textBoxFill = "";
                pressSpaceTextFill = "Do not use paragraph breaks at the start or end of your response \n\n";
            }
    TextboxComponent fill_textbox_2
      alignment = center-left
      anchor = center-left
      bold = False
      borderColor = black
      borderWidth = 30
      color = -0.5373, -0.5608, -0.5608
      editable = True
      fillColor = white
      font [set every repeat] = $textFont
      letterHeight = 25
      pos [set every repeat] = textboxPosition
      size [set every repeat] = textboxSize
      startVal [time (s)] = 0.0
      text [set every repeat] = $textBoxFill
      units = pix
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    CodeComponent getTextFill_2
      Code Type = JS
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      Begin JS Routine:
        psychoJS.eventManager.clearEvents();
        clearEventAfterChoice = 1;
        fill_textbox_2.refresh()


        // start Timer for question reaction time
        myClock.reset(); // reset the timer
        startTime = myClock.getTime();
      Each JS Frame:
        // get the text inside the text box
        textInput = fill_textbox_2._pixi.text;
        textInput = textInput.trim();
        // check if text input contains "@" and "." for mail input and not SPACES
        //containsSpace = (textInput.indexOf(' ') === -1);
        containsMail = ((textInput.indexOf('@') > -1) && (textInput.indexOf('.') > -1) &&  (textInput.indexOf("example") === -1));
        containsMail = containsMail;
        //console.log('contains mail')
        //console.log(containsMail);
        // allow continue only if age input consists of two characters, does not check for number type
        validAge = (textInput.length >= 2);
        anyCharacterTyped = (textInput.length >= 1);
        isNumber = isNaN(textInput) === false; //this condition returns true when input is a number
        validAge = validAge && isNumber;

        if (clearEventAfterChoice === 1){
            psychoJS.eventManager.clearEvents();    // clears keypress events
                                                    // does not terminate the loop prematurely
            }

        currentTime = myClock.getTime();
        twoSecondElapsed = currentTime-startTime >=keyboardPauseDuration;
        if (twoSecondElapsed===true){
            if ((isMail && containsMail) || (isAge && validAge) || (isOtherText && anyCharacterTyped)) {
                //fill_textbox.borderColor= [0, 1, 0];
                if (clearEventAfterChoice === 1){
                    psychoJS.eventManager.clearEvents(); // clears keypress events after choice so that previous unrelated space
                    clearEventAfterChoice=0;             // does not terminate the loop prematurely
                    }
                var _pj;
                function _pj_snippets(container) {
                    function in_es6(left, right) {
                        if (((right instanceof Array) || ((typeof right) === "string"))) {
                            return (right.indexOf(left) > (- 1));
                        } else {
                            if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                                return right.has(left);
                            } else {
                                return (left in right);
                            }
                        }
                    }
                    container["in_es6"] = in_es6;
                    return container;
                }

                _pj = {};
                _pj_snippets(_pj);
                keys = psychoJS.eventManager.getKeys();
                console.log(keys);
                    if (keys.length) {
                        if (_pj.in_es6("return", keys)) {
                            continueRoutine = false;
                        } else {
                                psychoJS.eventManager.clearEvents();
                                questionReactionTime = myClock.getTime()-startTime
                            }
                    }
            } else {
                    //fill_textbox.borderColor= [1, 0, 0];
                    psychoJS.eventManager.clearEvents();
                }
        }
      End JS Routine:
        if (isAge===true) {
                participantAge = textInput;
            }

        // get browser zoom
        browserZoom = window.outerWidth*100 / window.innerWidth;

        // format date
        registeryDate = util.MonotonicClock.getDateStr()
        registeryDate = formatDateTime(registeryDate)

        // register data
        data_setID.push(setID); // type of the set (AI or Human)
        data_itemID.push(itemID); // item ID is the unique ID assigned to each stimulus displayed on the screen
        data_trialType.push(trialType); // is this a test or a practice trial
        data_blockName.push(blockName); // what is the name of this block
        data_totalTrialIndex.push(totalTrialIterationIndex); // what is the trial number (total across all blocks)

        data_dateTime.push(registeryDate); // date and time
        data_zoomLevel.push(browserZoom);
        data_passageFont.push(currentFont); // what was the font used in this passage

        data_passageRT.push([]); // words per minute
        data_passageWPM.push([]); // words per minute
        data_passageWordCount.push([]);
        data_passageSpacing.push(currentLink); // what was the spacing used in this passage
        data_articleSkipType.push([]) // which button did they press (next or popup link)

        data_compAccuracy.push([]); // empty because there is no accuracy during passages
        data_feedbackRating.push([]) // rating of the likert scale

        data_surveyRT.push(questionReactionTime); // time to respond to comprehension question
        data_compChoice.push(textInput) // chosen option is registered as text
    TextComponent question_textbox_2
      color [set every repeat] = $textColor
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = questionTextSize*y_scale
      pos [set every repeat] = (xAxisCenter,questionsTopYaxis)
      startVal [time (s)] = 0.0
      text [set every repeat] = $currentTextboxTextDemographic + " (enter the text into the box below)"
      wrapWidth = wrapWidthText
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    TextComponent pressSpaceTextTextbox_2
      color [set every repeat] = $textColor
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = questionTextSize*y_scale
      pos [set every repeat] = (xAxisCenter, questionsBottomYaxis)
      startVal [time (s)] = 0.0
      text [set every repeat] = $(pressSpaceTextFill+ "Please press the ENTER to advance to the next page after you type in.")
      wrapWidth = wrapWidthText
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
  Routine font_preference
    CodeComponent preferenceCode
      Code Type = JS
      Begin JS Routine:
        // change additional question text's centering and style
        preferenceText.setAlignHoriz('left')
        preferenceText.bold     = true;

        // adjust slider vertical size depending on the number of options
        // get slider labels from the excel file
        sliderLabels                = ["I strongly prefer A","I prefer A", "I strongly prefer B","I prefer B","I strongly prefer C","I prefer C","I don't prefer any of the font options"]
        sliderLabels                = sliderLabels.reverse();
        //sliderLabels.unshift("Prefer not to answer");
        labelCount                  = (sliderLabels.length);



        blockName = "post_survey"
        setID = "post_survey"
        itemID = "fontPreference"
    ImageComponent preference_image
      image [set every repeat] = stimuli/preference_images/alltogether.jpg
      pos [set every repeat] = (0,preference_y + 100)
      size [set every repeat] = preferencesize
      startVal [time (s)] = 0.0
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    TextComponent preferenceText
      color [set every repeat] = $textColor
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = questionTextSize*y_scale
      pos [set every repeat] = (questionsXaxis, preference_question_y)
      startVal [time (s)] = 0.0
      text = The same paragraph is written in three different fonts. Please specify which font you prefer: 
      wrapWidth = wrapWidthText
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    PolygonComponent pradiobutton_1
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (0,0)
      shape = circle
      size [set every repeat] = (radiobutton_size, radiobutton_size)
      startVal [time (s)] = 0.0
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    PolygonComponent pradiobutton_2
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (0,0)
      shape = circle
      size [set every repeat] = (radiobutton_size, radiobutton_size)
      startVal [time (s)] = 0.0
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    PolygonComponent pradiobutton_3
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (0,0)
      shape = circle
      size [set every repeat] = (radiobutton_size, radiobutton_size)
      startVal [time (s)] = 0.0
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    PolygonComponent pradiobutton_4
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (0,0)
      shape = circle
      size [set every repeat] = (radiobutton_size, radiobutton_size)
      startVal [time (s)] = 0.0
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    PolygonComponent pradiobutton_5
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (0,0)
      shape = circle
      size [set every repeat] = (radiobutton_size, radiobutton_size)
      startVal [time (s)] = 0.0
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    PolygonComponent pradiobutton_6
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (0,0)
      shape = circle
      size [set every repeat] = (radiobutton_size, radiobutton_size)
      startVal [time (s)] = 0.0
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    PolygonComponent pradiobutton_7
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (0,0)
      shape = circle
      size [set every repeat] = (radiobutton_size, radiobutton_size)
      startVal [time (s)] = 0.0
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    PolygonComponent pradiobutton_8
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (0,0)
      shape = circle
      size [set every repeat] = (radiobutton_size, radiobutton_size)
      startVal [time (s)] = 0.0
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    PolygonComponent pradiobutton_9
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (0,0)
      shape = circle
      size [set every repeat] = (radiobutton_size, radiobutton_size)
      startVal [time (s)] = 0.0
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    SliderComponent preferenceSlider
      borderColor = black
      color = black
      fillColor = black
      flip = True
      font [set every repeat] = Calibri
      forceEndRoutine = False
      granularity = 1
      letterHeight [set every repeat] = labelTextSize*y_scale
      pos [set every repeat] = sliderPositionPreference
      size [set every repeat] = sliderSize
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1,2,3)
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    CodeComponent updateSliderPreference
      Code Type = JS
      Begin JS Routine:
        // create tick marks so that data registry makes sense in terms of scores of each
        // label: start from 1 not 0.
        tickMarks = range(1,labelCount);

        // display shuffled labels as tick marks
        preferenceSlider.setLabels(sliderLabels);
        // change ticks of the slider
        preferenceSlider.setTicks(tickMarks);
        // change font of the slider text
        preferenceSlider.setFontSize(labelTextSize*y_scale);
        // adjust slider's position and size
        preferenceSlider._pos  = sliderPositionPreference
        preferenceSlider._size = sliderSize;


        console.log('slider size font pref: ', sliderSize)
        // change slider's color and marker properties
        preferenceSlider._lineColor = col_white; // color of static circle ;

        labelPosition_y  = Math.abs(sliderSize[1] / (labelCount-1));
        positions = [];

        // what are the maximum amount of radio buttons of this slider
        // count radiobutton_# components, now it is 9.
        maxLabels = 9;

        pradiobutton_size = [sliderSize[0]* 1.15, sliderSize[0]* 1.15];

        evenLabelCount = ((labelCount % 2) === 0);
        // name of radio components
        radioComponentName = 'pradiobutton_'

        if (evenLabelCount) {
            console.log('here even label')
            // there is no middle label, so get the half of the distance
            // of labels and move on from there while positioning the radio buttons
            labelPosition_y = labelPosition_y / 2;

            // initialize label position coordinate multiplier
            positionMultiplier = 1;

            // loop over number of labels
            for (var k = 0; k < labelCount; k++){

                // initialize label number index
                var buttonNo = k + 1;

                if ((k % 2) === 0) {
                    // increase the position multipler at every odd number
                    // this increases the distance from the middle label every third label
                    if (k > 1) {

                        positionMultiplier =positionMultiplier+2;
                    }
                    positions[k] = [sliderPositionPreference[0], sliderPositionPreference[1]+(positionMultiplier*labelPosition_y)];

                } else{

                    positions[k] = [sliderPositionPreference[0], sliderPositionPreference[1]-(positionMultiplier*labelPosition_y)];

                }
                // enter the position and size values into individual label radio buttons
                // position
                eval(radioComponentName + buttonNo + '._pos' +'= ['+positions[k][0] +', '+positions[k][1]+'];' );
                // size
                eval(radioComponentName + buttonNo + '._size' +'= ['+sliderSize[0]* 1.15+', '+sliderSize[0]* 1.15+'];' );
                // draw the changes
                eval(radioComponentName + buttonNo + '._autoDraw' +'='+true+';');
                console.log('comprehension radio button'+buttonNo.toString(),eval(radioComponentName + buttonNo + '._pos' +'= ['+positions[k][0] +', '+positions[k][1]+'];' ));
            }

        } else {
                // if there are odd number of labels

                // there will be a middle label which should be placed at the
                // default position of the slider
                pradiobutton_1._pos      = [sliderPositionPreference[0], sliderPositionPreference[1]];
                pradiobutton_1._size     = pradiobutton_size;
                eval(radioComponentName + 1 + '._pos' +'= ['+ sliderPositionPreference[0] +','+ sliderPositionPreference[1]+'];' );
                // size
                eval(radioComponentName + 1 + '._size' +'= ['+sliderSize[0]* 1.15+', '+sliderSize[0]* 1.15+'];' );
                // initialize label position coordinate multiplier
                positionMultiplier = 0;
                // loop over labels
                for (var k = 1; k < labelCount; k++){
                    // initialize label number index
                    var buttonNo = k + 1;

                    if ((k % 2) === 0) {

                        positions[k] = [sliderPositionPreference[0], sliderPositionPreference[1]+(positionMultiplier*labelPosition_y)];

                    } else{
                        // increase the position multipler at every odd number
                        // this increases the distance from the middle label every third label
                        positionMultiplier =positionMultiplier+1
                        positions[k] = [sliderPositionPreference[0], sliderPositionPreference[1]-(positionMultiplier*labelPosition_y)];

                    }
                    console.log('uneven k',k)
                    console.log('uneven positionMultiplier',positionMultiplier)
                    // enter the position and size values into individual label radio buttons
                    // position
                    eval(radioComponentName + buttonNo + '._pos' +'= ['+ positions[k][0] +','+ positions[k][1]+'];' );
                    // size
                    eval(radioComponentName + buttonNo + '._size' +'= ['+sliderSize[0]* 1.15+', '+sliderSize[0]* 1.15+'];' );
                    // draw the changes
                    eval(radioComponentName + buttonNo + '._autoDraw' +'='+true+';');

                    console.log('comprehension radio button'+buttonNo.toString(),eval(radioComponentName + buttonNo + '._pos' +'= ['+positions[k][0] +', '+positions[k][1]+'];' ));
                }

            }


        // remove radio buttons of slider labels that do not exist
        for (var i = labelCount; i <= maxLabels - 1 ; i++){
            console.log(i);
            var buttonNo = i + 1;
            positions[i] = [sliderPositionPreference[0], sliderPositionPreference[1]+labelPosition_y];
            eval(radioComponentName + buttonNo + '._pos'+'= ['+ 0 +','+ 0+'];' );
            eval(radioComponentName + buttonNo + '._size'+'='+1+';' );
            eval(radioComponentName + buttonNo + '._autoDraw' +'='+true+';');
        }
        //////////////////////////////////////////////////////////////////
        // initiate input monitoring for conditional next-page command
        // (next page command does not work unless participant chose one of
        // the labels.
        psychoJS.eventManager.clearEvents();
        clearEventAfterChoice = 1;

        // start Timer for question reaction time
        myClock.reset(); // reset the timer
        startTime = myClock.getTime();
      Each JS Frame:
        preferenceChoice = preferenceSlider.getRating();

        // create a for loop using length of labels and update wrap width of these labels
        for (let i = 0; i < labelCount; i++) {
            //console.log('current label for wrapwidth',i)
            //console.log('type of I',typeof i.toString())
            preferenceSlider._pixiLabels[i.toString()]._style._wordWrap = true
            preferenceSlider._pixiLabels[i.toString()]._style._wordWrapWidth = wrapWidthText
        }
      End JS Routine:
        // get the selected option among the labels
        preferenceChoiceText = sliderLabels[preferenceChoice-1]; // -1 because label index starts with 0, tick mark starts with 1.

        // console.log('mouse-feedback: ',     mouseFeedback)
        // console.log('mouse-feedback-time: ',mouseFeedback.time)

        // get reaction time from psychopy's mouse component
        mouselength             = mousePreference.time.length;
        // get the mouse component's starting second
        mouse_tStart            = mousePreference.tStart;
        // get 'next button's starting second
        button_tStart           = preferenceText.tStart;
        // get the latest mouse click-- which terminates the loop
        validClick              = mousePreference.time[mouselength-1];
        // add mouse's and button's starting seconds to the click RT, because it starts to count RT after these are displayed
        preferenceRT          = validClick + mouse_tStart - button_tStart;


        // console.log('mouse time',validClick)
        // console.log('mouse rt', feedbackRT)


        // get browser zoom
        browserZoom             = window.outerWidth*100 / window.innerWidth;

        // format date
        registeryDate           = util.MonotonicClock.getDateStr()
        registeryDate           = formatDateTime(registeryDate)

        // register data
        data_setID.push(setID); // type of the set (AI or Human)
        data_itemID.push(itemID); // item ID is the unique ID assigned to each stimulus displayed on the screen
        data_trialType.push(trialType); // is this a test or a practice trial
        data_blockName.push(blockName); // what is the name of this block
        data_totalTrialIndex.push(totalTrialIterationIndex); // what is the trial number (total across all blocks)

        data_dateTime.push(registeryDate); // date and time
        data_zoomLevel.push(browserZoom);
        data_passageFont.push(currentFont); // what was the font used in this passage
        data_passageSpacing.push([]); // what was spacing used in this passage
        data_passageType.push([]);// what is the type of this set (informative, narrative)?
        data_passageLevel.push([]); // what is the grade level (2nd, 3rd)
        data_articleSkipType.push([]) // which button did they press (next or popup link)

        data_passageRT.push([]); // words per minute
        data_passageWPM.push([]); // words per minute
        data_passageWordCount.push([]);
        data_compAccuracy.push([]); // empty because there is no accuracy during passages

        data_surveyRT.push(preferenceRT); // time to respond to comprehension question
        data_compChoice.push(preferenceChoiceText) // chosen option is registered as text
        data_feedbackRating.push(preferenceChoice) // rating of the likert scale


        // remove radio buttons so that they won't appear at the center in next trial
        for (var i = 0; i < maxLabels; i++) {
            var buttonNo = i + 1;
            eval(radioComponentName + buttonNo + '._pos'+'= ['+ 0 +','+ 0+'];' );
            eval(radioComponentName + buttonNo + '._size'+'='+1+';' );

            }
    ImageComponent preferenceButton
      image = next_button.png
      pos [set every repeat] = (buttonX,buttonY)
      size [set every repeat] = (buttonWidth,buttonHeight)
      startVal [condition] = preferenceSlider.rating
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    MouseComponent mousePreference
      clickable = preferenceButton
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [condition] = preferenceSlider.rating
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  Routine preferenceInstructionsRoutine
    TextComponent text_3
      color [set every repeat] = $textColor
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = instructionTextSize*y_scale
      pos [set every repeat] = (xAxisCenter, 0)
      startVal [time (s)] = 0.0
      wrapWidth = wrapWidthText
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      text:
        You have finished reading all articles!

        Kindly respond to the post-survey questions.

        Please press the button on the right hand corner to continue.
    CodeComponent code_6
      Code Type = JS
      Begin JS Routine:
        text_3.setAlignHoriz('left')
    ImageComponent nextButtonDemographicInstructions
      image = next_button.png
      pos [set every repeat] = (buttonX,buttonY)
      size [set every repeat] = (buttonWidth,buttonHeight)
      startVal [time (s)] = .2
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    MouseComponent mouseDemographicInstructions
      clickable = nextButtonDemographicInstructions
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = $mouseDelayOther
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  Routine demographicInstructionsRoutine
    TextComponent text_4
      color [set every repeat] = $textColor
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = instructionTextSize*y_scale
      pos [set every repeat] = (xAxisCenter,0)
      startVal [time (s)] = 0.0
      wrapWidth = wrapWidthText
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      text:
        In this section, please answer all questions for the demographic survey.

        Please press the button on the right hand corner to continue.
    CodeComponent code_9
      Code Type = JS
      Begin JS Routine:
        text_4.setAlignHoriz('left')
    ImageComponent nextButtonDemographicInstructions_2
      image = next_button.png
      pos [set every repeat] = (buttonX,buttonY)
      size [set every repeat] = (buttonWidth,buttonHeight)
      startVal [time (s)] = .2
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    MouseComponent mouseDemographicInstructions_2
      clickable = nextButtonDemographicInstructions_2
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = $mouseDelayOther
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  Routine instruction_proxy
    TextComponent text_5
      color [set every repeat] = $textColor
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = instructionTextSize*y_scale
      pos [set every repeat] = (xAxisCenter, 0)
      startVal [time (s)] = 0.0
      wrapWidth = wrapWidthText
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      text:
        Before delving into the articles, share your thoughts by answering a couple of questions related to the topic.

        Please press the button below to continue.
    CodeComponent code_11
      Code Type = JS
      Begin JS Routine:
        text_5.setAlignHoriz("left");
    ImageComponent nextButton_questionInstructions_2
      image = next_button.png
      pos [set every repeat] = (buttonX,buttonY)
      size [set every repeat] = (buttonWidth,buttonHeight)
      startVal [time (s)] = .2
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    MouseComponent mouseQuestionInstructions_2
      clickable = nextButton_questionInstructions_2
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = $mouseDelayOther
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  Routine screening_instructions
    TextComponent screeningInstructions
      color [set every repeat] = $textColor
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = instructionTextSize*y_scale
      pos [set every repeat] = (xAxisCenter, 0)
      startVal [time (s)] = 0.0
      wrapWidth = wrapWidthText
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      text [set every repeat]:
        In this section, please use your daily corrected vision method to answer each question.

        Please use a tape measurer and sit 14 inches from the screen and try your best to not move.

        Please press the button below to continue.
    CodeComponent code_12
      Code Type = JS
      Begin JS Routine:
        screeningInstructions.setAlignHoriz("left");
    ImageComponent nextButton_screeningInstructions
      image = next_button.png
      pos [set every repeat] = (buttonX,buttonY)
      size [set every repeat] = (buttonWidth,buttonHeight)
      startVal [time (s)] = .2
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    MouseComponent mouse_screeningInstructions
      clickable = nextButton_screeningInstructions
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = $mouseDelayOther
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  Routine snellen_instructions
    TextComponent snellenInstructions
      color [set every repeat] = $textColor
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = instructionTextSize*y_scale
      pos [set every repeat] = (xAxisCenter,0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $screeningInstructionText
      wrapWidth = wrapWidthText
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    ImageComponent nextButton_snellenInstructions
      image = next_button.png
      pos [set every repeat] = (buttonX,buttonY)
      size [set every repeat] = (buttonWidth,buttonHeight)
      startVal [time (s)] = 0
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    MouseComponent snellen_mouse_instructions
      clickable = nextButton_snellenInstructions
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 1
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  Routine snellen_test
    CodeComponent initiate_snellen
      Code Type = JS
      Begin JS Routine:
        // change additional question text's centering and weight
        pressSpaceSnellen.bold                = true;
        snellen_question.bold                 = true;
        snellen_chart_instructions.bold       = true;

        pressSpaceSnellen.setAlignHoriz('left')
        snellen_question.setAlignHoriz('left')
        //snellen_chart_instructions.setAlignHoriz('left')
        // start Timer for 500 ms periods to scan for the text
        myClock.reset(); // reset the timer
        startTime                       = myClock.getTime();


        screeningY = (screeningSize[1]/2) *1.2
    TextboxComponent snellen_textbox
      alignment = center-left
      anchor = center-left
      bold = False
      borderColor = black
      borderWidth = 30
      color = -0.5373, -0.5608, -0.5608
      editable = True
      fillColor = white
      font [set every repeat] = $textFont
      letterHeight = 25
      pos [set every repeat] = [snellenWidth*.7, 0]
      size [set every repeat] = [textboxSize[0]/2,textboxSize[1]]
      startVal [time (s)] = 0.0
      units = pix
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    CodeComponent getfill_snellen
      Code Type = JS
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      Begin JS Routine:
        psychoJS.eventManager.clearEvents();
        clearEventAfterChoice = 1;
        snellen_textbox.refresh()
        console.log("text box items",snellen_textbox);

        enableButton = false


        // start Timer for question reaction time
        myClock.reset(); // reset the timer
        startTime = myClock.getTime();
      Each JS Frame:
        // get the text inside the text box
        textInput               = snellen_textbox._pixi.text;
        textInput               = textInput.trim();

        anyCharacterTyped       = (textInput.length >= 1);
        isNumber                = isNaN(textInput) === false; //this condition returns true when input is a number



        if (clearEventAfterChoice === 1){
            psychoJS.eventManager.clearEvents();    // clears keypress events
                                                    // does not terminate the loop prematurely
            }

        currentTime             = myClock.getTime();
        twoSecondElapsed        = currentTime-startTime >=2;

        if (twoSecondElapsed===true){

          enableButton          = (isNumber && anyCharacterTyped)

        }
      End JS Routine:
        // get browser zoom
        browserZoom                 = window.outerWidth*100 / window.innerWidth;

        // format date
        registeryDate               = util.MonotonicClock.getDateStr()
        registeryDate               = formatDateTime(registeryDate)

        // register data
        data_setID.push(setID); // type of the set (AI or Human)
        data_itemID.push(itemID); // item ID is the unique ID assigned to each stimulus displayed on the screen
        data_trialType.push(trialType); // is this a test or a practice trial
        data_blockName.push(blockName); // what is the name of this block
        data_totalTrialIndex.push("screening_trials"); // what is the trial number (total across all blocks)

        data_dateTime.push(registeryDate); // date and time
        data_zoomLevel.push(browserZoom);
        data_passageFont.push([]); // what was the font used in this passage

        data_passageRT.push([]); // words per minute
        data_passageWPM.push([]); // words per minute
        data_passageWordCount.push([]);
        data_passageSpacing.push([]); // what was the spacing used in this passage
        data_articleSkipType.push([]) // which button did they press (next or popup link)

        data_compAccuracy.push([]); // empty because there is no accuracy during passages
        data_feedbackRating.push([]) // rating of the likert scale

        data_surveyRT.push([]); // time to respond to comprehension question
        data_compChoice.push(textInput) // chosen option is registered as text
    ImageComponent snellen_chart_image
      image [set every repeat] = $screeningImage
      pos [set every repeat] = (0, 0)
      size [set every repeat] = screeningSize
      startVal [time (s)] = 0.0
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    TextComponent snellen_chart_instructions
      color [set every repeat] = $textColor
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = questionTextSize
      pos [set every repeat] = [0, screeningY]
      startVal [time (s)] = 0.0
      text [set every repeat] = $chartInstructions
      wrapWidth = wrapWidthText
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    TextComponent snellen_question
      color [set every repeat] = $textColor
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = questionTextSize/1.5
      pos [set every repeat] = [snellenWidth*.7, textboxSize[1]]
      startVal [time (s)] = 0.0
      text [set every repeat] = Type in the number of the line you find comfortable reading.
      wrapWidth = wrapWidthText
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    TextComponent pressSpaceSnellen
      color [set every repeat] = $textColor
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = questionTextSize/1.5
      pos [set every repeat] = [snellenWidth*.7, -textboxSize[1]]
      startVal [time (s)] = 0.0
      text [set every repeat] = Please press the button below to continue.
      wrapWidth = wrapWidthText
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    ImageComponent nextButton_snellen
      image = next_button.png
      pos [set every repeat] = (buttonX,buttonY)
      size [set every repeat] = (buttonWidth,buttonHeight)
      startVal [time (s)] = 0
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    MouseComponent snellen_mouse
      clickable = nextButton_snellen
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [condition] = $enableButton
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  Routine memory_general_instructions
    TextComponent memoryGeneralInstructions
      color [set every repeat] = $textColor
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = instructionTextSize*y_scale
      pos [set every repeat] = (xAxisCenter, 0)
      startVal [time (s)] = 0.0
      text = You will see a list of words and you will have 30 seconds to remember as many as you can.  Afterwards, you will be asked questions regarding the wordlist. 
      wrapWidth = wrapWidthText
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    CodeComponent code_13
      Code Type = JS
      Begin JS Routine:
        memoryGeneralInstructions.setAlignHoriz("left");
    ImageComponent nextButton_memoryGenInstructions
      image = next_button.png
      pos [set every repeat] = (buttonX,buttonY)
      size [set every repeat] = (buttonWidth,buttonHeight)
      startVal [time (s)] = .2
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    MouseComponent mouse_memoryGenInstructions
      clickable = nextButton_memoryGenInstructions
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = $mouseDelayOther
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  Routine memory_initialize
    CodeComponent setMemoryParameters
      Code Type = JS
      Begin JS Routine:
        testid                  = thisMemory_trial["test_id"]
        currentList             = thisMemory_trial["word_list"]
        currentAnswers          = thisMemory_trial["answer_list"]
        currentInstruction      = thisMemory_trial["instructions"]

        /* Separate fonts and spacings, then count  */
        currentList                     = currentList.split(";")
        currentAnswers                  = currentAnswers.split(";")
        listCount                       = currentList.length;
        answerCount                     = currentAnswers.length;


        // create two lists from the word list of excel file
        displayList = [(currentList.slice(0,listCount/2)).join('\n'),(currentList.slice(listCount/2,listCount)).join('\n')]

        currentAnswers = randomArrayShuffle(currentAnswers)
  Routine memory_specific_instructions
    TextComponent memorySpecificInstructions
      color [set every repeat] = $textColor
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = instructionTextSize*y_scale
      pos [set every repeat] = (xAxisCenter, 0)
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions
      wrapWidth = wrapWidthText
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    CodeComponent code_14
      Code Type = JS
      Begin JS Routine:
        memorySpecificInstructions.setAlignHoriz("left");
    ImageComponent nextButton_memorySpecInstructions
      image = next_button.png
      pos [set every repeat] = (buttonX,buttonY)
      size [set every repeat] = (buttonWidth,buttonHeight)
      startVal [time (s)] = .2
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    MouseComponent mouse_memorySpecInstructions
      clickable = nextButton_memorySpecInstructions
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = $mouseDelayOther
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  Routine memory_display_list
    TextComponent listInstruction
      color [set every repeat] = $textColor
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = instructionTextSize
      pos [set every repeat] = (0, vsize/2.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every repeat] = Memorize the words displayed below
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    TextComponent display_list1
      color [set every repeat] = $textColor
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = instructionTextSize*1.7
      pos [set every repeat] = (-listx, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every repeat] = $displayList[0]
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    TextComponent display_list2
      color [set every repeat] = $textColor
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = instructionTextSize*1.7
      pos [set every repeat] = (listx, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text [set every repeat] = $displayList[1]
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    KeyboardComponent key_resp_2
      allowedKeys = 'm'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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  Routine memory_response
    CodeComponent memoryAnswerButton
      Code Type = JS
      Begin JS Routine:
        // check if current word was in the list

        currentWord = currentAnswers[memory_answer_loop.thisN]

        // check if the word is in the list (false not, true in the list)
        checkWord = currentList.indexOf(currentWord) >= 0
      Each JS Frame:
        // estimate change in Y
        mousePressed = memory_mouse.getPressed()[0]

        // debug
        if (mousePressed){
            clickPosition = memory_mouse.getPos()
            checkClick = rectangleClickCheckImage(clickPosition,memory_button)
            console.log('check click - popup var: ', checkClick)
            if (checkClick[0]) {
                continueRoutine = false;
                }
            }
      End JS Routine:
        if (((checkClick[1] === "yes_button") && checkWord) || ((checkClick[1] === "no_button") && !checkWord)){
            memoryResponse = 1
            console.log('correct')
            } else {
                memoryResponse = 0
                console.log('incorrect')
                }


        if (checkClick[1] === "yes_button"){
            choiceText = 'yes'
            } else if (checkClick[1] === "no_button"){
                choiceText = 'no'
                }
        // console.log('mouse-comp: ',mouseComprehension)
        // console.log('mouse-comp-time: ',mouseComprehension.time)


        // get reaction time from psychopy's mouse component

        // get the amount of mouse clicks
        mouselength         = memory_mouse.time.length
        // get the start time of mouse click component
        mouse_tStart        = memory_mouse.tStart;
        // get 'next button's starting second
        button_tStart       = yes_button.tStart
        // get the latest mouse click-- which terminates the loop
        validClick          = memory_mouse.time[mouselength-1];
        // add mouse's and button's starting seconds to the click RT, because it starts to count RT after these are displayed
        compRT              = validClick + mouse_tStart - button_tStart;

        // console.log('mouse time',validClick)
        // console.log('mouse rt', compRT)


        // get browser zoom
        browserZoom         = window.outerWidth*100 / window.innerWidth;
        // format date
        registeryDate       = util.MonotonicClock.getDateStr()
        registeryDate       = formatDateTime(registeryDate)

        // register data into lists
        data_setID.push(testid); // type of the set (AI or Human)
        data_itemID.push(currentAnswers[memory_answer_loop.thisN]); // item ID is the unique ID assigned to each stimulus displayed on the screen
        data_trialType.push("test"); // is this a test or a practice trial
        data_blockName.push("memory_test"); // what is the name of this block
        data_totalTrialIndex.push("memory_trials"); // what is the trial number (total across all blocks)

        data_dateTime.push(registeryDate); // date and time
        data_zoomLevel.push(browserZoom);
        data_passageFont.push([]); // what was the font used in this passage
        data_passageSpacing.push([]); // what was spacing used in this passage
        data_passageType.push([]);// what is the type of this set (informative, narrative)?
        data_passageLevel.push([]); // what is the grade level (2nd, 3rd)
        data_articleSkipType.push([]) // which button did they press (next or popup link)

        data_passageRT.push([]); // words per minute
        data_passageWPM.push([]); // words per minute
        data_passageWordCount.push([]);
        data_feedbackRating.push([]) // rating of the likert scale

        data_compChoice.push(choiceText); // chosen option is registered as text
        data_surveyRT.push(compRT); // time to respond to comprehension question
        data_compAccuracy.push(memoryResponse); // empty because there is no accuracy during passages
    TextComponent responseInstruction
      color [set every repeat] = $textColor
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = instructionTextSize
      pos [set every repeat] = (0, vsize/7)
      startVal [time (s)] = 0.0
      text [set every repeat] = Was this word on the list?
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    TextComponent memory_word
      color [set every repeat] = $textColor
      font = $textFont
      letterHeight [set every repeat] = instructionTextSize*1.7
      startVal [time (s)] = 0.0
      text [set every repeat] = $currentAnswers[memory_answer_loop.thisN]
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    ImageComponent yes_button
      image = stimuli/memory/yes.jpg
      pos [set every repeat] = (memory_button.yes_button.x, memory_button.yes_button.y)
      size [set every repeat] = (memory_button.yes_button.width, memory_button.yes_button.height)
      startVal [time (s)] = 0.0
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    ImageComponent no_button
      image = stimuli/memory/no.jpg
      pos [set every repeat] = (memory_button.no_button.x, memory_button.no_button.y)
      size [set every repeat] = (memory_button.no_button.width, memory_button.no_button.height)
      startVal [time (s)] = 0.0
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    MouseComponent memory_mouse
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine memory_interval
    TextComponent memory_interval_text
      color [set every repeat] = $textColor
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = instructionTextSize*2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine practiceInstructions
    TextComponent generalInstructionsText_3
      color = black
      letterHeight [set every repeat] = instructionTextSize*y_scale
      pos [set every repeat] = (xAxisCenter, 0)
      startVal [time (s)] = 0.0
      wrapWidth = wrapWidthText
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      text:
        Consider this run as a practice trial to familiarize yourself with the task.

        Press the button below to continue.
    CodeComponent code_15
      Code Type = JS
      Begin JS Routine:
        generalInstructionsText_3.setAlignHoriz("left");


        console.log('slider size initial: ', sliderSize)
    ImageComponent nextButton_Instructions
      image = next_button.png
      pos [set every repeat] = (buttonX,buttonY)
      size [set every repeat] = (buttonWidth,buttonHeight)
      startVal [time (s)] = .2
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    MouseComponent mouseInstructions_5
      clickable = nextButton_Instructions
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [time (s)] = $mouseDelayOther
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  Routine post_engagement
    CodeComponent post_engagement_questions
      Code Type = JS
      Begin JS Experiment:
        post_engagement_questions = [
          {
            text: "I have fun looking at newspaper articles.",
            type: "engagement",
          },
          {
            text: "It is hard to pay attention to what I'm reading.",
            type: "engagement",
          },
          {
            text: "I think it is important to understand what I read.",
            type: "attitude",
          },
          {
            text: "I only read if I have to",
            type: "engagement",
          },
          {
            text: "I think reading is important.",
            type: "engagement",
          },
          {
            text: "I enjoy reading",
            type: "attitude",
          },
        ];

        post_engagement_answers = [
          "Not at all like me",
          "Not much like me",
          "Can't decide",
          "Kind of like me",
          "A lot like me",
        ].reverse();
      Begin JS Routine:
        var question = post_engagement_questions[post_engagement_loop.thisN]
        currentPostEngagementQuestion = question.text
        currentPostEngagementType = question.type
        sliderLabels = post_engagement_answers.join(";")

        // what is the item type (passage, comp question, mini survey?)
        itemID                          = currentPostEngagementQuestion;

        //what is the set ID
        setID = "post_engagement"

        // change additional question text's centering and style
        questionTextPostEngagement.setAlignHoriz('left')
        questionTextPostEngagement.bold = true;
        pressSpacePostEngagement.setAlignHoriz('left')
        pressSpacePostEngagement.bold = true;

        // adjust slider vertical size depending on the number of options
        // get slider labels from the excel file
        console.log('slider size hyper pref before: ', sliderSize)

        //sliderLabels.unshift("Prefer not to answer");
        labelCount = sliderLabels.length;
        // if there are less then 3 options on the slider,
        // decrease the vertical size of the slider by half
        if (labelCount < 3){
            sliderSize[1] = (vsize*26/100)/2.5
        } else {
            sliderSize[1] = vsize*26/100;
        }
    TextComponent questionTextPostEngagement
      color [set every repeat] = $textColor
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = questionTextSize*y_scale
      pos [set every repeat] = (questionsXaxis, questionsTopYaxis)
      startVal [time (s)] = 0.0
      text [set every repeat] = $currentPostEngagementQuestion
      wrapWidth = wrapWidthText
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    TextComponent pressSpacePostEngagement
      color [set every repeat] = $textColor
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = questionTextSize*y_scale
      pos [set every repeat] = (questionsXaxis, questionsBottomYaxis)
      startVal [time (s)] = 0.0
      text [set every repeat] = Please press the button below to proceed after your choice.
      wrapWidth = wrapWidthText
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    PolygonComponent peradiobutton_1
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (0,0)
      shape = circle
      size [set every repeat] = (radiobutton_size, radiobutton_size)
      startVal [time (s)] = 0.0
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    PolygonComponent peradiobutton_2
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (0,0)
      shape = circle
      size [set every repeat] = (radiobutton_size, radiobutton_size)
      startVal [time (s)] = 0.0
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    PolygonComponent peradiobutton_3
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (0,0)
      shape = circle
      size [set every repeat] = (radiobutton_size, radiobutton_size)
      startVal [time (s)] = 0.0
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    PolygonComponent peradiobutton_4
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (0,0)
      shape = circle
      size [set every repeat] = (radiobutton_size, radiobutton_size)
      startVal [time (s)] = 0.0
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    PolygonComponent peradiobutton_5
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (0,0)
      shape = circle
      size [set every repeat] = (radiobutton_size, radiobutton_size)
      startVal [time (s)] = 0.0
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    SliderComponent questionsSliderPostEngagement
      borderColor = black
      color = black
      fillColor = black
      flip = True
      font [set every repeat] = $textFont
      forceEndRoutine = False
      granularity = 1
      letterHeight [set every repeat] = questionTextSize*y_scale
      pos [set every repeat] = sliderPosition
      size [set every repeat] = sliderSize
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3)
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    CodeComponent updateAndRegisterPostEngagement
      Code Type = JS
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      Begin JS Routine:
        ////////////////////////////////////////////////
        //// UPDATE SLIDER LABELS, SIZE, COLOR ETC. ////
        ////////////////////////////////////////////////

        // get slider labels from the excel file
        sliderLabels                        = sliderLabels.split(";");
        //sliderLabels.unshift("Prefer not to answer");
        labelCount                          = sliderLabels.length;
        sliderLabels                        = sliderLabels.reverse();

        // create tick marks so that data registry makes sense in terms of scores of each
        // label: start from 1 not 0.
        tickMarks                           = range(1,labelCount);

        // display shuffled labels as tick marks
        questionsSliderPostEngagement.setLabels(sliderLabels);

        // change ticks of the slider
        questionsSliderPostEngagement.setTicks(tickMarks);

        // change font of the slider text
        questionsSliderPostEngagement.setFontSize(labelTextSize*y_scale);

        // adjust slider's position and size
        questionsSliderPostEngagement._pos      = sliderPosition;
        questionsSliderPostEngagement._size     = sliderSize;

        // change slider's color and marker properties
        questionsSliderPostEngagement._lineColor = col_white // color of static circle ;

        // what are the maximum amount of radio buttons of this slider
        // count radiobutton_# components, now it is 9.
        labelPosition_y                     = Math.abs(sliderSize[1] / (labelCount-1));

        positions                           = [];

        maxLabels                           = 9;

        radiobutton_size                    = [sliderSize[0]* 1.15, sliderSize[0]* 1.15];

        evenLabelCount                      = ((labelCount % 2) === 0);
        // name of radio components
        radioComponentName                  = 'peradiobutton_';

        if (evenLabelCount) {
            console.log('here even label')
            // there is no middle label, so get the half of the distance
            // of labels and move on from there while positioning the radio buttons
            labelPosition_y                 = labelPosition_y / 2;

            // initialize label position coordinate multiplier
            positionMultiplier              = 1;

            // loop over number of labels
            for (var k = 0; k < labelCount; k++){

                // initialize label number index
                var buttonNo                = k + 1;

                if ((k % 2) === 0) {
                    // increase the position multipler at every odd number
                    // this increases the distance from the middle label every third label
                    if (k > 1) {

                        positionMultiplier  = positionMultiplier+2;
                    }
                    positions[k]            = [sliderPosition[0], sliderPosition[1]+(positionMultiplier*labelPosition_y)];

                } else{

                    positions[k]            = [sliderPosition[0], sliderPosition[1]-(positionMultiplier*labelPosition_y)];

                }
                // enter the position and size values into individual label radio buttons
                // position
                eval(radioComponentName + buttonNo + '._pos' +'= ['+positions[k][0] +', '+positions[k][1]+'];' );
                // size
                eval(radioComponentName + buttonNo + '._size' +'= ['+sliderSize[0]* 1.15+', '+sliderSize[0]* 1.15+'];' );
                // draw the changes
                eval(radioComponentName + buttonNo + '._autoDraw' +'='+true+';');
                // console.log('comprehension radio button'+buttonNo.toString(),eval(radioComponentName + buttonNo + '._pos' +'= ['+positions[k][0] +', '+positions[k][1]+'];' ));
            }

        } else {
                // if there are odd number of labels

                // there will be a middle label which should be placed at the
                // default position of the slider
                peradiobutton_1._pos         = [sliderPosition[0], sliderPosition[1]];
                peradiobutton_1._size        = radiobutton_size;

                eval(radioComponentName + 1 + '._pos' +'= ['+ sliderPosition[0] +','+ sliderPosition[1]+'];' );
                // size
                eval(radioComponentName + 1 + '._size' +'= ['+sliderSize[0]* 1.15+', '+sliderSize[0]* 1.15+'];' );

                // initialize label position coordinate multiplier
                positionMultiplier          = 0;

                // loop over labels
                console.error("label count", {labelCount})
                for (var k = 1; k < labelCount; k++){
                    // initialize label number index
                    var buttonNo = k + 1;

                    if ((k % 2) === 0) {

                        positions[k]        = [sliderPosition[0], sliderPosition[1]+(positionMultiplier*labelPosition_y)];

                    } else{
                        // increase the position multipler at every odd number
                        // this increases the distance from the middle label every third label
                        positionMultiplier  = positionMultiplier+1;
                        positions[k]        = [sliderPosition[0], sliderPosition[1]-(positionMultiplier*labelPosition_y)];

                    }
                    // console.log('uneven k',k);
                    // console.log('uneven positionMultiplier',positionMultiplier);
                    // enter the position and size values into individual label radio buttons
                    // position
                    eval(radioComponentName + buttonNo + '._pos' +'= ['+ positions[k][0] +','+ positions[k][1]+'];' );
                    // size
                    eval(radioComponentName + buttonNo + '._size' +'= ['+sliderSize[0]* 1.15+', '+sliderSize[0]* 1.15+'];' );
                    // draw the changes
                    eval(radioComponentName + buttonNo + '._autoDraw' +'='+true+';');

                    // console.log('comprehension radio button'+buttonNo.toString(),eval(radioComponentName + buttonNo + '._pos' +'= ['+positions[k][0] +', '+positions[k][1]+'];' ));
                }

            }


        //////////////////////////////////////////////////////////////////
        // initiate input monitoring for conditional next-page command
        // (next page command does not work unless participant chose one of
        // the labels.
        psychoJS.eventManager.clearEvents();
        clearEventAfterChoice = 1;


        // start Timer for question reaction time
        myClock.reset(); // reset the timer
        startTime = myClock.getTime();
      Each JS Frame:
        compChoice = questionsSliderPostEngagement.getRating();

        // create a for loop using length of labels and update these like that
        for (let i = 0; i < labelCount; i++) {
            //console.log('current label for wrapwidth',i)
            //console.log('type of I',typeof i.toString())
            questionsSliderPostEngagement._pixiLabels[i.toString()]._style._wordWrap = true
            questionsSliderPostEngagement._pixiLabels[i.toString()]._style._wordWrapWidth = wrapWidthText
        }
      End JS Routine:
        // get the selected option among the labels
        compChoiceText = sliderLabels[compChoice-1]; // -1 because label index starts with 0, tick mark starts with 1.



        // get reaction time from psychopy's mouse component
        mouselength             = mousePostEngagement.time.length;
        // get the mouse component's starting second
        mouse_tStart            = mousePostEngagement.tStart;
        // get 'next button's starting second
        button_tStart           = questionTextPostEngagement.tStart;
        // get the latest mouse click-- which terminates the loop
        validClick              = mousePostEngagement.time[mouselength-1];
        // add mouse's and button's starting seconds to the click RT, because it starts to count RT after these are displayed
        demographicRT           = validClick + mouse_tStart - button_tStart;

        // get the zoom level of browser
        var browserZoom     = window.outerWidth*100 / window.innerWidth;
        // format date
        registeryDate       = util.MonotonicClock.getDateStr();
        registeryDate       = formatDateTime(registeryDate);

        // register data
        data_setID.push(setID); // type of the set (AI or Human)
        data_itemID.push(itemID); // item ID is the unique ID assigned to each stimulus displayed on the screen
        data_trialType.push(trialType); // is this a test or a practice trial
        data_blockName.push(currentPostEngagementType); // what is the name of this block
        data_totalTrialIndex.push(totalTrialIterationIndex); // what is the trial number (total across all blocks)

        data_dateTime.push(registeryDate); // date and time
        data_zoomLevel.push(browserZoom);
        data_passageFont.push(currentFont); // what was the font used in this passage
        data_articleSkipType.push([]) // which button did they press (next or popup link)
        data_passageSpacing.push([]); // what was the spacing used in this passage

        // reaction time
        data_passageRT.push(demographicRT);
        // words per minute
        data_passageWPM.push([]);
        data_passageWordCount.push([]);

        data_compAccuracy.push([]); // empty because there is no accuracy during passages
        data_feedbackRating.push([]) // rating of the likert scale

        data_surveyRT.push(questionReactionTime); // time to respond to comprehension question
        data_compChoice.push(compChoiceText) // chosen option is registered as text
        // remove radio buttons so that they won't appear at the center in next trial
    ImageComponent nextButton_postEngagement
      image = next_button.png
      pos [set every repeat] = (buttonX,buttonY)
      size [set every repeat] = (buttonWidth,buttonHeight)
      startVal [condition] = questionsSliderPostEngagement.rating
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    MouseComponent mousePostEngagement
      clickable = nextButton_postEngagement
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [condition] = questionsSliderPostEngagement.rating
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  Routine hyperlink_preference
    CodeComponent hyperlink_preference_2
      Code Type = JS
      Begin JS Experiment:
        hyperlink_preference_answers = [
          "I strongly prefer hyperlinks",
          "I prefer hyperlinks",
          "I don’t have a preference",
          "I do not prefer hyperlinks",
          "I strongly do not prefer hyperlinks",
        ].reverse();
      Begin JS Routine:
        currenHyperlinkPrefernceQuestion = "My hyperlink preference is..."

        sliderLabels = hyperlink_preference_answers.join(";")

        // what is the item type (passage, comp question, mini survey?)
        itemID                          = currenHyperlinkPrefernceQuestion;

        //what is the set ID
        setID = "hyperlink_preference"

        // change additional question text's centering and style
        questionTextHyperlinkPreference.setAlignHoriz('left')
        questionTextHyperlinkPreference.bold = true;
        pressSpaceHyperlinkPreference.setAlignHoriz('left')
        pressSpaceHyperlinkPreference.bold = true;

        // adjust slider vertical size depending on the number of options
        // get slider labels from the excel file
        console.log('slider size hyper pref before: ', sliderSize)

        //sliderLabels.unshift("Prefer not to answer");
        labelCount = sliderLabels.length;
        // if there are less then 3 options on the slider,
        // decrease the vertical size of the slider by half
        if (labelCount < 3){
            sliderSize[1] = (vsize*26/100)/2.5
        } else {
            sliderSize[1] = vsize*26/100;
        }
    TextComponent questionTextHyperlinkPreference
      color [set every repeat] = $textColor
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = questionTextSize*y_scale
      pos [set every repeat] = (questionsXaxis, questionsTopYaxis)
      startVal [time (s)] = 0.0
      text [set every repeat] = $currenHyperlinkPrefernceQuestion
      wrapWidth = wrapWidthText
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    TextComponent pressSpaceHyperlinkPreference
      color [set every repeat] = $textColor
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = questionTextSize*y_scale
      pos [set every repeat] = (questionsXaxis, questionsBottomYaxis)
      startVal [time (s)] = 0.0
      text [set every repeat] = Please press the button below to proceed after your choice.
      wrapWidth = wrapWidthText
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    PolygonComponent hpbutton_1
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (0,0)
      shape = circle
      size [set every repeat] = (radiobutton_size, radiobutton_size)
      startVal [time (s)] = 0.0
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    PolygonComponent hpbutton_2
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (0,0)
      shape = circle
      size [set every repeat] = (radiobutton_size, radiobutton_size)
      startVal [time (s)] = 0.0
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    PolygonComponent hpbutton_3
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (0,0)
      shape = circle
      size [set every repeat] = (radiobutton_size, radiobutton_size)
      startVal [time (s)] = 0.0
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    PolygonComponent hpbutton_4
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (0,0)
      shape = circle
      size [set every repeat] = (radiobutton_size, radiobutton_size)
      startVal [time (s)] = 0.0
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    PolygonComponent hpbutton_5
      fillColor = white
      lineColor = black
      lineWidth = 2
      pos [set every repeat] = (0,0)
      shape = circle
      size [set every repeat] = (radiobutton_size, radiobutton_size)
      startVal [time (s)] = 0.0
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    SliderComponent questionsSliderHyperlinkPreference
      borderColor = black
      color = black
      fillColor = black
      flip = True
      font [set every repeat] = $textFont
      forceEndRoutine = False
      granularity = 1
      letterHeight [set every repeat] = questionTextSize*y_scale
      pos [set every repeat] = sliderPosition
      size [set every repeat] = sliderSize
      startVal [time (s)] = 0.0
      styles = radio
      ticks = (1, 2, 3)
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    CodeComponent updateAndRegisterHyperlinkPreference
      Code Type = JS
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      Begin JS Routine:
        ////////////////////////////////////////////////
        //// UPDATE SLIDER LABELS, SIZE, COLOR ETC. ////
        ////////////////////////////////////////////////

        // get slider labels from the excel file
        sliderLabels                        = sliderLabels.split(";");
        //sliderLabels.unshift("Prefer not to answer");
        labelCount                          = sliderLabels.length;
        sliderLabels                        = sliderLabels.reverse();

        // create tick marks so that data registry makes sense in terms of scores of each
        // label: start from 1 not 0.
        tickMarks                           = range(1,labelCount);

        // display shuffled labels as tick marks
        questionsSliderHyperlinkPreference.setLabels(sliderLabels);

        // change ticks of the slider
        questionsSliderHyperlinkPreference.setTicks(tickMarks);

        // change font of the slider text
        questionsSliderHyperlinkPreference.setFontSize(labelTextSize*y_scale);

        // adjust slider's position and size
        questionsSliderHyperlinkPreference._pos      = sliderPosition;
        questionsSliderHyperlinkPreference._size     = sliderSize;

        // change slider's color and marker properties
        questionsSliderHyperlinkPreference._lineColor = col_white // color of static circle ;

        // what are the maximum amount of radio buttons of this slider
        // count radiobutton_# components, now it is 9.
        labelPosition_y                     = Math.abs(sliderSize[1] / (labelCount-1));

        positions                           = [];

        maxLabels                           = 9;

        radiobutton_size                    = [sliderSize[0]* 1.15, sliderSize[0]* 1.15];

        evenLabelCount                      = ((labelCount % 2) === 0);
        // name of radio components
        radioComponentName                  = 'hpbutton_';

        if (evenLabelCount) {
            console.log('here even label')
            // there is no middle label, so get the half of the distance
            // of labels and move on from there while positioning the radio buttons
            labelPosition_y                 = labelPosition_y / 2;

            // initialize label position coordinate multiplier
            positionMultiplier              = 1;

            // loop over number of labels
            for (var k = 0; k < labelCount; k++){

                // initialize label number index
                var buttonNo                = k + 1;

                if ((k % 2) === 0) {
                    // increase the position multipler at every odd number
                    // this increases the distance from the middle label every third label
                    if (k > 1) {

                        positionMultiplier  = positionMultiplier+2;
                    }
                    positions[k]            = [sliderPosition[0], sliderPosition[1]+(positionMultiplier*labelPosition_y)];

                } else{

                    positions[k]            = [sliderPosition[0], sliderPosition[1]-(positionMultiplier*labelPosition_y)];

                }
                // enter the position and size values into individual label radio buttons
                // position
                eval(radioComponentName + buttonNo + '._pos' +'= ['+positions[k][0] +', '+positions[k][1]+'];' );
                // size
                eval(radioComponentName + buttonNo + '._size' +'= ['+sliderSize[0]* 1.15+', '+sliderSize[0]* 1.15+'];' );
                // draw the changes
                eval(radioComponentName + buttonNo + '._autoDraw' +'='+true+';');
                // console.log('comprehension radio button'+buttonNo.toString(),eval(radioComponentName + buttonNo + '._pos' +'= ['+positions[k][0] +', '+positions[k][1]+'];' ));
            }

        } else {
                // if there are odd number of labels

                // there will be a middle label which should be placed at the
                // default position of the slider
                peradiobutton_1._pos         = [sliderPosition[0], sliderPosition[1]];
                peradiobutton_1._size        = radiobutton_size;

                eval(radioComponentName + 1 + '._pos' +'= ['+ sliderPosition[0] +','+ sliderPosition[1]+'];' );
                // size
                eval(radioComponentName + 1 + '._size' +'= ['+sliderSize[0]* 1.15+', '+sliderSize[0]* 1.15+'];' );

                // initialize label position coordinate multiplier
                positionMultiplier          = 0;

                // loop over labels
                console.error("label count", {labelCount})
                for (var k = 1; k < labelCount; k++){
                    // initialize label number index
                    var buttonNo = k + 1;

                    if ((k % 2) === 0) {

                        positions[k]        = [sliderPosition[0], sliderPosition[1]+(positionMultiplier*labelPosition_y)];

                    } else{
                        // increase the position multipler at every odd number
                        // this increases the distance from the middle label every third label
                        positionMultiplier  = positionMultiplier+1;
                        positions[k]        = [sliderPosition[0], sliderPosition[1]-(positionMultiplier*labelPosition_y)];

                    }
                    // console.log('uneven k',k);
                    // console.log('uneven positionMultiplier',positionMultiplier);
                    // enter the position and size values into individual label radio buttons
                    // position
                    eval(radioComponentName + buttonNo + '._pos' +'= ['+ positions[k][0] +','+ positions[k][1]+'];' );
                    // size
                    eval(radioComponentName + buttonNo + '._size' +'= ['+sliderSize[0]* 1.15+', '+sliderSize[0]* 1.15+'];' );
                    // draw the changes
                    eval(radioComponentName + buttonNo + '._autoDraw' +'='+true+';');

                    // console.log('comprehension radio button'+buttonNo.toString(),eval(radioComponentName + buttonNo + '._pos' +'= ['+positions[k][0] +', '+positions[k][1]+'];' ));
                }

            }


        //////////////////////////////////////////////////////////////////
        // initiate input monitoring for conditional next-page command
        // (next page command does not work unless participant chose one of
        // the labels.
        psychoJS.eventManager.clearEvents();
        clearEventAfterChoice = 1;


        // start Timer for question reaction time
        myClock.reset(); // reset the timer
        startTime = myClock.getTime();
      Each JS Frame:
        compChoice = questionsSliderHyperlinkPreference.getRating();

        // create a for loop using length of labels and update these like that
        for (let i = 0; i < labelCount; i++) {
            //console.log('current label for wrapwidth',i)
            //console.log('type of I',typeof i.toString())
            questionsSliderHyperlinkPreference._pixiLabels[i.toString()]._style._wordWrap = true
            questionsSliderHyperlinkPreference._pixiLabels[i.toString()]._style._wordWrapWidth = wrapWidthText
        }
      End JS Routine:
        // get the selected option among the labels
        compChoiceText = sliderLabels[compChoice-1]; // -1 because label index starts with 0, tick mark starts with 1.



        // get reaction time from psychopy's mouse component
        mouselength             = mouseHyperlinkPreference.time.length;
        // get the mouse component's starting second
        mouse_tStart            = mouseHyperlinkPreference.tStart;
        // get 'next button's starting second
        button_tStart           = questionTextHyperlinkPreference.tStart;
        // get the latest mouse click-- which terminates the loop
        validClick              = mouseHyperlinkPreference.time[mouselength-1];
        // add mouse's and button's starting seconds to the click RT, because it starts to count RT after these are displayed
        demographicRT           = validClick + mouse_tStart - button_tStart;

        // get the zoom level of browser
        var browserZoom     = window.outerWidth*100 / window.innerWidth;
        // format date
        registeryDate       = util.MonotonicClock.getDateStr();
        registeryDate       = formatDateTime(registeryDate);

        // register data
        data_setID.push(setID); // type of the set (AI or Human)
        data_itemID.push(itemID); // item ID is the unique ID assigned to each stimulus displayed on the screen
        data_trialType.push(trialType); // is this a test or a practice trial
        data_blockName.push(setID); // what is the name of this block
        data_totalTrialIndex.push(totalTrialIterationIndex); // what is the trial number (total across all blocks)

        data_dateTime.push(registeryDate); // date and time
        data_zoomLevel.push(browserZoom);
        data_passageFont.push(currentFont); // what was the font used in this passage
        data_articleSkipType.push([]) // which button did they press (next or popup link)
        data_passageSpacing.push([]); // what was the spacing used in this passage

        // reaction time
        data_passageRT.push(demographicRT);
        // words per minute
        data_passageWPM.push([]);
        data_passageWordCount.push([]);

        data_compAccuracy.push([]); // empty because there is no accuracy during passages
        data_feedbackRating.push([]) // rating of the likert scale

        data_surveyRT.push(questionReactionTime); // time to respond to comprehension question
        data_compChoice.push(compChoiceText) // chosen option is registered as text
        // remove radio buttons so that they won't appear at the center in next trial
    ImageComponent nextButton_hyperlinkPreference
      image = next_button.png
      pos [set every repeat] = (buttonX,buttonY)
      size [set every repeat] = (buttonWidth,buttonHeight)
      startVal [condition] = questionsSliderHyperlinkPreference.rating
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    MouseComponent mouseHyperlinkPreference
      clickable = nextButton_hyperlinkPreference
      forceEndRoutineOnPress = valid click
      saveMouseState = on valid click
      startVal [condition] = questionsSliderHyperlinkPreference.rating
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  Routine pre_snellen
    CodeComponent initiateSnellenInstructions_2
      Code Type = JS
      Begin JS Experiment:
        currentEye = []
      Begin JS Routine:
        eyes = ["right", "left", "both"];

        trialType = "test_screening";
        blockName = "screening";
        snellenInstructions.setAlignHoriz("left");

        screeningInstructionText = ""
        chartInstructions = ""
        itemID = ""
        setID = ""
        screeningSize = []
        screeningImage = ""

        switch (snellen_trials.thisN) {
          case 0:
          case 1:{
                currentEye = eyes[snellen_trials.thisN];
                chartInstructions =
                "Make sure you are 14 inches away from the screen.\n\nCover your " +
                currentEye +
                " eye with your hand and identify the line on the chart that you can comfortably read.";
                screeningInstructionText = chartInstructions;

                itemID = "snellen_" + currentEye;
                //what is the set ID
                setID = "snellen_test";
                screeningSize = [snellenWidth, snellenHeight];
                screeningImage = "stimuli/screening_images/snellen_numbered.png";
                continueRoutine = false
                break;
            }
            case 2: {
                currentEye = eyes[snellen_trials.thisN];
                chartInstructions = "Make sure you are 14 inches away from the screen.\n\nWith no eyes covered, identify the line on the chart that you can comfortably read";
                screeningInstructionText = chartInstructions;

                itemID = "snellen_" + currentEye;
                //what is the set ID
                setID = "snellen_test";
                screeningSize = [snellenWidth, snellenHeight];
                screeningImage = "stimuli/screening_images/snellen_numbered.png";
                continueRoutine = false
                break;
            }
            case 3: {
                screeningInstructionText = "Please reuse your tape measurer to ensure you are still sited 14 inches from the screen and try your best to not move.\n\nPress the button below to continue when ready."
                chartInstructions           = "Identify the line on the chart that you can comfortably read."
                itemID                          = "pelli-robson_test"
                //what is the set ID
                setID                           = "pelli-robson_test"
                screeningSize                   = [pelliWidth, pelliHeight]
                screeningImage                  = "stimuli/screening_images/pelli_robson_numbered.jpg"
                break;
            }
        }

        console.error({screeningInstructionText});
  Routine seatingInstructions
    KeyboardComponent seating_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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    CodeComponent seatingInstructionsCode
      Code Type = JS
      Begin JS Routine:
        seatingInstructionsText.setAlignHoriz("left");
    TextComponent seatingInstructionsText
      color = black
      letterHeight [set every repeat] = instructionTextSize*y_scale
      pos [set every repeat] = (xAxisCenter, 0)
      startVal [time (s)] = 0.0
      wrapWidth = wrapWidthText
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      text:
        This experiment must be completed 14 inches from the screen.

        At this time, please use a ruler to ensure you are positioned 14 inches away from the screen.

        Once you have measured, remain at this distance throughout the experiment.

        Press the space button to continue
  Routine trouble_with_test
    TextboxComponent troubleFillBox
      alignment = center-left
      anchor = center-left
      bold = False
      borderColor = black
      borderWidth = 30
      color = -0.5373, -0.5608, -0.5608
      editable = True
      fillColor = white
      font [set every repeat] = $textFont
      letterHeight = 25
      pos [set every repeat] = textboxPosition
      size [set every repeat] = textboxSize
      startVal [time (s)] = 0.0
      units = pix
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    CodeComponent getTroubleText
      Code Type = JS
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      Begin JS Routine:
        psychoJS.eventManager.clearEvents();
        clearEventAfterChoice = 1;
        //troubleFillBox.refresh()

        troubleWithTest.setAlignHoriz('left')
        pressSpaceTrouble.setAlignHoriz('left')


        // start Timer for question reaction time
        myClock.reset(); // reset the timer
        startTime = myClock.getTime();
      Each JS Frame:
        // get the text inside the text box
        textInput = troubleFillBox._pixi.text;
        textInput = textInput.trim();


        anyCharacterTyped = (textInput.length >= 1);

        currentTime = myClock.getTime();
        twoSecondElapsed = currentTime-startTime >=keyboardPauseDuration;
        if (twoSecondElapsed===true){
            if (anyCharacterTyped) {
                var _pj;

                function _pj_snippets(container) {
                    function in_es6(left, right) {
                        if (((right instanceof Array) || ((typeof right) === "string"))) {
                            return (right.indexOf(left) > (- 1));
                        } else {
                            if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                                return right.has(left);
                            } else {
                                return (left in right);
                            }
                        }
                    }
                    container["in_es6"] = in_es6;
                    return container;
                }

                _pj = {};
                _pj_snippets(_pj);
                keys = psychoJS.eventManager.getKeys();
                console.log(keys);
                    if (keys.length) {
                        if (_pj.in_es6("return", keys)) {
                            continueRoutine = false;
                        } else {
                                psychoJS.eventManager.clearEvents();
                            }
                    }
            } else {
                    psychoJS.eventManager.clearEvents();
                }
        }
      End JS Routine:
        // get browser zoom
        browserZoom = window.outerWidth*100 / window.innerWidth;

        // format date
        registeryDate = util.MonotonicClock.getDateStr()
        registeryDate = formatDateTime(registeryDate)

        // register data
        data_setID.push("troubleWithTest"); // type of the set (AI or Human)
        data_itemID.push("troubleWithTest"); // item ID is the unique ID assigned to each stimulus displayed on the screen
        data_trialType.push(trialType); // is this a test or a practice trial
        data_blockName.push("troubleWithTest"); // what is the name of this block
        data_totalTrialIndex.push("troubleWithTest"); // what is the trial number (total across all blocks)

        data_dateTime.push(registeryDate); // date and time
        data_zoomLevel.push(browserZoom);
        data_passageFont.push(currentFont); // what was the font used in this passage
        data_articleSkipType.push([]) // which button did they press (next or popup link)

        data_passageRT.push([]); // words per minute
        data_passageWPM.push([]); // words per minute
        data_passageWordCount.push([]);
        data_passageSpacing.push([]); // what was the spacing used in this passage


        data_compAccuracy.push([]); // empty because there is no accuracy during passages
        data_feedbackRating.push([]) // rating of the likert scale

        data_surveyRT.push(questionReactionTime); // time to respond to comprehension question
        data_compChoice.push(textInput) // chosen option is registered as text
    TextComponent troubleWithTest
      color [set every repeat] = $textColor
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = questionTextSize*y_scale
      pos [set every repeat] = (xAxisCenter,questionsTopYaxis)
      startVal [time (s)] = 0.0
      text [set every repeat] = Did you encounter any issues or have any feedback you’d like to share about your experience completing the experiment?
      wrapWidth = wrapWidthText
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    TextComponent pressSpaceTrouble
      color [set every repeat] = $textColor
      font [set every repeat] = $textFont
      letterHeight [set every repeat] = questionTextSize*y_scale
      pos [set every repeat] = (xAxisCenter, questionsBottomYaxis)
      startVal [time (s)] = 0.0
      text [set every repeat] = "Please press the ENTER to advance to the next page after you type in."
      wrapWidth = wrapWidthText
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  Routine teaching_links
    CodeComponent teachingScrolling
      Code Type = JS
      Begin JS Routine:
        ydifference = (vsize - imagesize[1])/2
        xdifference = (hsize - imagesize[0])/2

        // at first display, setup the article such that its borders
        // meet screen's vertical size, then continue with the scrolled position

        imageY = ydifference;
      Each JS Frame:
        document.body.style.zoom = "100%";

        // register current Y position
        oldY = teaching_example_image.pos[1];
        // estimate change in Y
        deltaY = (teaching_link_mouse.getWheelRel()[1]);
        // add to image position
        imageY = (oldY + deltaY);

        if (imageY != oldY) {
            // print coordinates and bounds for debugging
        //    console.log('new y, y difference, condition :', imageY, ydifference, imageY>=ydifference*2)
        //    console.log('abs(newy-oldy), abs(ydiff*2), condition :', Math.abs(imageY-oldY), Math.abs(ydifference*3), (Math.abs(imageY - oldY) < (Math.abs(ydifference*2))))
            // change img position if 1) it does not exceed the upper limit, 2) lower limit of image
            if ((imageY >= ydifference*3) && (Math.abs(imageY - ydifference) <= (Math.abs(ydifference*4)))) {
                console.log('old y, new y: ',oldY,imageY)
                // change image position
                teaching_example_image.pos = [0, imageY];
                }
        }
    MouseComponent teaching_link_mouse
      clickable = teachingLinksButton
      forceEndRoutineOnPress = valid click
      newClicksOnly = False
      saveMouseState = on click
      startVal [time (s)] = 3.0
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    ImageComponent teaching_example_image
      image [set every repeat] = stimuli/teaching_link.jpg
      pos [set every repeat] = (0,imageY)
      size [set every repeat] = [2560, 2020]
      startVal [time (s)] = 0.0
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    ImageComponent teachingLinksButton
      image = next_button.png
      pos [set every repeat] = (buttonX,buttonY)
      size [set every repeat] = (buttonWidth,buttonHeight)
      startVal [time (s)] = 0
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
Flow
  Routine initialize
  Routine preCheckScreen
  LoopInitiator set_file_check loopType="TrialHandler"
    Selected rows = 0:7
    conditionsFile = stimuli/stimulus_set.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'setID': 'GRD12_SET0009', 'trialType': 'test', 'trialproperties': 'pcount4;qcount5;mqcount2;randomizedpassages0;randomizedquestions0', 'pas1ID': 'RX000009a', 'pas2ID': 'RX000009b', 'pas3ID': 'RX000009c', 'pas4ID': 'RX000009d', 'pas1text': 'Between 13,000 and 12,600 years ago, members of the Clovis culture appeared in North America, where they made and used distinctive stone-tipped spears to hunt mammoth, bison and mastodon. Until recently, all that archeologists knew about the Clovis people came from studying their tools, which have been unearthed at wide-ranging sites across the country. No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,
      {'setID': 'GRD12_SET0010', 'trialType': 'test', 'trialproperties': 'pcount4;qcount5;mqcount2;randomizedpassages0;randomizedquestions0', 'pas1ID': 'RX000010a', 'pas2ID': 'RX000010b', 'pas3ID': 'RX000010c', 'pas4ID': 'RX000010d', 'pas1text': 'It was a light, spring Sunday in Brooklyn, New York. Doug and his wife, Eve, were enjoying it with their copy of the Sunday New York Times newspaper, which they would pleasingly read section by section over a hearty breakfast of eggs, bacon, and, of course, some warm and soft New York City bagels. Both Doug and Eve were hard working people, having to commut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,
      {'setID': 'GRD12_SET0011', 'trialType': 'test', 'trialproperties': 'pcount4;qcount5;mqcount2;randomizedpassages0;randomizedquestions0', 'pas1ID': 'RX000011a', 'pas2ID': 'RX000011b', 'pas3ID': 'RX000011c', 'pas4ID': 'RX000011d', 'pas1text': "Two very famous American comedians have something very interesting in common with a former American president. Stephen Colbert and Conan O'Brien, who, as of 2013, are considered two of the funniest Americans, host their own late night talk shows and are among the funniest men in the country. They each also have ancestors who were Irish and both have publicl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,
      {'setID': 'GRD12_SET0012', 'trialType': 'test', 'trialproperties': 'pcount4;qcount5;mqcount2;randomizedpassages0;randomizedquestions0', 'pas1ID': 'RX000012a', 'pas2ID': 'RX000012b', 'pas3ID': 'RX000012c', 'pas4ID': 'RX000012d', 'pas1text': "Water makes up nearly three-quarters of the Earth's surface, but it does more than just cover our planet - it also plays a vital role in shaping it. Consider the Grand Canyon. Measuring 277 miles long, 18 miles wide and more than 1 mile deep, it is considered one of the Seven Natural Wonders of the World and attracts more than 5 million visitors per year. T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
    LoopInitiator get_fonts loopType="TrialHandler"
      conditions = [{'stimulus_file': 'stimuli/stimulus_set', 'practiceTrials': 1, 'testTrials': 8, 'testFonts': 'Arial;Georgia;Merriweather;Open Sans;Poppins;Roboto;Source Serif Pro;Times', 'practiceFonts': 'Open Sans', 'spacingLevels': '-0.05;0;0.05'}]
      conditionsFile = blocks/blocks_1.xlsx
      isTrials = False
      loopType = sequential
      nReps = 1
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      Routine merge_fonts
      LoopInitiator loop_fonts loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = fontCount
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        LoopInitiator loop_spacings loopType="TrialHandler"
          isTrials = False
          loopType = sequential
          nReps = linkCount
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          LoopInitiator screens loopType="TrialHandler"
            isTrials = False
            loopType = random
            nReps = screenCount
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            Routine checkResources
          LoopTerminator screens
        LoopTerminator loop_spacings
      LoopTerminator loop_fonts
    LoopTerminator get_fonts
  LoopTerminator set_file_check
  LoopInitiator screenScaleTrials loopType="TrialHandler"
    loopType = sequential
    nReps = 2
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    Routine creditCardInstructions
    Routine screenScale
    Routine scaleBlank
  LoopTerminator screenScaleTrials
  Routine generalInstructions2
  Routine informedConsent1
  Routine seatingInstructions
  LoopInitiator stimulus_listD loopType="TrialHandler"
    Selected rows = 0
    conditionsFile = stimuli/demographics.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'setID': 'demographics', 'trialType': 'survey', 'trialproperties': 'likertcount1;textboxcount14;randomizedquestions0', 'ques1ID': 'post_survey_question', 'ques1text': 'hyperlinkPreference;If you read information in the hyperlinks, did they help you understand the main article better?', 'ques1label': 'Strongly Agree;Agree;Neutral;Disagree;Strongly Disagree', 'textbox1ID': 'textbox1', 'textbox2ID': 'textbox2', 'textbox3ID': 'textbox3', 'textbox4ID': 'textbox4', 'textbox5ID': 'textbox5', 'textbox6ID': 'textbox6', 'textbox7ID': 'textbox7', 'textbox8ID': 'textbox8', 'textbox9ID': 'textbox9', 'tex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,
      {'setID': None, 'trialType': None, 'trialproperties': None, 'ques1ID': None, 'ques1text': None, 'ques1label': None, 'textbox1ID': None, 'textbox2ID': None, 'textbox3ID': None, 'textbox4ID': None, 'textbox5ID': None, 'textbox6ID': None, 'textbox7ID': None, 'textbox8ID': None, 'textbox9ID': None, 'textbox10ID': None, 'textbox11ID': None, 'textbox12ID': None, 'textbox13ID': None, 'textbox14ID': None, 'textbox1text': None, 'textbox2text': None, 'textbox3text': None, 'textbox4text': None, 'textbox5text': None, 'textbox6text': None, 'textbox7text': None, 'textbox8text': None, 'textbox9text': None, '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,
      {'setID': None, 'trialType': None, 'trialproperties': None, 'ques1ID': None, 'ques1text': None, 'ques1label': None, 'textbox1ID': None, 'textbox2ID': None, 'textbox3ID': None, 'textbox4ID': None, 'textbox5ID': None, 'textbox6ID': None, 'textbox7ID': None, 'textbox8ID': None, 'textbox9ID': None, 'textbox10ID': None, 'textbox11ID': None, 'textbox12ID': None, 'textbox13ID': None, 'textbox14ID': None, 'textbox1text': None, 'textbox2text': None, 'textbox3text': None, 'textbox4text': None, 'textbox5text': None, 'textbox6text': None, 'textbox7text': None, 'textbox8text': None, 'textbox9text': None, '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,
      {'setID': None, 'trialType': None, 'trialproperties': None, 'ques1ID': None, 'ques1text': None, 'ques1label': None, 'textbox1ID': None, 'textbox2ID': None, 'textbox3ID': None, 'textbox4ID': None, 'textbox5ID': None, 'textbox6ID': None, 'textbox7ID': None, 'textbox8ID': None, 'textbox9ID': None, 'textbox10ID': None, 'textbox11ID': None, 'textbox12ID': None, 'textbox13ID': None, 'textbox14ID': None, 'textbox1text': None, 'textbox2text': None, 'textbox3text': None, 'textbox4text': None, 'textbox5text': None, 'textbox6text': None, 'textbox7text': None, 'textbox8text': None, 'textbox9text': None, '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
    Routine setTrialParametersDemographic
    Routine demographicInstructionsRoutine
    LoopInitiator textbox_trials loopType="TrialHandler"
      loopType = random
      nReps = textboxCount
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      Routine textBoxQuestions
    LoopTerminator textbox_trials
  LoopTerminator stimulus_listD
  Routine screening_instructions
  LoopInitiator snellen_trials loopType="TrialHandler"
    loopType = random
    nReps = 4
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    Routine pre_snellen
    Routine snellen_instructions
    Routine snellen_test
    Routine waitPopup
  LoopTerminator snellen_trials
  Routine memory_general_instructions
  LoopInitiator memory_trials loopType="TrialHandler"
    conditionsFile = stimuli/memory/memory_stimulus_sheet.xlsx
    loopType = sequential
    nReps = 1
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    Routine memory_initialize
    Routine memory_specific_instructions
    Routine memory_display_list
    LoopInitiator memory_answer_loop loopType="TrialHandler"
      loopType = sequential
      nReps = answerCount
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      Routine memory_response
      Routine memory_interval
    LoopTerminator memory_answer_loop
  LoopTerminator memory_trials
  Routine general_instructions
  Routine teaching_links
  Routine practiceInstructions
  LoopInitiator blocks loopType="TrialHandler"
    conditions = [{'exp_blocks': 'stimuli/newsetformat.xlsx', 'practiceTrials': 1, 'testTrials': 6, 'fontsInvolved': 'RobotoFlex_wght200;RobotoFlex_wght400;RobotoFlex_wght600'}]
    conditionsFile = blocks/blocks_1.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine setBlockParameters
    LoopInitiator stimulus_list loopType="TrialHandler"
      Selected rows = $passageSetOrder
      conditionsFile = $stimulus_file_counterbalanced
      loopType = sequential
      nReps = 1
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      Routine setTrialParameters
      LoopInitiator word_list_loop loopType="TrialHandler"
        conditionsFile = $linksheet
        loopType = sequential
        nReps = 1
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        Routine getWords
      LoopTerminator word_list_loop
      Routine instruction_proxy
      LoopInitiator first_textbox_trials loopType="TrialHandler"
        loopType = random
        nReps = proxyCount
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        Routine trial_textbox
      LoopTerminator first_textbox_trials
      Routine instructions_passage
      LoopInitiator popup_loop loopType="TrialHandler"
        loopType = sequential
        nReps = loopCount
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        Routine displayArticle
        LoopInitiator popup_selection loopType="TrialHandler"
          Selected rows = $popupIndex
          conditionsFile = $linksheet
          loopType = sequential
          nReps = enablePopup
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          Routine displayPopup
        LoopTerminator popup_selection
        Routine waitPopup
      LoopTerminator popup_loop
      Routine instructions_questions
      LoopInitiator question_trials loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = questionCount
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        Routine displayQuestions
      LoopTerminator question_trials
      LoopInitiator feedback_trials loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = feedbackCount
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        Routine displayFeedbackSurvey
      LoopTerminator feedback_trials
      Routine findFastest
    LoopTerminator stimulus_list
  LoopTerminator blocks
  Routine preferenceInstructionsRoutine
  Routine font_preference
  Routine hyperlink_preference
  LoopInitiator post_engagement_loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 6
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    Routine post_engagement
  LoopTerminator post_engagement_loop
  LoopInitiator post_survey_loop loopType="TrialHandler"
    loopType = sequential
    nReps = 5
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    Routine displayDemographicQuestions
  LoopTerminator post_survey_loop
  Routine trouble_with_test
  Routine writeDataToFile
  Routine finalInstructions
